<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ViewMatrix</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Translate</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RodentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Item1" />
                <Property Name="Y" Selector="Item2" />
                <Property Name="Z" Selector="Item3" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Translate">
                <gl:Order>Prepend</gl:Order>
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>-0.180000082</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as ViewMatrix,
Item2 as ProjectionMatrix,
Item1.Row3.Yzw as Light)</scr:Expression>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>