WorkflowBuilder(Version=2.8.1)
GroupWorkflow __Init__
    BehaviorSubject<System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single,System.Single)> ArenaBounds
    PublishSubject<CricketVR.VrElement> RodentPositionUpdate
    BehaviorSubject<CricketVR.VrElement> RodentPosition

    DoubleProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TimestampStream

    SubscribeSubject ResetRodentPosition
    -> MulticastSubject RodentPosition

    BehaviorSubject<System.Int32> "Lickport Open Duration"
    BehaviorSubject<System.Single> ArmGainEating
    BehaviorSubject<System.Single> ArmGainTrial
    PublishSubject<OpenCV.Net.Point2f> UpdateArmCartPosition
    BehaviorSubject<CricketVR.VrElement> ResetRodentPosition
    PublishSubject<OpenCV.Net.IplImage> SimulatedEnv
    PublishSubject<Bonsai.Osc.Message> Send_UDP
    BehaviorSubject<OpenCV.Net.Point2f> CurrentArmPosition

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    Disable ExternalizedMapping(X(DisplayName=SoftMinimum, Category=SoftRadialLimits), Y(DisplayName=SoftMaximum, Category=SoftRadialLimits)) => #18
    Disable IntProperty(Value=0) => #19
    #18, #19 -> Disable Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0.27)
    -> Disable BehaviorSubject RadialLimits

    Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> BehaviorSubject UpdateArmPolarPosition

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        Bonsai.Shaders.CreateWindow
          Width=7680
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Hidden
          WindowState=Fullscreen
          DisplayDevice=Fourth
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=shelter
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\shelter.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageCubemap
              Name=cube
              FaceSize=nil
              InternalFormat=Rgb
              MinFilter=Linear
              MagFilter=Linear
              PositiveX=Textures\CubeMapTextures\right.png
              NegativeX=Textures\CubeMapTextures\left.png
              PositiveY=Textures\CubeMapTextures\ceil.png
              NegativeY=Textures\CubeMapTextures\floor.png
              PositiveZ=Textures\CubeMapTextures\back.png
              NegativeZ=Textures\CubeMapTextures\front.png
              ColorType=Unchanged
              FlipMode=Horizontal
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Brown
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Brown.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Black
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Black.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=uv_box
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Nearest
              MagFilter=Nearest
              FileName=Textures\uv.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Orange
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Orange.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Green
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Green.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Blue
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Blue.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=CubeMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
              FramebufferAttachments=""
              VertexShader=Shaders\CubeMap.vert
              FragmentShader=BonVision:Shaders.SphereMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=TransparentTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\TransparentTexturedModel.frag
        -> Bonsai.Shaders.MeshResources
          Meshes
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=monkey, FileName=resources\Suzanne.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=resources\cube.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cricket, FileName=resources\cricket.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=box, FileName=resources\box.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=resources\whitesphere.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=shelter, FileName=resources\shelter.obj)
        -> Disable Bonsai.Shaders.Rendering.SceneResources
          Scenes(SceneConfiguration(Name=scene, FileName=resources\scene.blend))
          ShaderName=Model
          PostProcessSteps=Triangulate
          Scale=1
          RotationX=90
          RotationY=180
          RotationZ=0
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        Disable Bonsai.Shaders.UpdateFrame => #8
        -> Disable PublishSubject dt_event
        #8 -> Disable BufferTime(TimeSpan=PT1S)
        -> Disable MemberSelector(Selector=Count)

        SubscribeSubject Draw3DStim
        -> IncludeWorkflow
          Path=Extensions\RenderCubeMapTexture.bonsai
          CubemapTexture=cube
          TranslationX=0
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cube

        ExternalizedMapping(IntrinsicsFileName(DisplayName=LeftIntrinsics, Category="Left Screen"), ExtrinsicsFileName(DisplayName=LeftExtrinsics, Category="Left Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml) => #15
        Bonsai.Shaders.RenderFrame
        -> PublishSubject ScreenFrameEvents
        -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #18
        SubscribeSubject YRotationAngle
        -> Bonsai.Shaders.Delay(DueTime=PT0S)
        -> PropertyMapping(YRotation) => #21
        #18, #21 -> IncludeWorkflow(Path=Extensions\ApplyWorldRotation.bonsai, YRotation=0)
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
        #15, #24 -> GroupWorkflow LeftView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=90, Z=0), Translation(X=-0.3, Y=0, Z=0))
            -> PublishSubject SyncView
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=FrontIntrinsics, Category="Front Screen"), ExtrinsicsFileName(DisplayName=FrontExtrinsics, Category="Front Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\front_intrinsics.yml, ExtrinsicsFileName=Calibration\front_extrinsics.yml) => #27
        #27, #24 -> GroupWorkflow FrontView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=RightIntrinsics, Category="Right Screen"), ExtrinsicsFileName(DisplayName=RightExtrinsics, Category="Right Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml) => #30
        #30, #24 -> GroupWorkflow RightView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=-90, Z=0), Translation(X=0.3, Y=0, Z=0))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=BackIntrinsics, Category="Back Screen"), ExtrinsicsFileName(DisplayName=BackExtrinsics, Category="Back Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\back_intrinsics.yml, ExtrinsicsFileName=Calibration\back_extrinsics.yml)
        -> Bonsai.Shaders.Delay(DueTime=PT0S) => #34
        #34, #24 -> GroupWorkflow BackView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=180, Z=0), Translation(X=0, Y=0, Z=0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        -> PublishSubject PostDrawing
        #24 -> Disable GroupWorkflow BottomView
            WorkflowInput Source1 => #0
            Disable WorkflowInput Source1
            -> Disable PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=0.543744
              Height=0.302616
              Rotation(X=90.000002504478161, Y=0, Z=0)
              Translation(X=0, Y=-0.05, Z=0)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput

        GroupWorkflow SyncQuad
            SubscribeSubject PostDrawing
            -> Int64Property(Value=1)
            -> Accumulate
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
            -> Bonsai.Shaders.UpdateRenderState(RenderState="")
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #6
            #5 -> PropertyMapping(ColorA) => #7
            #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.012
              ExtentY=0.05
              LocationX=-0.964
              LocationY=0.9
              Layer=10
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=0
            -> WorkflowOutput

        GroupWorkflow BrightnessControl
            SubscribeSubject PostDrawing
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #1
            ExternalizedMapping(ColorR, ColorG, ColorB, ColorA) => #2
            #1, #2 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=2
              ExtentY=2
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ColorR=0.8
              ColorG=0.8
              ColorB=0.8
              ColorA=0
            -> WorkflowOutput

    GroupWorkflow SWC_Arm
        BehaviorSubject<Bonsai.Harp.HarpMessage> ArmCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject ArmEvents

        ExternalizedMapping(X(DisplayName=SoftMinimum, Category=SoftRadialLimits), Y(DisplayName=SoftMaximum, Category=SoftRadialLimits)) => #4
        IntProperty(Value=0) => #5
        #4, #5 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0.18)
        -> BehaviorSubject RadialLimits

        SubscribeSubject ArmEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=33)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedFloat, IsArray=true))
        -> MemberSelector(Selector=Value) => #11
        -> Index(Operand=IntProperty(Value=0)) => #12
        #11 -> Index(Operand=IntProperty(Value=1)) => #13
        #12, #13 -> Zip
        -> PublishSubject ArmEncoderPosition

        GroupWorkflow SetAngleMode
            ExternalizedMapping(Value(DisplayName=AngleMode))
            -> IntProperty(Value=1)
            -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=36, PayloadType=U8))
            -> WorkflowOutput
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=Magnitude, Category=ReferencePosition), Y(DisplayName=Angle, Category=ReferencePosition))
        -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> BehaviorSubject ReferenceArmPosition
        -> CricketVR.CreateArmMessage(Address=34)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=HardMinimum, Category=HardRadialLimits), Y(DisplayName=HardMaximum, Category=HardRadialLimits))
        -> Bonsai.Vision.CreatePoint2f(X=0.015, Y=0.270001)
        -> CricketVR.CreateArmMessage(Address=35)
        -> MulticastSubject ArmCommands

    GroupWorkflow BehaviorBoard
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM2)
        -> PublishSubject BehaviorEvents

    GroupWorkflow Cameras
        ExternalizedMapping(CameraTriggerFrequency, CameraTriggerFrequency2)
        -> GroupWorkflow CameraController
            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency))
            -> IntProperty(Value=50)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency(BufferSize=nil)

            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency2))
            -> IntProperty(Value=100)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency2(BufferSize=nil)

            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
            Source2=#9 -> PublishSubject FrameEvents

            SubscribeSubject BehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame) => #12
            Source2=#12 -> PublishSubject FrameEvents2

            SubscribeSubject BehaviorEvents
            -> Take(Count=1)
            -> Delay(DueTime=PT0.01S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras="CameraOutput0 CameraOutput1"))
            -> MulticastSubject BehaviorCommands
            -> SelectMany SetFrameRate0
                SubscribeSubject CameraTriggerFrequency
                -> InputMapping(Camera0Frequency(Selector=it))
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=50))
                -> WorkflowOutput
            -> MulticastSubject BehaviorCommands
            -> Delay(DueTime=PT0.01S)
            -> SelectMany SetFrameRate2
                SubscribeSubject CameraTriggerFrequency2
                -> InputMapping(Camera1Frequency(Selector=it))
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera1FrequencyPayload(Camera1Frequency=100))
                -> WorkflowOutput
            -> MulticastSubject BehaviorCommands
            -> Delay(DueTime=PT0.1S)
            -> MulticastSubject StartCameras

            GroupWorkflow StartStopCameras
                BehaviorSubject<System.Object> StartCameras
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras="CameraOutput0 CameraOutput1")) => #1
                BehaviorSubject<System.Object> StopCameras
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras="CameraOutput0 CameraOutput1")) => #3
                Source1=#1, Source3=#3 -> Merge
                -> WorkflowOutput
            -> MulticastSubject BehaviorCommands

        GroupWorkflow Spinnaker1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=22067283, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
            -> ObserveOn(Scheduler=ThreadPoolScheduler)
            -> PublishSubject Spinnaker1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker2
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=22067305, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1)
            -> ObserveOn(Scheduler=TaskPoolScheduler)
            -> PublishSubject Spinnaker2FrameEvents
            -> WorkflowOutput

        Disable GroupWorkflow Pylon1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> Aeon.Acquisition.PylonCapture(SerialNumber=21421610, ParameterFile=Calibration\acA1300-60gmNIR_21421610.pfs, GrabStrategy=OneByOne)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                new(
                  Value.Image as Image,
                  new(Value.GrabResult.Timestamp as Timestamp,
                      Value.GrabResult.ImageNumber as ImageNumber,
                      Value.GrabResult.SkippedImageCount as SkippedImageCount) as GrabResult)
                  as Value)
            -> Disable ClonePylonGrab
            -> Disable CricketVR.ObserveOnTaskPool
            -> PublishSubject Pylon1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker3
            SubscribeSubject FrameEvents2 => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23534425, ColorProcessing=Default, ExposureTime=9000, Gain=0, Binning=2)
            -> ObserveOn(Scheduler=TaskPoolScheduler)
            -> PublishSubject Spinnaker3FrameEvents
            -> WorkflowOutput

        Disable GroupWorkflow Arducam
            SubscribeSubject FrameEvents => #0
            Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
            -> PublishSubject ArduCamSource => #2
            #0, #2 -> WithLatestFrom
            -> PublishSubject ArducamFrameEvents
            -> WorkflowOutput

            Disable SubscribeSubject ArducamFrameEvents
            -> Disable IncludeWorkflow LogName(Path=Extensions\LogVideoArducam.bonsai, Name=LogName)

            SubscribeSubject ArduCamSource
            -> BufferTime(TimeSpan=PT1S)
            -> MemberSelector(Selector=Count) => #10
            SubscribeSubject FrameEvents
            -> BufferTime(TimeSpan=PT1S)
            -> MemberSelector(Selector=Count) => #13
            #10, #13 -> Zip
            -> Subtract

    GroupWorkflow TimestampStream
        SubscribeSubject BehaviorEvents
        -> Disable Bonsai.Harp.FilterMessage(MessageType=Event, Address=44)
        -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=44))
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=false))
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject TimestampStream

    GroupWorkflow MouseSensors
        Bonsai.Shaders.Input.Mouse(Index=nil) => #0
        ExternalizedMapping(DeviceId(DisplayName=SideMouseID, Category=MouseID)) => #1
        #0, #1 -> WinRawMouse(DeviceId=65607)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        ExternalizedMapping(Value(DisplayName=SideMouseGain, Category=Gain)) => #5
        #4, #5 -> Multiply(Operand=DoubleProperty(Value=2.6205926323519098E-05))
        -> PublishSubject SideMouse
        ExternalizedMapping(DeviceId(DisplayName=ForwardMouseID, Category=MouseID)) => #8
        #0, #8 -> WinRawMouse(DeviceId=65603)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #11
        ExternalizedMapping(Value(DisplayName=ForwardMouseGain, Category=Gain)) => #12
        #11, #12 -> Multiply(Operand=DoubleProperty(Value=-2.6205926323519098E-05))
        -> PublishSubject ForwardMouse

    GroupWorkflow Audio
        PublishSubject<System.Int32> PlayAudioStim
        -> BehaviorSubject WaveformIndex

        PublishSubject<System.Int32> StopAudioStim

        GroupWorkflow AudioSettings
            ExternalizedMapping(Value(DisplayName=AnalogAuditoryThreatFreq))
            -> IntProperty(Value=15000) => #1
            ExternalizedMapping(Value(DisplayName=AnalogAuditoryThreatAmplitude))
            -> FloatProperty(Value=10) => #3
            ExternalizedMapping(Value(DisplayName=AuditoryThreatMaxDur))
            -> TimeSpanProperty(Value=PT9S) => #5
            #1, #3, #5 -> CombineLatest
            -> BehaviorSubject AuditoryThreatParams
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=SampleRate_AnalogAudio))
            -> IntProperty(Value=300000)
            -> Take(Count=1) => #11
            ExternalizedMapping(Value(DisplayName=BufferSize_AnalogAudio))
            -> IntProperty(Value=3000)
            -> Take(Count=1) => #14
            #11, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SampleRate,
                it.Item2 as BufferLength
                )
            -> AsyncSubject AuditoryAOParams

            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=SampleRate)
            -> PropertyMapping(SampleRate) => #20
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(BufferLength) => #23
            #20, #23 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=100, Waveform=Sine, SampleRate=300000, Amplitude=0, Offset=0, Phase=0)
            -> PublishSubject SwClockSourceAudio

            BehaviorSubject<OpenCV.Net.Mat> AudioPlayback => #26
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=SampleRate)
            -> PropertyMapping(SampleRate) => #29
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(BufferSize) => #32
            #26, #29, #32 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=300000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=3000
              Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

        GroupWorkflow GenerateWaveforms
            Defer "Approaching auditory loom"(Description="3 x 1s increasing amplitude")
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "Approaching auditory loom"
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow ApproachingSound
                        IntProperty(Value=180)
                        -> Bonsai.Numerics.DegreeToRadian
                        -> PropertyMapping(Phase) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #7
                        #2, #4, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300000, Frequency=1, Waveform=Sawtooth, SampleRate=300000, Depth=F32, Amplitude=0.5, Offset=0.5, Phase=3.1415926535897931) => #8
                        ExternalizedMapping(Amplitude, Frequency) => #9
                        #8, #9, #4, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0) => #10
                        #10, #8 -> Zip
                        -> Multiply
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=1) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.5) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #1
            Defer "9s constant amplitude"
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "9s constant amp"
                    ExternalizedMapping(Amplitude, Frequency, Offset) => #0
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #2
                    -> PropertyMapping(SampleRate) => #3
                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=9) => #5
                    #5, #2 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.Item1 * it.Item2
                    -> PropertyMapping(BufferLength) => #8
                    #0, #3, #8 -> Bonsai.Dsp.FunctionGenerator(BufferLength=2700000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Take(Count=1) => #3
            Defer "3 x 2s constant amplitude"
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "3 x2s"
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow "2s constant amplitude"
                        ExternalizedMapping(Amplitude, Frequency) => #0
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #2
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #5
                        #0, #2, #5 -> Bonsai.Dsp.FunctionGenerator(BufferLength=600000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=2) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.5) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #5
            Defer FrequencySweep
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #1
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Amplitude(Selector=Item2)) => #3
                #1, #3 -> GroupWorkflow FrequencySweep
                    ExternalizedMapping(Amplitude)
                    -> GroupWorkflow FrequencySweep => #1
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate / 100
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0.5, Offset=0.5, Phase=0) => #5
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it.EndFreq - it.StartFreq) / (it.OnDuration * it.SampleRate / (it.SampleRate / 100))
                        -> PropertyMapping(Value) => #8
                        #5, #8 -> FloatProperty(Value=10)
                        -> Accumulate => #10
                        SubscribeSubject SoundParams
                        -> PropertyMapping(Value(Selector=StartFreq)) => #12
                        #10, #12 -> Add(Operand=IntProperty(Value=17000))
                        -> PropertyMapping(Frequency) => #14
                        ExternalizedMapping(Amplitude) => #15
                        #14, #5, #2, #4, #15 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=20000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0) => #16
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.OnDuration * it.SampleRate
                        -> PropertyMapping(Count) => #19
                        #16, #19 -> Bonsai.Dsp.Buffer(Count=900000, Skip=nil)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #3
                    #1, #3 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName=FrequencyStart))
                    -> IntProperty(Value=17000) => #7
                    ExternalizedMapping(Value(DisplayName=FrequencyEnd))
                    -> IntProperty(Value=20000) => #9
                    ExternalizedMapping(Value(DisplayName="SweepDuration(s)"))
                    -> FloatProperty(Value=3) => #11
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #13
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #15
                    #7, #9, #11, #13, #15 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as StartFreq,
                        it.Item2 as EndFreq,
                        it.Item3 as OnDuration,
                        it.Item4 as NumRepeats,
                        it.Item5 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #7
            Defer Clicks
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow Clicks
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow "5ms constant amplitude"
                        ExternalizedMapping(Amplitude, Frequency) => #0
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #2
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #5
                        #0, #2, #5 -> Bonsai.Dsp.FunctionGenerator(BufferLength=1500, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=15000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=163)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=0.005) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.05) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=163) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #9
            #1, #3, #5, #7, #9 -> Concat
            -> ToArray
            -> BehaviorSubject AuditoryWaveformBank
            -> WorkflowOutput

        Defer GenerateSilence => #5
            SubscribeSubject SwClockSourceAudio => #0
            SubscribeSubject AuditoryAOParams => #1
            -> MemberSelector(Selector=BufferLength) => #2
            #1 -> IntProperty(Value=1) => #3
            #2, #3 -> Zip
            -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
            #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=3000, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
            -> WorkflowOutput
        SubscribeSubject PlayAudioStim => #6
        #5, #6 -> TakeUntil => #7
        Defer SampleWaveform => #8
            SubscribeSubject AuditoryWaveformBank
            -> Take(Count=1)
            -> AsyncSubject ThisWaveform

            SubscribeSubject SwClockSourceAudio => #3
            SubscribeSubject ThisWaveform
            -> Take(Count=1) => #5
            SubscribeSubject WaveformIndex
            -> PropertyMapping(Value) => #7
            #5, #7 -> Index(Operand=IntProperty(Value=2)) => #8
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(Count) => #11
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(Skip) => #14
            #8, #11, #14 -> Bonsai.Dsp.Buffer(Count=3000, Skip=3000) => #15
            #3, #15 -> Zip
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        SubscribeSubject StopAudioStim => #9
        #8, #9 -> TakeUntil => #10
        #7, #10 -> Concat
        -> Repeat
        -> MulticastSubject AudioPlayback

    GroupWorkflow LEDOrientation
        GroupWorkflow "LED control"
            BehaviorSubject<System.Object> Start_LEDs
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
            -> MulticastSubject BehaviorCommands

            BehaviorSubject<System.Object> Stop_LEDs
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
            -> MulticastSubject BehaviorCommands

            Bonsai.Shaders.Timer(DueTime=PT0S)
            -> MulticastSubject Start_LEDs

            Bonsai.Shaders.Input.KeyDown(Key=J, Modifiers=nil)
            -> MulticastSubject Stop_LEDs

            Bonsai.Shaders.Input.KeyDown(Key=H, Modifiers=nil)
            -> MulticastSubject Start_LEDs

        SubscribeSubject Spinnaker3FrameEvents => #1
        -> MemberSelector(Selector=Value.Image) => #2
        -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=166, Width=263, Height=258))
        -> Bonsai.Vision.WarpPerspective => #4
          Source(Point2f(X=16.30052, Y=27.9056053), Point2f(X=26.9848957, Y=251.404129), Point2f(X=244.644791, Y=248.359879), Point2f(X=235.056244, Y=12.1769915))
          Destination(Point2f(X=0, Y=0), Point2f(X=0, Y=277), Point2f(X=256, Y=277), Point2f(X=256, Y=0))
          Flags=Linear
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=4, Y=0, Width=128, Height=141)) => #5
        -> GroupWorkflow ColorTracking => #6
            WorkflowInput Source1
            -> Bonsai.Dsp.Split => #1
            -> GroupWorkflow BlobTracking => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Selector) => #1
                #0, #1 -> MemberSelector(Selector=Item1) => #2
                ExternalizedMapping(Selector(DisplayName=OtherChanel1)) => #3
                #0, #3 -> MemberSelector(Selector=Item2) => #4
                #2, #4 -> Zip
                -> Subtract
                -> Disable Zip
                -> Disable Subtract => #8
                ExternalizedMapping(ThresholdValue) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary) => #10
                ExternalizedMapping(MinArea, MaxArea) => #11
                #10, #11 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=150, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid)
                -> WorkflowOutput
            #1 -> GroupWorkflow BlobTracking => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Selector) => #1
                #0, #1 -> MemberSelector(Selector=Item2) => #2
                ExternalizedMapping(Selector(DisplayName=OtherChanel1)) => #3
                #0, #3 -> MemberSelector(Selector=Item3) => #4
                #2, #4 -> Zip
                -> Subtract
                -> Disable Zip
                -> Disable Subtract => #8
                ExternalizedMapping(ThresholdValue) => #9
                #8, #9 -> Bonsai.Vision.Threshold(ThresholdValue=13, MaxValue=255, ThresholdType=Binary) => #10
                ExternalizedMapping(MinArea, MaxArea) => #11
                #10, #11 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=130, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid)
                -> WorkflowOutput
            #1 -> GroupWorkflow BlobTracking => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Selector) => #1
                #0, #1 -> MemberSelector(Selector=Item3) => #2
                ExternalizedMapping(Selector(DisplayName=OtherChanel1)) => #3
                #0, #3 -> MemberSelector(Selector=Item2) => #4
                #2, #4 -> Zip
                -> Subtract => #6
                ExternalizedMapping(Selector(DisplayName=OtherChannel2)) => #7
                #0, #7 -> MemberSelector(Selector=Item1) => #8
                #6, #8 -> Zip
                -> Subtract => #10
                ExternalizedMapping(ThresholdValue) => #11
                #10, #11 -> Bonsai.Vision.Threshold(ThresholdValue=7, MaxValue=255, ThresholdType=Binary) => #12
                ExternalizedMapping(MinArea, MaxArea) => #13
                #12, #13 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=230, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid)
                -> WorkflowOutput
            #2, #3, #4, #1 -> Zip => #5
            -> WorkflowOutput
            #5 -> Disable BufferTime(TimeSpan=PT1S)
            -> Disable MemberSelector(Selector=Count)
        #1 -> MemberSelector(Selector=Seconds) => #7
        #6, #7 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #9
        -> Disable MemberSelector(Selector=Item2) => #10
        -> Skip(Count=1)
        -> BehaviorSubject CurrCoords
        -> SelectMany CreateArray
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Value

            SubscribeSubject Value
            -> MemberSelector(Selector=Value.Item1) => #4
            SubscribeSubject Value
            -> MemberSelector(Selector=Value.Item2) => #6
            SubscribeSubject Value
            -> MemberSelector(Selector=Value.Item3) => #8
            #4, #6, #8 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Bonsai.Vision.MinimumEnclosingCircle
        -> BehaviorSubject
        -> MemberSelector(Selector=Center) => #16
        -> Skip(Count=1)
        #16 -> Take(Count=1)
        -> ReplaySubject centre(BufferSize=nil)
        #10 -> Take(Count=1)
        -> ReplaySubject OriginCoord(BufferSize=nil)
        #9 -> Disable BufferTime(TimeSpan=PT1S)
        -> Disable MemberSelector(Selector=Count)
        #5 -> Disable BufferTime(TimeSpan=PT1S)
        -> Disable MemberSelector(Selector=Count)
        #5 -> Disable BufferTime(TimeSpan=PT1S)
        -> Disable MemberSelector(Selector=Count)
        #2 -> PublishSubject camFootage
        #4, #7 -> WithLatestFrom
        -> PublishSubject WarpSpinnaker

        SubscribeSubject CurrCoords => #31
        SubscribeSubject OriginCoord
        -> MemberSelector(Selector=Value) => #33
        SubscribeSubject centre => #34
        #33, #34 -> Zip => #35
        #31, #35 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from math import atan2, isnan, pi, sin, cos
            from System import Tuple

            def offset_angle(angle, offset):
                """
                Offsets the given angle by the specified offset and wraps it within the range -pi to +pi.

                Parameters:
                angle (float): The original angle in radians, ranging from -pi to +pi.
                offset (float): The offset to be added to the angle in radians.

                Returns:
                float: The offset and wrapped angle in radians.
                """
                # Add the offset to the angle
                new_angle = angle + offset

                # Wrap the angle within the range -pi to +pi
                wrapped_angle = atan2(sin(new_angle), cos(new_angle))

                return wrapped_angle

            @returns(Tuple[Tuple[float, float, float], float])
            def process(value):
                # Current xy coordinates of each point
                current_points = [(value.Item1.Value.Item1.X, value.Item1.Value.Item1.Y),
                                  (value.Item1.Value.Item2.X, value.Item1.Value.Item2.Y),
                                  (value.Item1.Value.Item3.X, value.Item1.Value.Item3.Y)]

                # Original fixed xy coordinates of each point
                original_points = [(203.7071,186.8627),
                                   (142.9534, 21.94925),
                                   (36.74911, 166.683)]

                # Hard code center
                centreX, centreY = (129, 130)

                # Initialize a list to store the angles for each point
                angles = []

                # Calculate angle for each point
                for i, (x, y) in enumerate(current_points):
                    # Check if any of the input values are NaN
                    if isnan(x) or isnan(y):
                        angles.append(float('nan'))  # Append NaN if any input value is NaN
                        continue

                    # Calculate displacement vector from center to current point
                    dx = x - centreX
                    dy = y - centreY

                    # Calculate displacement vector from center to original point
                    orig_x, orig_y = original_points[i]
                    orig_dx = orig_x - centreX
                    orig_dy = orig_y - centreY

                    # Calculate the angle in radians (clockwise)
                    angle = atan2(dy, dx) - atan2(orig_dy, orig_dx)

                    # Offset the angle by +0.5 radians
                    angle = offset_angle(angle, 0)

                    angles.append(angle)

                # If the coords of blue and green lights are almost the same, nullify the blue angle
                if abs(current_points[0][0] - current_points[1][0]) < 10 or abs(current_points[0][1] - current_points[1][1]) < 10:
                    angles[0] = float('nan')

                # Return the angles for each point as a tuple
                return Tuple.Create(Tuple.Create(angles[0], angles[1], angles[2]), value.Item1.Seconds)
        -> Bonsai.Scripting.IronPython.PythonTransform => #38
          Script:
            from math import isnan, atan2, sin, cos
            from System import Tuple

            # Initialize variables for exponential smoothing
            prev_avg_angle = None
            alpha = 0.8  # Smoothing factor, adjust as needed


            @returns(Tuple[float, float, float, float, float])
            def process(value):

                #global LastEntry
                global prev_avg_angle


                # Angles of movement
                LED_angles = [value.Item1.Item1, value.Item1.Item2, value.Item1.Item3]

                # Filter out NaN values from LED_angles
                valid_angles = [angle for angle in LED_angles if not isnan(angle)]

                # Filter out large discrepancies (stop averaging of single angle outlier errors)
                consistent_angles = []
                if len(valid_angles) == 1:
                    consistent_angles.extend(valid_angles) # if only one LED is being picked up then there ca't be discrepancies
                elif len(valid_angles) == 2:
                    if abs(valid_angles[0] - valid_angles[1]) <= 1:  # if there are two LEDs and there is discrepancy
                        consistent_angles.extend([valid_angles[0]]) # quick fix...just stick with the first one so that the average isn't dramatically shifted when differences change between -3 radians to +3
                    else:
                        consistent_angles.extend(valid_angles)
                else:
                    for angle in valid_angles:
                    # Check to see if angle is within ±1 radian of at least one of the other angles
                        if any(abs(angle - other_angle) <= 1 for other_angle in valid_angles if other_angle != angle):
                            consistent_angles.append(angle)
                consistent_angles = valid_angles

                # Calculate the average of valid consistent angles
                if len(consistent_angles) == 1:
                    # Apply exponential smoothing if there's only one or two consistent angle so the overall average doesn't instantly jump
                    if prev_avg_angle is None:
                        avg_angle = consistent_angles[0]
                    else:
                        avg_angle = alpha * consistent_angles[0] + (1 - alpha) * prev_avg_angle
                    prev_avg_angle = avg_angle

                elif len(consistent_angles) == 2:
                    sin_sum = sum(sin(angle) for angle in consistent_angles)
                    cos_sum = sum(cos(angle) for angle in consistent_angles)
                    two_avg = atan2(sin_sum, cos_sum)
                    if prev_avg_angle is None:
                        avg_angle = two_avg
                    else:
                        avg_angle = alpha * two_avg + (1 - alpha) * prev_avg_angle
                    prev_avg_angle = avg_angle

                elif len(consistent_angles) == 3:
                    sin_sum = sum(sin(angle) for angle in consistent_angles)
                    cos_sum = sum(cos(angle) for angle in consistent_angles)
                    avg_angle = atan2(sin_sum, cos_sum)
                    prev_avg_angle = avg_angle
                else:
                    avg_angle = float('nan')

                avg_angle = avg_angle*-1

                # Return the average angle as a tuple
                return Tuple.Create(avg_angle, value.Item2, LED_angles[0], LED_angles[1], LED_angles[2])
        -> MemberSelector(Selector=Item1) => #39
        -> BehaviorSubject OrientationAngle
        #39 -> Disable BufferTime(TimeSpan=PT1S)
        -> Disable MemberSelector(Selector=Count)
        #38 -> PublishSubject Orientation
        -> MemberSelector(Selector=Item1)

        SubscribeSubject OrientationAngle
        -> Bonsai.Scripting.IronPython.PythonTransform AngleDegrees
          Script:
            from math import atan2, degrees
            from System import Tuple


            @returns(float)
            def process(value):
                radians = value
                angle_degrees = degrees(radians)
                if angle_degrees < 0:
                    angle_degrees += 360
                return angle_degrees
        -> PublishSubject OrientationDegrees

    GroupWorkflow Lickport
        GroupWorkflow Controls
            SubscribeSubject BehaviorEvents
            -> Take(Count=1) => #1
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DOPort0))
            -> MulticastSubject BehaviorCommands
            #1 -> IntProperty(Value=0)
            -> MulticastSubject SetValveDuration

            Bonsai.Shaders.Input.KeyDown(Key=V, Modifiers=nil)
            -> IntProperty(Value=1)
            -> ReplaySubject PulseLickport(BufferSize=nil)
            -> Disable PublishSubject PulseLickport

            Bonsai.Shaders.Input.KeyDown(Key=B, Modifiers=nil)
            -> IntProperty(Value=0)
            -> PublishSubject CloseLickport

            Bonsai.Shaders.Input.KeyDown(Key=D, Modifiers=nil)
            -> IntProperty(Value=0)
            -> MulticastSubject SetValveDuration

            BehaviorSubject<System.Int32> SetValveDuration

        GroupWorkflow Piezo
            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=44))
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=44, PayloadType=TimestampedS16, IsArray=false))
            -> MemberSelector(Selector=Value)
            -> PublishSubject PiezoSignal
            -> WorkflowOutput

        SubscribeSubject PulseLickport
        -> SelectMany
            WorkflowInput Source1
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
            -> Bonsai.Shaders.Delay(DueTime=PT0.15S)
            -> RepeatCount(Count=3)
            -> WorkflowOutput

        SubscribeSubject CloseLickport
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject SetValveDuration => #7
        SubscribeSubject "Lickport Open Duration"
        -> PropertyMapping(PulseDOPort0) => #9
        #7, #9 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=100))
        -> MulticastSubject BehaviorCommands
        -> PublishSubject LickDurationMessage

        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=44))
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=92))
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=94))
        -> Bonsai.Harp.FilterRegister(FilterType=Exclude, Register=Bonsai.Harp.FilterRegisterAddress(Address=32))

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=Control)
    -> Take(Count=1)
    -> IntProperty(Value=0)
    -> Bonsai.Osc.Format(Address=/end_session)
    -> MulticastSubject Send_UDP
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> MulticastSubject Stop_LEDs
    -> WorkflowOutput

    Disable GroupWorkflow Audio
        Bonsai.Audio.CreateAudioContext
          DeviceName="Generic Software on Speakers (Realtek High Definition Audio)"
          SampleRate=44100
          Refresh=0
          Position(X=0, Y=0, Z=0)
          Velocity(X=0, Y=0, Z=0)
          Direction(X=-0, Y=-0, Z=-1)
          Up(X=0, Y=1, Z=0)
          Gain=1
        -> Bonsai.Audio.AudioResources
          Buffers(BufferConfiguration(Name=SoundBuffer))
          Sources
            SourceConfiguration
              Name=VRSource
              BufferName=""
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Stopped
        -> Bonsai.Resources.LoadResources

        ExternalizedMapping(FileName)
        -> Bonsai.Audio.AudioReader(FileName=resources\audio\sweep_17000Hz_20000Hz_-3dBFS_3s.wav, BufferLength=0, SampleRate=0) => #4
        ExternalizedMapping(RangeMax(DisplayName=RelativeVolume)) => #5
        #4, #5 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear) => #6
        -> Bonsai.Dsp.ScalarBuffer(Size(Width=500, Height=1), Depth=F32, Channels=1, Value(Val0=10000, Val1=10000, Val2=10000, Val3=10000)) => #7
        #6 -> Bonsai.Dsp.ScalarBuffer(Size(Width=1, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
        #7, #6, #8 -> Zip
        -> Bonsai.Dsp.Concat(Axis=1)
        -> Bonsai.Audio.UpdateBuffer(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", BufferName=SoundBuffer, SampleRate=0) => #11
        ExternalizedMapping(SampleRate) => #12
        #11, #12 -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", SourceName=VRSource, SampleRate=44100, State=Stopped)

        PublishSubject<System.Object> PlayAudioStim
        -> Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", SourceName(string=VRSource))

    Disable GroupWorkflow MagneticEncoder
        ExternalizedMapping(SampleRate)
        -> GroupWorkflow MagneticEncoderController
            IntProperty(Value=0) => #0
            ExternalizedMapping(SampleRate) => #1
            #0, #1 -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate250Hz)
            -> MulticastSubject ExpanderCommands

            SubscribeSubject ExpanderEvents
            -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true)
            -> MemberSelector(Selector=Value.Angle)
            -> PublishSubject EncoderValue

            SubscribeSubject EncoderValue
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (Math.Pi) - ((it / 16384.0) * (2.0 * Math.Pi))
            -> BehaviorSubject EncoderAngle

    Disable GroupWorkflow HARP_Expander
        ExternalizedMapping(PortName)
        -> GroupWorkflow CreateExpander
            BehaviorSubject<Bonsai.Harp.HarpMessage> ExpanderCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
            -> PublishSubject ExpanderEvents
            -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=LoggingRootPath))
    -> GroupWorkflow LogController
        ExternalizedMapping(Value)
        -> StringProperty(Value="C:\Users\Cricket Team\Desktop\data2\240624_Q2_loom2_nosheltertesttt")
        -> ReplaySubject SessionPath(BufferSize=nil)

        SubscribeSubject SessionPath
        -> Timestamp => #4
        -> MemberSelector(Selector=Value) => #5
        #4 -> MemberSelector(Selector=Timestamp.DateTime)
        -> CricketVR.FormatDate => #7
        #5, #7 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

    GroupWorkflow SoftwareEvents
        GroupWorkflow MouseLogging
            SubscribeSubject SideMouse
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=231, PayloadType=Float)) => #1
            SubscribeSubject TimestampStream => #2
            #1, #2 -> WithLatestFrom
            -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #4
            SubscribeSubject ForwardMouse
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=230, PayloadType=Float)) => #6
            SubscribeSubject TimestampStream => #7
            #6, #7 -> WithLatestFrom
            -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #9
            #4, #9 -> Merge
            -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=MouseSensors)
            -> WorkflowOutput

        BehaviorSubject<Bonsai.Harp.HarpMessage> SoftwareEventLogger

        SubscribeSubject ResetRodentPosition => #2
        SubscribeSubject TimestampStream => #3
        #2, #3 -> WithLatestFrom
        -> CricketVR.VRElementToHarpMessage(Address=11)
        -> MulticastSubject SoftwareEventLogger

        BehaviorSubject<System.Tuple(System.Int32,System.Int32)> SoftwareEvent_U8
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(it.Item1 as Address,
            it.Item2 as Value)
        -> InputMapping(Address(Selector=Address), Payload(Selector=Value))
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=1, PayloadType=U8, Value=12)) => #10
        SubscribeSubject TimestampStream => #11
        #10, #11 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Write)
        -> MulticastSubject SoftwareEventLogger

        Disable SubscribeSubject PlayAudioStim
        -> Disable Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=21, PayloadType=U8)) => #16
        Disable SubscribeSubject TimestampStream => #17
        #16, #17 -> Disable WithLatestFrom
        -> Disable ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> Disable MulticastSubject SoftwareEventLogger

        Disable SubscribeSubject StopAudioStim
        -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=22, PayloadType=U8, Value=0)) => #22
        Disable SubscribeSubject TimestampStream => #23
        #22, #23 -> Disable WithLatestFrom
        -> Disable ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> Disable MulticastSubject SoftwareEventLogger

        SubscribeSubject ShelterCorner
        -> CricketVR.CreateArmMessage(Address=20) => #28
        SubscribeSubject TimestampStream => #29
        #28, #29 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject ArmGainTrial
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=13, PayloadType=Float)) => #34
        SubscribeSubject TimestampStream => #35
        #34, #35 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject ArmGainEating
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=14, PayloadType=Float)) => #40
        SubscribeSubject TimestampStream => #41
        #40, #41 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        Disable SubscribeSubject LickDurationMessage
        -> Disable Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=15, PayloadType=Float)) => #46
        Disable SubscribeSubject TimestampStream => #47
        #46, #47 -> Disable WithLatestFrom
        -> Disable ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> Disable MulticastSubject SoftwareEventLogger

        SubscribeSubject PulseLickport
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=16, PayloadType=Float)) => #52
        SubscribeSubject TimestampStream => #53
        #52, #53 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject CloseLickport
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=17, PayloadType=Float)) => #58
        SubscribeSubject TimestampStream => #59
        #58, #59 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

    SubscribeSubject SoftwareEventLogger
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=SoftwareEvents)

    SubscribeSubject ScreenFrameEvents
    -> IncludeWorkflow(Path=Extensions\LogFrameEvents.bonsai, LogName=FrameEventLogger)

    SubscribeSubject Spinnaker1FrameEvents
    -> IncludeWorkflow Spinnaker1(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker2FrameEvents
    -> IncludeWorkflow Spinnaker2(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker3FrameEvents
    -> IncludeWorkflow Spinnaker3(Path=Extensions\LogVideo.bonsai, FrameRate=100)

    SubscribeSubject WarpSpinnaker
    -> IncludeWorkflow Spinnaker3_warp(Path=Extensions\LogVideo_other.bonsai, FrameRate=100)

    Disable SubscribeSubject Pylon1FrameEvents
    -> Disable IncludeWorkflow Pylon1(Path=Extensions\LogPylonVideo.bonsai, FrameRate=50)

    Disable SubscribeSubject ArducamFrameEvents
    -> Disable GroupWorkflow LogVideo
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name) => #1
        -> IncludeWorkflow Arducam(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\240620_P2_Cam_Piezo_shelter2\2024-06-20T14-39-41\Arducam\Arducam_2024-06-20T14-39-42.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=Item1
        -> MemberSelector(Selector=Item2) => #5
        #1 -> IncludeWorkflow Arducam(Path=Extensions\FormatFileName.bonsai, Extension=avi)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(FrameRate) => #8
        #5, #7, #8 -> Bonsai.Vision.VideoWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\240620_P2_Cam_Piezo_shelter2\2024-06-20T14-39-41\Arducam\Arducam_2024-06-20T14-39-42.avi"
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=50
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

    SubscribeSubject ArmEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmBoard)

    Disable SubscribeSubject ExpanderEvents
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=OutputExpanderBoard)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorBoard)

    SubscribeSubject RodentPosition => #25
    SubscribeSubject TimestampStream => #26
    #25, #26 -> WithLatestFrom
    -> CricketVR.VRElementToHarpMessage(Address=201)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=RodentPosition)

    SubscribeSubject ArmCommands => #30
    SubscribeSubject TimestampStream => #31
    #30, #31 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmCommands)

    SubscribeSubject BehaviorCommands => #35
    SubscribeSubject TimestampStream => #36
    #35, #36 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorCommands)

    Disable SubscribeSubject ExpanderCommands => #40
    Disable SubscribeSubject TimestampStream => #41
    #40, #41 -> Disable WithLatestFrom
    -> Disable ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ExpanderCommands)

    BehaviorSubject<System.Tuple(System.Boolean,System.Tuple(CricketVR.VrElement,CricketVR.VrElement),System.Double,System.Int32)> LoomParameters => #45
    SubscribeSubject TimestampStream => #46
    #45, #46 -> WithLatestFrom
    -> GroupWorkflow LogLooming
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow Looming(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\240624_Q2_loom2_nosheltertesttt\2024-06-24T17-16-05\Looming\Looming_2024-06-24T17-16-05.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item2,Item1.Item2.Item1,Item1.Item2.Item2,Item1.Item3,Item1.Item1,Item1.Item4"
        -> WorkflowOutput

    SubscribeSubject YRotationAngle => #49
    SubscribeSubject TimestampStream => #50
    #49, #50 -> WithLatestFrom
    -> GroupWorkflow LogRotationAxis
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow YRotationAxis(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\240624_Q2_loom2_nosheltertesttt\2024-06-24T17-16-05\YRotationAxis\YRotationAxis_2024-06-24T17-16-05.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item2,Item1"
        -> WorkflowOutput

    SubscribeSubject Orientation
    -> GroupWorkflow LogLEDOrientation
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow LEDOrientation(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\240624_Q2_loom2_nosheltertesttt\2024-06-24T17-16-05\LEDOrientation\LEDOrientation_2024-06-24T17-16-05.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item1,Item2,Item3,Item4,Item5"
        -> WorkflowOutput

GroupWorkflow RenderLoop
    GroupWorkflow DrawVRArena
        SubscribeSubject Draw3DStim => #0
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #0, #2 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #3
        -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #4
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #5
        #0, #5 -> Bonsai.Shaders.CreateVector3(X=1, Y=0.1, Z=1) => #6
        -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #7
        #1, #4, #7 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #6
            #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #10
            #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #14
            #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #15
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
            #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=0.1, Z=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
            -> Bonsai.Shaders.NormalMatrix
            -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=uv_box, TextureTarget=Texture2D) => #21
            #0 -> MemberSelector(Selector=ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #23
            #0 -> MemberSelector(Selector=Light)
            -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #25
            #21, #23, #25 -> Zip => #26
            ExternalizedMapping => #27
              Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
              Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
              Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
              SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
            #26, #27 -> GroupWorkflow UpdateMaterial => #28
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
                ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
                #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
                ExternalizedMapping(Value(DisplayName=Specular)) => #11
                #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
                ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
                #15, #16 -> FloatProperty(Value=10)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
                -> WorkflowOutput
            ExternalizedMapping(MeshName) => #29
            #28, #29 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=box)
            -> WorkflowOutput
        #3, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item2.X + it.Item1.X as Bound_P_X,
            -it.Item2.X + it.Item1.X as Bound_N_X,
            it.Item2.Y + it.Item1.Y as Bound_P_Y,
            -it.Item2.Y + it.Item1.Y as Bound_N_Y,
            it.Item2.Z + it.Item1.Z as Bound_P_Z,
            -it.Item2.Z + it.Item1.Z as Bound_N_Z
            )
        -> MemberSelector(Selector="Bound_P_X,Bound_N_X,Bound_P_Y,Bound_N_Y,Bound_P_Z,Bound_N_Z")
        -> MulticastSubject ArenaBounds

    GroupWorkflow Cricket
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(isLocked) => #1
        #0, #1 -> Condition LockCricketToArm?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #3
        #1, #0 -> Condition LockCricketToArm? => #4
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> BitwiseNot
            -> WorkflowOutput
        #3, #4 -> Merge
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #6
        ExternalizedMapping(EnableCricket) => #7
        #6, #7 -> Condition => #8
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=EnableCricket)) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #9
        SubscribeSubject CurrentArmPosition => #10
        #0, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.X as X,
            it.Y as Z)
        -> InputMapping(X(Selector=X), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=0.0150001, Y=-0.05, Z=0)
        -> PropertyMapping(Position) => #16
        #0, #16 -> CricketVR.CreateVrElement(Position(X=0.0150001, Y=-0.05, Z=0), Orientation(X=0, Y=0, Z=0)) => #17
        SubscribeSubject RodentPosition => #18
        #17, #18 -> WithLatestFrom
        -> Add
        -> BehaviorSubject PositionCricket => #21
        -> CricketVR.CreateVrElement(Position(X=1, Y=1, Z=-1), Orientation(X=1, Y=1, Z=1)) => #22
        #21, #22 -> Zip
        -> Multiply
        -> PropertyMapping => #25
          TranslationX(Selector=Position.X)
          TranslationY(Selector=Position.Y)
          TranslationZ(Selector=Position.Z)
          RotationX(Selector=Orientation.X)
          RotationY(Selector=Orientation.Y)
          RotationZ(Selector=Orientation.Z)
        #8, #9, #25 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.0150001
          TranslationY=-0.05
          TranslationZ=0.049999997
          RotationZ=0
          RotationY=-84.22808
          RotationX=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          Ambient(X=0.2, Y=0.2, Z=0.2)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=cricket

    GroupWorkflow RemoteSimulatedEnv
        Bonsai.Osc.CreateUdpClient(Name=FakeWorldUDP, Port=0, RemoteHostName=localhost, RemotePort=2323)

        SubscribeSubject Send_UDP
        -> Bonsai.Osc.SendMessage(Connection=FakeWorldUDP, Address="")

        Disable SubscribeSubject Send_UDP
        -> Disable IntProperty(Value=0)
        -> Disable PublishSubject Stop_LEDs

        IntProperty(Value=1000)
        -> Bonsai.Osc.Format(Address=/CanvasSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/VRWorldSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=0.3)
        -> Bonsai.Osc.Format(Address=/MonitorBox)
        -> MulticastSubject Send_UDP

        SubscribeSubject RadialLimits
        -> MemberSelector(Selector=X)
        -> Bonsai.Osc.Format(Address=/RadialLimits)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Position)
        -> MemberSelector(Selector="X,Y,Z")
        -> Bonsai.Osc.Format(Address=/VRRodentPosition)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Orientation.Y)
        -> Bonsai.Osc.Format(Address=/RodentOrientation)
        -> MulticastSubject Send_UDP

        SubscribeSubject CurrentArmPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector="X,Y")
        -> Bonsai.Osc.Format(Address=/RealCricketPosition)
        -> MulticastSubject Send_UDP

    GroupWorkflow 3dLoom
        Bonsai.Shaders.Input.KeyDown(Key=L, Modifiers=Control)
        -> BehaviorSubject GetOrientationForLoom
        -> Take(Count=1)
        -> SelectMany 3dLoom
            WorkflowInput Source1 => #0
            SubscribeSubject LoomStartPosition
            -> InputMapping(Selector=Position)
            -> PropertyMapping(Position) => #3
            #0, #3 -> CricketVR.CreateVrElement(Position(X=-1, Y=0.3, Z=0), Orientation(X=0, Y=0, Z=0)) => #4
            SubscribeSubject LoomEndPosition
            -> InputMapping(Selector=Position)
            -> PropertyMapping(Position) => #7
            #0, #7 -> CricketVR.CreateVrElement(Position(X=-0.3, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #8
            #4, #8 -> Zip => #9
            ExternalizedMapping(Duration, FollowAnimal, LoomHangTime, LoomRepeats) => #10
            #9, #10 -> SelectMany Lerp
                ExternalizedMapping(Value(DisplayName=Duration))
                -> PropertySource<DoubleProperty,System.Double>(MemberName=Duration, Value=2)
                -> Take(Count=1)
                -> AsyncSubject AnimationDuration

                ExternalizedMapping(Value(DisplayName=FollowAnimal))
                -> BooleanProperty(Value=true)
                -> Take(Count=1)
                -> AsyncSubject FollowAnimal

                ExternalizedMapping(Value(DisplayName=LoomRepeats))
                -> IntProperty(Value=3)
                -> Take(Count=1)
                -> AsyncSubject LoomRepeats

                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject AnimationLimits

                SubscribeSubject Draw3DStim
                -> Condition
                    SubscribeSubject FollowAnimal
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #17
                SubscribeSubject Draw3DStim
                -> Condition => #19
                    SubscribeSubject FollowAnimal
                    -> WorkflowOutput
                #17, #19 -> Merge
                -> Skip(Count=1) => #21
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #23
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.X), RangeEnd(Selector=Item2.Position.X)) => #25
                #23, #25 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=2, RangeBegin=-1, RangeEnd=-0.30000001192092896) => #26
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #28
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.Y), RangeEnd(Selector=Item2.Position.Y)) => #30
                #28, #30 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=2, RangeBegin=0.30000001192092896, RangeEnd=0) => #31
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #33
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.Z), RangeEnd(Selector=Item2.Position.Z)) => #35
                #33, #35 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=2, RangeBegin=0, RangeEnd=0) => #36
                #26, #31, #36 -> CombineLatest
                -> InputMapping(Position(Selector="it.Item1, it.Item2, it.Item3"))
                -> CricketVR.CreateVrElement(Position(X=-0.3, Y=3.330669E-16, Z=0), Orientation(X=0, Y=0, Z=0))
                -> PropertyMapping(TranslationX(Selector=Position.X), TranslationY(Selector=Position.Y), TranslationZ(Selector=Position.Z)) => #40
                #21, #40 -> IncludeWorkflow => #41
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-0.3
                  TranslationY=3.330669E-16
                  TranslationZ=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                  ScaleX=0.1
                  ScaleY=0.1
                  ScaleZ=0.1
                  Ambient(X=0, Y=0, Z=0)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  MeshName=sphere
                #26 -> Last => #42
                ExternalizedMapping(DueTime(DisplayName=LoomHangTime)) => #43
                #42, #43 -> Bonsai.Shaders.Delay(DueTime=PT0.75S) => #44
                #41, #44 -> TakeUntil => #45
                SubscribeSubject LoomRepeats
                -> PropertyMapping(Count) => #47
                #45, #47 -> RepeatCount(Count=3)
                -> WorkflowOutput

                SubscribeSubject FollowAnimal => #50
                SubscribeSubject AnimationLimits => #51
                SubscribeSubject AnimationDuration => #52
                SubscribeSubject LoomRepeats => #53
                #50, #51, #52, #53 -> Zip
                -> Disable MulticastSubject LoomParameters
            -> WorkflowOutput
        -> Repeat
        -> WorkflowOutput

        GroupWorkflow LoomPositionControl
            SubscribeSubject GetOrientationForLoom => #0
            SubscribeSubject OrientationDegrees => #1
            #0, #1 -> WithLatestFrom
            -> InputMapping(Selector=Item2) => #3
            -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=315, Upper=361, RangeEvents=Quadrant1_lower) => #4
            #3 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=0, Upper=45, RangeEvents=Quadrant1_upper) => #5
            #4, #5 -> Zip
            -> LogicalOr
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=1, Y=0.3, Z=0), Orientation(X=0, Y=0, Z=0)) => #9
            #3 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=45, Upper=135, RangeEvents=Quadrant2)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=0, Y=0.3, Z=-1), Orientation(X=0, Y=0, Z=0)) => #12
            #3 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=135, Upper=225, RangeEvents=Quadrant3)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=-1, Y=0.3, Z=0), Orientation(X=0, Y=0, Z=0)) => #15
            #3 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=225, Upper=315, RangeEvents=Quadrant4)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=0, Y=0.3, Z=1), Orientation(X=0, Y=0, Z=0)) => #18
            #9, #12, #15, #18 -> Merge
            -> ReplaySubject LoomStartPosition(BufferSize=nil)

            SubscribeSubject GetOrientationForLoom => #21
            SubscribeSubject OrientationDegrees => #22
            #21, #22 -> WithLatestFrom
            -> InputMapping(Selector=Item2) => #24
            -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=315, Upper=361, RangeEvents=Q1_l) => #25
            #24 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=0, Upper=45, RangeEvents=Q1_up) => #26
            #25, #26 -> Zip
            -> LogicalOr
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=0.3, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #30
            #24 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=45, Upper=135, RangeEvents=Quad2)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=-0.3), Orientation(X=0, Y=0, Z=0)) => #33
            #24 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=135, Upper=225, RangeEvents=Q3)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=-0.3, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #36
            #24 -> IncludeWorkflow(Path=Aeon.Acquisition:InRange.bonsai, Lower=225, Upper=315, RangeEvents=Q4)
            -> Condition InRange?
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0.3), Orientation(X=0, Y=0, Z=0)) => #39
            #30, #33, #36, #39 -> Merge
            -> ReplaySubject LoomEndPosition(BufferSize=nil)

    Disable GroupWorkflow DrawNewShelter
        Disable SubscribeSubject Draw3DStim
        -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai)
        -> Disable GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0.0157068055, Z=0.0005) => #3
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #6
            #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #10
            #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=-90)
            -> PropertyMapping(Angle) => #14
            #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=-1.57079637) => #15
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
            #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.0659, Y=0.0659, Z=0.06282722)
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
            -> Bonsai.Shaders.NormalMatrix
            -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
            ExternalizedMapping(TextureName) => #21
            #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Orange, TextureTarget=Texture2D) => #22
            #0 -> MemberSelector(Selector=ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
            #0 -> MemberSelector(Selector=Light)
            -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
            #22, #24, #26 -> Zip => #27
            ExternalizedMapping => #28
              Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
              Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
              Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
              SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
            #27, #28 -> GroupWorkflow UpdateMaterial => #29
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
                ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
                #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
                ExternalizedMapping(Value(DisplayName=Specular)) => #11
                #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
                ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
                #15, #16 -> FloatProperty(Value=10)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
                -> WorkflowOutput
            ExternalizedMapping(MeshName) => #30
            #29, #30 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=shelter)
            -> WorkflowOutput

GroupWorkflow RodentPositionControl
    SubscribeSubject ForwardMouse => #0
    SubscribeSubject SideMouse => #1
    #0, #1 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=0)
    -> InputMapping(Position(Selector=it))
    -> CricketVR.CreateVrElement(Position(X=-0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject RodentPositionUpdate

    BooleanProperty(Value=false) => #8
    ExternalizedMapping(Key(DisplayName=ResetKey, Category=ResetPosition), Modifiers(DisplayName=ResetModifier, Category=ResetPosition))
    -> Bonsai.Shaders.Input.KeyDown(Key=Insert, Modifiers=Control)
    -> BooleanProperty(Value=false) => #11
    #8, #11 -> Merge => #12
    ExternalizedMapping(Orientation(DisplayName=ResetOrientation, Category=ResetPosition), Position(DisplayName=ResetPosition, Category=ResetPosition)) => #13
    #12, #13 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

    ExternalizedMapping(Position(DisplayName=PositionGain, Category=ManualOverride), EnableManualOverride(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ManualOverride
        Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
        -> CricketVR.KeySelectorScript(KeyFilter=A)
        -> Bonsai.Shaders.CreateVector3(X=-1, Y=0, Z=0) => #2
        #0 -> CricketVR.KeySelectorScript(KeyFilter=D)
        -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=0) => #4
        #0 -> CricketVR.KeySelectorScript(KeyFilter=W)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #6
        #0 -> CricketVR.KeySelectorScript(KeyFilter=S)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1) => #8
        #0 -> CricketVR.KeySelectorScript(KeyFilter=Z)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1, Z=0) => #10
        #0 -> CricketVR.KeySelectorScript(KeyFilter=X)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1, Z=0) => #12
        #2, #4, #6, #8, #10, #12 -> Merge
        -> InputMapping(Position(Selector=it))
        -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=-1), Orientation(X=0, Y=0, Z=0)) => #15
        ExternalizedMapping(Position(Category=PositionGain)) => #16
        #15, #16 -> CricketVR.CreateVrElement(Position(X=0.01, Y=0.01, Z=0.01), Orientation(X=0, Y=0, Z=0)) => #17
        #15, #17 -> Zip
        -> Multiply => #19
        ExternalizedMapping(Value(DisplayName=EnableManualOverride)) => #20
        #19, #20 -> Condition EnableManualOverride
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject RodentPositionUpdate
        -> WorkflowOutput

    SubscribeSubject ResetRodentPosition
    -> CreateObservable UpdateRodentPosition
        SubscribeSubject RodentPosition
        -> WorkflowOutput

        SubscribeSubject RodentPosition
        -> Take(Count=1) => #3
        SubscribeSubject RodentPositionUpdate => #4
        #3, #4 -> Merge
        -> MemberSelector(Selector=Position)
        -> Scan => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            #0 -> MemberSelector(Selector=Accumulation) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject ArenaBounds => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector="Item1,Item2") => #7
            ExternalizedMapping(NumericCorrectionFactor, OffsetBounds) => #8
            #7, #8 -> CricketVR.ClampPositionUpdate(NumericCorrectionFactor=1, OffsetBounds(X=-0.3, Y=0, Z=-0.3))
            -> WorkflowOutput
        Disable GroupWorkflow ManualOrientation => #8
            Bonsai.Shaders.Input.MouseWheel
            -> MemberSelector(Selector=EventArgs.Value)
            -> Mod(Operand=IntProperty(Value=50))
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: ((it / 50.0) * 2.0 * Math.Pi + 2.0*Math.Pi) % (2.0 * Math.Pi)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it <= Math.Pi ? it : -1.0 * (2.0*Math.Pi - it)
            -> InputMapping(Y(Selector=it))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.376991123, Z=0) => #6
            Bonsai.Shaders.CreateVector3(X=0, Y=1.57079637, Z=0) => #7
            #6, #7 -> Merge
            -> WorkflowOutput
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #9
        SubscribeSubject OrientationAngle
        -> InputMapping(Y(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1.47005737, Z=0) => #12
        #9, #12 -> Merge => #13
        #7, #8, #13 -> CombineLatest => #14
        -> MemberSelector(Selector=Item1) => #15
        SubscribeSubject YRotationAngle
        -> PropertyMapping(Angle) => #17
        #15, #17 -> CricketVR.RotateVec3(AngleVector(X=0, Y=1, Z=0), Angle=0) => #18
        #14 -> MemberSelector(Selector=Item2) => #19
        #18, #19 -> Zip
        -> InputMapping(Position(Selector=Item1), Orientation(Selector=Item2))
        -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=-0.049999997), Orientation(X=0, Y=-1.47005737, Z=0))
        -> MulticastSubject RodentPosition
    -> Switch

    SubscribeSubject RodentPosition
    -> WorkflowOutput

    ExternalizedMapping(Key(DisplayName=ShelterTeleportKey, Category=ShelterTeleport), Modifiers(DisplayName=ShelterTeleportModifier, Category=ShelterTeleport))
    -> Bonsai.Shaders.Input.KeyDown(Key=Home, Modifiers=Control) => #24
    SubscribeSubject ShelterCorner => #25
    -> MemberSelector(Selector=Item1) => #26
    #25 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #28
    #26, #28 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(Orientation, Position(Selector=it)) => #32
    #24, #32 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

GroupWorkflow ArmPositionControl
    ExternalizedMapping(Magnitude(DisplayName=Magnitude, Category=InitialArmPosition), Angle(DisplayName=Angle, Category=InitialArmPosition))
    -> GroupWorkflow InitialArmPosition
        Unit => #0
        ExternalizedMapping(X(DisplayName=Magnitude), Y(DisplayName=Angle)) => #1
        #0, #1 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> CricketVR.PolarToCart
        -> MulticastSubject GoToCartPosition
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping
      ShortcutKey(Category=ResetArmPosition)
      ShortcutMod(Category=ResetArmPosition)
      Magnitude(DisplayName=ResetMagnitude, Category=ResetArmPosition)
      Angle(DisplayName=ResetAngle, Category=ResetArmPosition)
    -> GroupWorkflow ArmUpdates
        BehaviorSubject<OpenCV.Net.Point2f> GoToCartPosition
        -> CreateObservable ArmPositionUpdating
            WorkflowInput Source1 => #0
            -> BooleanProperty(Value=false) => #1
            #1, #0 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject UpdateArmCartPosition => #4
            -> BooleanProperty(Value=false) => #5
            #5, #4 -> Zip => #6
            SubscribeSubject UpdateArmPolarPosition
            -> Skip(Count=1) => #8
            -> BooleanProperty(Value=true) => #9
            #9, #8 -> Zip => #10
            #3, #6, #10 -> Merge
            -> Scan Accumulate_dV/dt
                WorkflowInput Source1 => #0
                -> Condition UpdatePolar => #1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2)
                -> CricketVR.CartToPolar => #3
                #1 -> MemberSelector(Selector=Value.Item2) => #4
                #3, #4 -> Zip
                -> Add
                -> CricketVR.PolarToCart => #7
                #0 -> Condition UpdateCart => #8
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2) => #9
                #8 -> MemberSelector(Selector=Value.Item2) => #10
                #9, #10 -> Zip
                -> Add => #12
                #7, #12 -> Merge => #13
                SubscribeSubject RadialLimits
                -> PropertyMapping(MinRadius(Selector=X), MaxRadius(Selector=Y)) => #15
                #13, #15 -> CricketVR.ClampArmPosition(MinRadius=0.0150001, MaxRadius=0.18) => #16
                -> BooleanProperty(Value=false) => #17
                #17, #16 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #13
            -> Take(Count=1) => #14
            #13 -> Skip(Count=1) => #15
            ExternalizedMapping(Period(DisplayName=SamplingPeriod))
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.01S) => #17
            #15, #17 -> Sample => #18
            #14, #18 -> Merge
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject CurrentArmPosition

        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #5
        SubscribeSubject RadialLimits => #6
        #5, #6 -> WithLatestFrom
        -> Condition FilterUpdate
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.X)
            -> Bonsai.Dsp.Abs => #2
            #0 -> MemberSelector(Selector=Item2) => #3
            #2, #3 -> Zip => #4
            -> MemberSelector(Selector="Item1,Item2.X")
            -> GreaterThanOrEqual => #6
            #4 -> MemberSelector(Selector="Item1,Item2.Y")
            -> LessThanOrEqual => #8
            #6, #8 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> CricketVR.CreateArmMessage(Address=32)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(Key(DisplayName=ShortcutKey, Category=ResetArmPosition), Modifiers(DisplayName=ShortcutMod, Category=ResetArmPosition))
        -> Bonsai.Shaders.Input.KeyDown(Key=F3, Modifiers=Control) => #13
        ExternalizedMapping(X(DisplayName=Magnitude, Category=ResetArmPosition), Y(DisplayName=Angle, Category=ResetArmPosition)) => #14
        #13, #14 -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0)
        -> MulticastSubject GoToCartPosition

    ExternalizedMapping(Gain(DisplayName=Gain, Category=ManualOverride), Enable(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ArmManualOverride
        ExternalizedMapping(Gain)
        -> GroupWorkflow Manual_Arm_Control
            Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
            -> CricketVR.KeySelectorScript(KeyFilter=Up)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=1) => #2
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Down)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=-1) => #4
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Left)
            -> Bonsai.Vision.CreatePoint2f(X=-1, Y=0) => #6
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Right)
            -> Bonsai.Vision.CreatePoint2f(X=1, Y=0) => #8
            #2, #4, #6, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=Gain)) => #10
            #9, #10 -> FloatProperty(Value=0.001) => #11
            #9, #11 -> Zip
            -> Multiply
            -> WorkflowOutput
        -> Disable GateInterval(Interval=PT0.01S) => #2
        ExternalizedMapping(Value(DisplayName=Enable)) => #3
        #2, #3 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject UpdateArmCartPosition
        -> WorkflowOutput

    Disable GroupWorkflow GroundTruthFeedback
        SubscribeSubject ArmEvents
        -> Condition ArmMovingTo => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> Equal(Operand=IntProperty(Value=32))
            -> WorkflowOutput
        ExternalizedMapping(Type) => #2
        #1, #2 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Float, IsArray=true)) => #3
        -> Disable MemberSelector(Selector=Seconds) => #4
        #3 -> Disable MemberSelector(Selector=Value) => #5
        -> Index(Operand=IntProperty(Value=0)) => #6
        #5 -> Index(Operand=IntProperty(Value=1)) => #7
        #4, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as Seconds,
            it.Item2 as Magnitude,
            it.Item3 as Angle)
        -> MemberSelector(Selector="Magnitude,Angle")
        -> CricketVR.PolarToCart
        -> BehaviorSubject TrueArmPosition
        -> WorkflowOutput

GroupWorkflow TrialLogic
    GroupWorkflow GetOrientation
        SubscribeSubject RodentPosition
        -> MemberSelector(Selector=Orientation.Y) => #1
        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #3
        #1, #3 -> WithLatestFrom
        -> MemberSelector(Selector="Item1,Item2.X,Item2.Y")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as RodentOrientation,
            it.Item2 as DisplacementMagnitude,
            Math.Abs(it.Item3 - it.Item1) < Math.Pi ? (it.Item3 - it.Item1) : ((it.Item3 - it.Item1 < 0) ? ((it.Item3 - it.Item1) + 2.0 * Math.Pi) : ((it.Item3 - it.Item1) - 2.0 * Math.Pi)) as DisplacementAngle)
        -> WorkflowOutput
    -> MemberSelector(Selector="RodentOrientation,DisplacementMagnitude,DisplacementAngle")
    -> BehaviorSubject ComputedOrientation

    ExternalizedMapping(FileName(DisplayName=TrialListPath))
    -> Bonsai.IO.CsvReader(FileName=TrialLogicCsv\LEDTest1.csv, ListSeparator="", ScanPattern=%s, SkipRows=1)
    -> Parse(Pattern=%f, Separator=",") => #5
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[0] * Math.Pi) / 180.0 as StartingAngle,
        (it[1] * Math.Pi) / 180.0 as AngleThreshold,
        it[2] as StartingRadius,
        it[3] as FinalRadius,
        it[4] as DecayConstant,
        TimeSpan.FromSeconds(it[5]) as TimeToEat)
    -> MemberSelector(Selector="AngleThreshold,StartingAngle,StartingRadius,FinalRadius,DecayConstant,TimeToEat") => #7
    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[6] * Math.Pi) / 180.0 as PerturbAngle,
        it[7] as TriggerRadius,
        it[8] as PerturbMagnitude)
    -> MemberSelector(Selector="PerturbAngle,TriggerRadius,PerturbMagnitude") => #9
    #7, #9 -> Zip
    -> ToArray
    -> AsyncSubject TrialSettings

    SubscribeSubject IsTrialEnabled?
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> SelectMany TrialStructure
        SubscribeSubject TrialSettings => #0
        SubscribeSubject TrialNumber => #1
        SubscribeSubject TrialSettings
        -> MemberSelector(Selector=Length) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 > (it.Item2 - 1) ? (it.Item2 - 1) : it.Item1
        -> PropertyMapping(Value) => #6
        #0, #6 -> Index(Operand=IntProperty(Value=12))
        -> Take(Count=1)
        -> AsyncSubject ThisTrialSettings

        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> SelectMany SetInitialPosition
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> InputMapping(X(Selector=StartingRadius), Y(Selector=StartingAngle))
            -> Bonsai.Vision.CreatePoint2f(X=0.18, Y=1.57079637)
            -> CricketVR.PolarToCart
            -> MulticastSubject GoToCartPosition
            -> SelectMany LogTrialInit
                SubscribeSubject TrialNumber
                -> IncludeWorkflow(Path=Extensions\FormatSoftwareEvent.bonsai, Address=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Trial
            GroupWorkflow CheckDistanceToCricket
                SubscribeSubject CurrentArmPosition
                -> Bonsai.Shaders.SampleOnRenderFrame
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> WorkflowOutput
            -> PublishSubject DistanceToCricket

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow EndTrial?
                WorkflowInput Source1 => #0
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=FinalRadius) => #3
                #0, #3 -> WithLatestFrom
                -> Subtract
                -> Condition EndTrialDistance
                    WorkflowInput Source1
                    -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=3, Payload=0)
                -> Take(Count=1)
                -> Format(Format="End ++ Delta = {0}")
                -> WorkflowOutput
            -> WorkflowOutput

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow ApplyPerturbation
                WorkflowInput Source1 => #0
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=TriggerRadius) => #3
                #0, #3 -> WithLatestFrom
                -> Condition
                    WorkflowInput Source1
                    -> Subtract
                    -> LessThan(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=2, Payload=0) => #7
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> PropertyMapping(Y(Selector=PerturbAngle), X(Selector=PerturbMagnitude)) => #10
                #7, #10 -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0.17453292)
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

            GroupWorkflow DecayPosition
                ExternalizedMapping(Period(DisplayName=DecayEventPeriod, Category=Decay), DueTime(DisplayName=DecayEventDelay))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #1
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=DecayConstant)
                -> PropertyMapping(Value) => #5
                #1, #5 -> DoubleProperty(Value=0.00030000001424923539) => #6
                -> DoubleProperty(Value=0) => #7
                #6, #7 -> Zip
                -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
                -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=0)
                -> Condition CheckBounds
                    SubscribeSubject EnableUpdateDecay
                    -> WorkflowOutput
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

                SubscribeSubject CurrentArmPosition
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> Bonsai.Shaders.SampleOnRenderFrame => #17
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=StartingRadius) => #20
                #17, #20 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it.Item1 < it.Item2) ? True : False
                -> DistinctUntilChanged
                -> BehaviorSubject EnableUpdateDecay

            GroupWorkflow CloseLoopArm
                SubscribeSubject RodentPositionUpdate
                -> Condition WithinSightCone
                    WorkflowInput Source1 => #0
                    SubscribeSubject ComputedOrientation
                    -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                    #0, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2.DisplacementAngle)
                    -> Bonsai.Dsp.Abs => #5
                    SubscribeSubject ThisTrialSettings
                    -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                    -> MemberSelector(Selector=AngleThreshold) => #8
                    #5, #8 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                -> MemberSelector(Selector=Position.Xz)
                -> InputMapping(Y(Selector=Y), X(Selector=X))
                -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #4
                SubscribeSubject CurrentArmPosition => #5
                #4, #5 -> WithLatestFrom
                -> CricketVR.DotProduct
                -> Multiply(Operand=DoubleProperty(Value=-1))
                -> InputMapping(X(Selector=it))
                -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #10
                SubscribeSubject ArmGainTrial => #11
                #10, #11 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput
        -> SelectMany WaitToEat
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> MemberSelector(Selector=TimeToEat)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT20S)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=4, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject RodentPositionUpdate
            -> Condition WithinSightCone
                WorkflowInput Source1 => #0
                SubscribeSubject ComputedOrientation
                -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.DisplacementAngle)
                -> Bonsai.Dsp.Abs => #5
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=AngleThreshold) => #8
                #5, #8 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> MemberSelector(Selector=Position.Xz)
            -> InputMapping(Y(Selector=Y), X(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #12
            SubscribeSubject CurrentArmPosition => #13
            #12, #13 -> WithLatestFrom
            -> CricketVR.DotProduct
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> InputMapping(X(Selector=it))
            -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #18
            SubscribeSubject ArmGainEating => #19
            #18, #19 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject UpdateArmPolarPosition
        -> SelectMany TrialNum++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat

    ExternalizedMapping(Value(DisplayName=InitialState))
    -> BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsTrialEnabled?

    Bonsai.Shaders.Input.KeyDown(Key=T, Modifiers=Control)
    -> BooleanProperty(Value=true) => #23
    Bonsai.Shaders.Input.KeyDown(Key=Y, Modifiers=Control)
    -> BooleanProperty(Value=false) => #25
    #23, #25 -> Merge
    -> MulticastSubject IsTrialEnabled?

Disable GroupWorkflow DrawOldShelter => #8
    ExternalizedMapping(X(DisplayName=X, Category=ShelterCorner), Y(DisplayName=Z, Category=ShelterCorner))
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> Bonsai.Shaders.Delay(DueTime=PT0S) => #2
    -> MemberSelector(Selector=X) => #3
    #2 -> MemberSelector(Selector=Y)
    -> Multiply(Operand=IntProperty(Value=-1)) => #5
    #3, #5 -> Zip
    -> BehaviorSubject ShelterCorner

    SubscribeSubject Draw3DStim => #8
    -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #9
    ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #10
    #8, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #12
    ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #13
    #8, #13 -> Bonsai.Shaders.CreateVector3(X=0.02, Y=0.05, Z=0.02)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #15
    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position) => #17
    SubscribeSubject ShelterCorner => #18
    -> MemberSelector(Selector=Item1) => #19
    #18 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #21
    #19, #21 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #24
    #17, #24 -> WithLatestFrom
    -> Subtract
    -> MemberSelector(Selector=Xz)
    -> MemberSelector(Selector=Length)
    -> Multiply(Operand=FloatProperty(Value=1.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
      Expression: 0.9 * ((1.0) - (1.0 / (Math.Exp(-it) + 1))) - 0.15
    Annotation(Text="This applies a upper boundary and sets alpha to zero when not in the shelter") => #31
    #30, #31 -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 0.220 ? 0.30 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < 0.175 ? 0 : it
    -> PropertyMapping(Alpha(Selector=it)) => #34
    ExternalizedMapping(RotationY) => #35
    #9, #12, #15, #34, #35 -> GroupWorkflow DrawTexturedModelAlpha(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=180)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=3.14159274) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.02, Y=0.05, Z=0.02)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TransparentTexturedModel, TextureName=Black, TextureTarget=Texture2D) => #21
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TransparentTexturedModel) => #23
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TransparentTexturedModel) => #25
        #21, #23, #25 -> Zip => #26
        ExternalizedMapping => #27
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #26, #27 -> GroupWorkflow UpdateMaterial => #28
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TransparentTexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TransparentTexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TransparentTexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TransparentTexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Alpha)) => #29
        #28, #29 -> FloatProperty(Value=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TransparentTexturedModel) => #31
        ExternalizedMapping(MeshName) => #32
        #31, #32 -> Bonsai.Shaders.DrawMesh(ShaderName=TransparentTexturedModel, MeshName=box)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #37
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #38
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #40
    #37, #40 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.04, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #42
    #37 -> Bonsai.Shaders.CreateVector3(X=0.66, Y=0.66, Z=0.66)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #44
    #38, #42, #44 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0.04, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.66, Y=0.66, Z=0.66)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(MeshName) => #30
        #29, #30 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #46
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #47
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #49
    #46, #49 -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.09, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #51
    #46 -> Bonsai.Shaders.CreateVector3(X=0.66, Y=0.66, Z=0.66)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #53
    #47, #51, #53 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-0.09, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.66, Y=0.66, Z=0.66)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        Disable ExternalizedMapping(Value(DisplayName=Alpha)) => #30
        #29, #30 -> Disable FloatProperty(Value=0.15)
        -> Disable Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TexturedModel) => #32
        ExternalizedMapping(MeshName) => #33
        #32, #33 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput
Disable GroupWorkflow EnableShelter => #9
    ExternalizedMapping(Value(DisplayName=Enable))
    -> BooleanProperty(Value=false)
    -> Condition EnableShelter
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
#8, #9 -> Disable SubscribeWhen

GroupWorkflow DrawNewShelter => #11
    ExternalizedMapping(X(DisplayName=X, Category=ShelterCorner), Y(DisplayName=Z, Category=ShelterCorner))
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> Bonsai.Shaders.Delay(DueTime=PT0S) => #2
    -> MemberSelector(Selector=X) => #3
    #2 -> MemberSelector(Selector=Y)
    -> Multiply(Operand=IntProperty(Value=-1)) => #5
    #3, #5 -> Zip
    -> BehaviorSubject ShelterCorner

    SubscribeSubject Draw3DStim => #8
    -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #9
    ExternalizedMapping(X(DisplayName=TranslationX_shadow), Y(DisplayName=TranslationY_shadow), Z(DisplayName=TranslationZ_shadow)) => #10
    #8, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #12
    ExternalizedMapping(X(DisplayName=Shadow_ScaleX), Y(DisplayName=Shadow_ScaleY), Z(DisplayName=Shadow_ScaleZ)) => #13
    #8, #13 -> Bonsai.Shaders.CreateVector3(X=0.02, Y=0.05, Z=0.02)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #15
    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position) => #17
    SubscribeSubject ShelterCorner => #18
    -> MemberSelector(Selector=Item1) => #19
    #18 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #21
    #19, #21 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #24
    #17, #24 -> WithLatestFrom
    -> Subtract
    -> MemberSelector(Selector=Xz)
    -> MemberSelector(Selector=Length)
    -> Multiply(Operand=FloatProperty(Value=1.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
      Expression: 0.9 * ((1.0) - (1.0 / (Math.Exp(-it) + 1))) - 0.15
    Annotation(Text="This applies a upper boundary and sets alpha to zero when not in the shelter") => #31
    #30, #31 -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 0.220 ? 0.30 : it
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < 0.175 ? 0 : it
    -> PropertyMapping(Alpha(Selector=it)) => #34
    ExternalizedMapping(RotationY) => #35
    #9, #12, #15, #34, #35 -> GroupWorkflow DrawTexturedModelAlpha(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=180)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=3.14159274) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.02, Y=0.05, Z=0.02)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TransparentTexturedModel, TextureName=Black, TextureTarget=Texture2D) => #21
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TransparentTexturedModel) => #23
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TransparentTexturedModel) => #25
        #21, #23, #25 -> Zip => #26
        ExternalizedMapping => #27
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #26, #27 -> GroupWorkflow UpdateMaterial => #28
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TransparentTexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TransparentTexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TransparentTexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TransparentTexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Alpha)) => #29
        #28, #29 -> FloatProperty(Value=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TransparentTexturedModel) => #31
        ExternalizedMapping(MeshName) => #32
        #31, #32 -> Bonsai.Shaders.DrawMesh(ShaderName=TransparentTexturedModel, MeshName=box)
        -> WorkflowOutput

    Disable SubscribeSubject Draw3DStim => #37
    -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #38
    Disable SubscribeSubject ShelterCorner
    -> Disable PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #40
    #37, #40 -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0.04, Z=-0)
    -> Disable PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #42
    #37 -> Disable Bonsai.Shaders.CreateVector3(X=0.66, Y=0.66, Z=0.66)
    -> Disable PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #44
    #38, #42, #44 -> Disable GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0.04, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.66, Y=0.66, Z=0.66)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(MeshName) => #30
        #29, #30 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #46
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #47
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #49
    #46, #49 -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.099, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #51
    ExternalizedMapping(X(DisplayName=Floor_ScaleX), Y(DisplayName=Floor_ScaleY), Z(DisplayName=Floor_ScaleZ)) => #52
    #46, #52 -> Bonsai.Shaders.CreateVector3(X=0.5, Y=0.5, Z=0)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #54
    #47, #51, #54 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-0.099, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.5, Y=0.5, Z=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        Disable ExternalizedMapping(Value(DisplayName=Alpha)) => #30
        #29, #30 -> Disable FloatProperty(Value=0.15)
        -> Disable Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TexturedModel) => #32
        ExternalizedMapping(MeshName) => #33
        #32, #33 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #56
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #57
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #59
    #59, #56 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.02, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #61
    ExternalizedMapping(X(DisplayName=Shelter_ScaleX), Y(DisplayName=Shelter_ScaleY), Z(DisplayName=Shelter_ScaleZ)) => #62
    #56, #62 -> Bonsai.Shaders.CreateVector3(X=0.05, Y=0.05, Z=0.062827)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #64
    #57, #61, #64 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0.02, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=-90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=-1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.05, Y=0.05, Z=0.062827)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Orange, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(MeshName) => #30
        #29, #30 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=shelter)
        -> WorkflowOutput
GroupWorkflow EnableShelter => #12
    ExternalizedMapping(Value(DisplayName=Enable))
    -> BooleanProperty(Value=false)
    -> Condition EnableShelter
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
#11, #12 -> SubscribeWhen

FloatProperty(Value=0)
-> Bonsai.Numerics.DegreeToRadian
-> BehaviorSubject YRotationAngle

Disable GroupWorkflow DebugTools
    Disable SubscribeSubject ArmEncoderPosition

    Disable Bonsai.Shaders.Input.KeyDown(Key=D, Modifiers=Control)
    -> Disable Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
    -> Disable CricketVR.CreateArmMessage(Address=32)
    -> Disable MulticastSubject ArmCommands

    Disable SubscribeSubject ArmCommands
    -> Disable Bonsai.Harp.FilterMessage(MessageType=Write, Address=32)
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Float, IsArray=true)) => #7
    -> Disable Index(Operand=IntProperty(Value=0)) => #8
    #7 -> Disable Index(Operand=IntProperty(Value=1)) => #9
    #8, #9 -> Disable Zip

    Disable SubscribeSubject ArmEvents
    -> Disable Bonsai.Harp.FilterMessage(MessageType=Write, Address=32)
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Float, IsArray=true)) => #13
    -> Disable Index(Operand=IntProperty(Value=0)) => #14
    #13 -> Disable Index(Operand=IntProperty(Value=1)) => #15
    #14, #15 -> Disable Zip

    Disable BehaviorSubject<System.String> DebugString
    -> Disable Bonsai.IO.WriteLine

GroupWorkflow SessionTimer
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> WorkflowOutput

GroupWorkflow Visualization
    SubscribeSubject Spinnaker1FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #2
    SubscribeSubject Spinnaker2FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #5
    Disable SubscribeSubject Spinnaker3FrameEvents
    -> Disable MemberSelector(Selector=Value.Image)
    -> Disable VisualizerMapping => #8
    Disable SubscribeSubject ArduCamSource
    -> Disable VisualizerMapping => #10
    Disable SubscribeSubject Pylon1FrameEvents
    -> Disable MemberSelector(Selector=Value.Image)
    -> Disable VisualizerMapping => #13
    SubscribeSubject PiezoSignal
    -> VisualizerMapping => #15
    SubscribeSubject OrientationAngle
    -> VisualizerMapping => #17
    SubscribeSubject PulseLickport
    -> VisualizerMapping => #19
    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=32))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U8, IsArray=false))
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
      Expression: new (it as Photodiod)
    SubscribeSubject ScreenFrameEvents
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression: new (it as FrameEvents)
    #25, #29 -> Zip
    -> MemberSelector(Selector="Item1.Photodiod,Item2.FrameEvents")
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #33
    #2, #5, #8, #10, #13, #15, #17, #19, #33 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=1, RowSpan=1)))
    -> CricketVR.ObserveOnTaskPool

Bonsai.Shaders.Input.KeyDown(Key=PageDown, Modifiers=Control) => #20
ExternalizedMapping(Value(DisplayName=SoundIndex)) => #21
#20, #21 -> IntProperty(Value=2)
-> MulticastSubject PlayAudioStim

IntProperty(Value=100)
-> MulticastSubject "Lickport Open Duration"

Bonsai.Shaders.Input.KeyDown(Key=PageUp, Modifiers=Control)
-> IntProperty(Value=0)
-> MulticastSubject StopAudioStim

FloatProperty(Value=0.25)
-> MulticastSubject ArmGainEating

FloatProperty(Value=0.4)
-> MulticastSubject ArmGainTrial

SubscribeSubject ArmEncoderPosition
