WorkflowBuilder(Version=2.8.1)
GroupWorkflow __Init__
    BehaviorSubject<System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single,System.Single)> ArenaBounds
    PublishSubject<CricketVR.VrElement> RodentPositionUpdate
    BehaviorSubject<CricketVR.VrElement> RodentPosition

    DoubleProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TimestampStream

    SubscribeSubject ResetRodentPosition
    -> MulticastSubject RodentPosition

    BehaviorSubject<System.Single> ArmGainEating
    BehaviorSubject<System.Single> ArmGainTrial
    PublishSubject<OpenCV.Net.Point2f> UpdateArmCartPosition
    BehaviorSubject<CricketVR.VrElement> ResetRodentPosition
    PublishSubject<OpenCV.Net.IplImage> SimulatedEnv
    PublishSubject<Bonsai.Osc.Message> Send_UDP
    BehaviorSubject<OpenCV.Net.Point2f> CurrentArmPosition

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    Disable ExternalizedMapping(X(DisplayName=SoftMinimum, Category=SoftRadialLimits), Y(DisplayName=SoftMaximum, Category=SoftRadialLimits)) => #17
    Disable IntProperty(Value=0) => #18
    #17, #18 -> Disable Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0.27)
    -> Disable BehaviorSubject RadialLimits

    Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> BehaviorSubject UpdateArmPolarPosition

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        Bonsai.Shaders.CreateWindow
          Width=7680
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Hidden
          WindowState=Fullscreen
          DisplayDevice=Third
          TargetRenderFrequency=236
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=shelter
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\shelter.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageCubemap
              Name=cube
              FaceSize=nil
              InternalFormat=Rgb
              MinFilter=Linear
              MagFilter=Linear
              PositiveX=Textures\CubeMapTextures\right.png
              NegativeX=Textures\CubeMapTextures\left.png
              PositiveY=Textures\CubeMapTextures\ceil.png
              NegativeY=Textures\CubeMapTextures\floor.png
              PositiveZ=Textures\CubeMapTextures\back.png
              NegativeZ=Textures\CubeMapTextures\front.png
              ColorType=Unchanged
              FlipMode=Horizontal
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Brown
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Brown.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Black
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Black.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=uv_box
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Nearest
              MagFilter=Nearest
              FileName=Textures\uv.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=CubeMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
              FramebufferAttachments=""
              VertexShader=Shaders\CubeMap.vert
              FragmentShader=BonVision:Shaders.SphereMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=TransparentTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\TransparentTexturedModel.frag
        -> Bonsai.Shaders.MeshResources
          Meshes
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=monkey, FileName=resources\Suzanne.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=resources\cube.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cricket, FileName=resources\cricket.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=box, FileName=resources\box.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=resources\whitesphere.obj)
        -> Disable Bonsai.Shaders.Rendering.SceneResources
          Scenes(SceneConfiguration(Name=scene, FileName=resources\scene.blend))
          ShaderName=Model
          PostProcessSteps=Triangulate
          Scale=1
          RotationX=90
          RotationY=180
          RotationZ=0
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        Bonsai.Shaders.UpdateFrame
        -> PublishSubject dt_event

        SubscribeSubject Draw3DStim
        -> IncludeWorkflow
          Path=Extensions\RenderCubeMapTexture.bonsai
          CubemapTexture=cube
          TranslationX=0
          TranslationY=0
          TranslationZ=0
          RotationZ=0
          RotationY=0
          RotationX=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cube

        ExternalizedMapping(IntrinsicsFileName(DisplayName=LeftIntrinsics, Category="Left Screen"), ExtrinsicsFileName(DisplayName=LeftExtrinsics, Category="Left Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration2.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml) => #13
        Bonsai.Shaders.RenderFrame
        -> PublishSubject ScreenFrameEvents
        -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #16
        SubscribeSubject YRotationAngle
        -> PropertyMapping(YRotation) => #18
        #16, #18 -> IncludeWorkflow(Path=Extensions\ApplyWorldRotation.bonsai, YRotation=0)
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #21
        #13, #21 -> GroupWorkflow LeftView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=90, Z=0), Translation(X=-0.3, Y=0, Z=0))
            -> PublishSubject SyncView
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=FrontIntrinsics, Category="Front Screen"), ExtrinsicsFileName(DisplayName=FrontExtrinsics, Category="Front Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration2.bonsai, IntrinsicsFileName=Calibration\front_intrinsics.yml, ExtrinsicsFileName=Calibration\front_extrinsics.yml) => #24
        #24, #21 -> GroupWorkflow FrontView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=RightIntrinsics, Category="Right Screen"), ExtrinsicsFileName(DisplayName=RightExtrinsics, Category="Right Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration2.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml) => #27
        #27, #21 -> GroupWorkflow RightView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=-90, Z=0), Translation(X=0.3, Y=0, Z=0))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        ExternalizedMapping(IntrinsicsFileName(DisplayName=BackIntrinsics, Category="Back Screen"), ExtrinsicsFileName(DisplayName=BackExtrinsics, Category="Back Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration2.bonsai, IntrinsicsFileName=Calibration\back_intrinsics.yml, ExtrinsicsFileName=Calibration\back_extrinsics.yml) => #30
        #30, #21 -> GroupWorkflow BackView
            WorkflowInput Source2 => #0
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #2
            #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=180, Z=0), Translation(X=0, Y=0, Z=0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        -> PublishSubject PostDrawing

        GroupWorkflow SyncQuad
            SubscribeSubject PostDrawing
            -> Int64Property(Value=1)
            -> Accumulate
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
            -> Bonsai.Shaders.UpdateRenderState(RenderState="")
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #6
            #5 -> PropertyMapping(ColorA) => #7
            #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.012
              ExtentY=0.05
              LocationX=-0.72
              LocationY=0.95
              Layer=10
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            -> WorkflowOutput

        GroupWorkflow BrightnessControl
            SubscribeSubject PostDrawing
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #1
            ExternalizedMapping(ColorR, ColorG, ColorB, ColorA) => #2
            #1, #2 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=0, LocationY=0, Layer=1, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=0)
            -> WorkflowOutput

    GroupWorkflow SWC_Arm
        BehaviorSubject<Bonsai.Harp.HarpMessage> ArmCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject ArmEvents

        ExternalizedMapping(X(DisplayName=SoftMinimum, Category=SoftRadialLimits), Y(DisplayName=SoftMaximum, Category=SoftRadialLimits)) => #4
        IntProperty(Value=0) => #5
        #4, #5 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0.18)
        -> BehaviorSubject RadialLimits

        SubscribeSubject ArmEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=33)
        -> Bonsai.Harp.Parse(Register=harp:ParseMessagePayload(PayloadType=TimestampedFloat, IsArray=true))
        -> MemberSelector(Selector=Value) => #11
        -> Index(Operand=IntProperty(Value=0)) => #12
        #11 -> Index(Operand=IntProperty(Value=1)) => #13
        #12, #13 -> Zip
        -> PublishSubject ArmEncoderPosition

        GroupWorkflow SetAngleMode
            ExternalizedMapping(Value(DisplayName=AngleMode))
            -> IntProperty(Value=1)
            -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=36, PayloadType=U8))
            -> WorkflowOutput
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=Magnitude, Category=ReferencePosition), Y(DisplayName=Angle, Category=ReferencePosition))
        -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> BehaviorSubject ReferenceArmPosition
        -> CricketVR.CreateArmMessage(Address=34)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=HardMinimum, Category=HardRadialLimits), Y(DisplayName=HardMaximum, Category=HardRadialLimits))
        -> Bonsai.Vision.CreatePoint2f(X=0.015, Y=0.270001)
        -> CricketVR.CreateArmMessage(Address=35)
        -> MulticastSubject ArmCommands

    Disable GroupWorkflow HARP_Expander
        ExternalizedMapping(PortName)
        -> GroupWorkflow CreateExpander
            BehaviorSubject<Bonsai.Harp.HarpMessage> ExpanderCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
            -> PublishSubject ExpanderEvents
            -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM2)
        -> PublishSubject BehaviorEvents

    GroupWorkflow Cameras
        ExternalizedMapping(CameraTriggerFrequency, CameraTriggerFrequency2)
        -> GroupWorkflow CameraController
            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency))
            -> IntProperty(Value=50)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency(BufferSize=nil)

            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency2))
            -> IntProperty(Value=100)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency2(BufferSize=nil)

            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=92) => #9
            Source2=#9 -> PublishSubject FrameEvents

            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=94) => #12
            Source2=#12 -> PublishSubject FrameEvents2

            SubscribeSubject BehaviorEvents
            -> Take(Count=1) => #15
            -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #16
            -> SelectMany SetFrameRate => #17
                SubscribeSubject CameraTriggerFrequency
                -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=93, PayloadType=U16))
                -> WorkflowOutput
            #15 -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital1) => #18
            -> SelectMany SetFrameRate2 => #19
                SubscribeSubject CameraTriggerFrequency2
                -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=95, PayloadType=U16))
                -> WorkflowOutput
            GroupWorkflow StartStopCameras => #20
                BehaviorSubject<System.Object> StartCameras => #0
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0) => #1
                BehaviorSubject<System.Object> StopCameras => #2
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #3
                #0 -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital1) => #4
                #2 -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital1) => #5
                #1, #3, #4, #5 -> Merge
                -> WorkflowOutput
            #17, #16, #19, #18, #20 -> Merge
            -> MulticastSubject BehaviorCommands

        Disable GroupWorkflow Spinnaker1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker2
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067283, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker2FrameEvents
            -> WorkflowOutput

        Disable GroupWorkflow Pylon1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> PylonCricketVRCapture(SerialNumber=21421610, ParameterFile=Calibration\acA1300-60gmNIR_21421610.pfs, GrabStrategy=OneByOne, HarpAddress=92)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                new(
                  Value.Image as Image,
                  new(Value.GrabResult.Timestamp as Timestamp,
                      Value.GrabResult.ImageNumber as ImageNumber,
                      Value.GrabResult.SkippedImageCount as SkippedImageCount) as GrabResult)
                  as Value)
            -> Disable ClonePylonGrab
            -> Disable CricketVR.ObserveOnTaskPool
            -> PublishSubject Pylon1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker3
            SubscribeSubject FrameEvents2 => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=23534425, ColorProcessing=Default, HarpAddress=94, ExposureTime=9000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker3FrameEvents
            -> WorkflowOutput

    Disable GroupWorkflow MagneticEncoder
        ExternalizedMapping(SampleRate)
        -> GroupWorkflow MagneticEncoderController
            IntProperty(Value=0) => #0
            ExternalizedMapping(SampleRate) => #1
            #0, #1 -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate250Hz)
            -> MulticastSubject ExpanderCommands

            SubscribeSubject ExpanderEvents
            -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true)
            -> MemberSelector(Selector=Value.Angle)
            -> PublishSubject EncoderValue

            SubscribeSubject EncoderValue
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (Math.Pi) - ((it / 16384.0) * (2.0 * Math.Pi))
            -> BehaviorSubject EncoderAngle

    GroupWorkflow TimestampStream
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=44)
        -> Bonsai.Harp.Parse(Register=harp:ParseMessagePayload(PayloadType=TimestampedS16, IsArray=false))
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject TimestampStream

    GroupWorkflow MouseSensors
        Bonsai.Shaders.Input.Mouse(Index=nil) => #0
        ExternalizedMapping(DeviceId(DisplayName=SideMouseID, Category=MouseID)) => #1
        #0, #1 -> WinRawMouse(DeviceId=-1193409289)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        ExternalizedMapping(Value(DisplayName=SideMouseGain, Category=Gain)) => #5
        #4, #5 -> Multiply(Operand=DoubleProperty(Value=2.6205926323519098E-05))
        -> PublishSubject SideMouse
        ExternalizedMapping(DeviceId(DisplayName=ForwardMouseID, Category=MouseID)) => #8
        #0, #8 -> WinRawMouse(DeviceId=65595)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #11
        ExternalizedMapping(Value(DisplayName=ForwardMouseGain, Category=Gain)) => #12
        #11, #12 -> Multiply(Operand=DoubleProperty(Value=-2.6205926323519098E-05))
        -> PublishSubject ForwardMouse

    GroupWorkflow Audio
        PublishSubject<System.Int32> PlayAudioStim
        -> BehaviorSubject WaveformIndex

        PublishSubject<System.Int32> StopAudioStim

        GroupWorkflow AudioSettings
            ExternalizedMapping(Value(DisplayName=AnalogAuditoryThreatFreq))
            -> IntProperty(Value=15000) => #1
            ExternalizedMapping(Value(DisplayName=AnalogAuditoryThreatAmplitude))
            -> FloatProperty(Value=10) => #3
            ExternalizedMapping(Value(DisplayName=AuditoryThreatMaxDur))
            -> TimeSpanProperty(Value=PT9S) => #5
            #1, #3, #5 -> CombineLatest
            -> BehaviorSubject AuditoryThreatParams
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=SampleRate_AnalogAudio))
            -> IntProperty(Value=300000)
            -> Take(Count=1) => #11
            ExternalizedMapping(Value(DisplayName=BufferSize_AnalogAudio))
            -> IntProperty(Value=3000)
            -> Take(Count=1) => #14
            #11, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SampleRate,
                it.Item2 as BufferLength
                )
            -> AsyncSubject AuditoryAOParams

            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=SampleRate)
            -> PropertyMapping(SampleRate) => #20
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(BufferLength) => #23
            #20, #23 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=100, Waveform=Sine, SampleRate=300000, Amplitude=0, Offset=0, Phase=0)
            -> PublishSubject SwClockSourceAudio

            BehaviorSubject<OpenCV.Net.Mat> AudioPlayback => #26
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=SampleRate)
            -> PropertyMapping(SampleRate) => #29
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(BufferSize) => #32
            #26, #29, #32 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=300000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=3000
              Channels(AnalogOutputChannelConfiguration(ChannelName=Speaker, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

        GroupWorkflow GenerateWaveforms
            Defer "Approaching auditory loom"(Description="3 x 1s increasing amplitude")
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "Approaching auditory loom"
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow ApproachingSound
                        IntProperty(Value=180)
                        -> Bonsai.Numerics.DegreeToRadian
                        -> PropertyMapping(Phase) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #7
                        #2, #4, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300000, Frequency=1, Waveform=Sawtooth, SampleRate=300000, Depth=F32, Amplitude=0.5, Offset=0.5, Phase=3.1415926535897931) => #8
                        ExternalizedMapping(Amplitude, Frequency) => #9
                        #8, #9, #4, #7 -> Bonsai.Dsp.FunctionGenerator(BufferLength=300000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0) => #10
                        #10, #8 -> Zip
                        -> Multiply
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=1) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.5) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #1
            Defer "9s constant amplitude"
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "9s constant amp"
                    ExternalizedMapping(Amplitude, Frequency, Offset) => #0
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #2
                    -> PropertyMapping(SampleRate) => #3
                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=9) => #5
                    #5, #2 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.Item1 * it.Item2
                    -> PropertyMapping(BufferLength) => #8
                    #0, #3, #8 -> Bonsai.Dsp.FunctionGenerator(BufferLength=2700000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Take(Count=1) => #3
            Defer "3 x 2s constant amplitude"
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow "3 x2s"
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow "2s constant amplitude"
                        ExternalizedMapping(Amplitude, Frequency) => #0
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #2
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #5
                        #0, #2, #5 -> Bonsai.Dsp.FunctionGenerator(BufferLength=600000, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=150000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=2) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.5) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #5
            Defer FrequencySweep
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #1
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Amplitude(Selector=Item2)) => #3
                #1, #3 -> GroupWorkflow FrequencySweep
                    ExternalizedMapping(Amplitude)
                    -> GroupWorkflow FrequencySweep => #1
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate / 100
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0.5, Offset=0.5, Phase=0) => #5
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: (it.EndFreq - it.StartFreq) / (it.OnDuration * it.SampleRate / (it.SampleRate / 100))
                        -> PropertyMapping(Value) => #8
                        #5, #8 -> FloatProperty(Value=10)
                        -> Accumulate => #10
                        SubscribeSubject SoundParams
                        -> PropertyMapping(Value(Selector=StartFreq)) => #12
                        #10, #12 -> Add(Operand=IntProperty(Value=17000))
                        -> PropertyMapping(Frequency) => #14
                        ExternalizedMapping(Amplitude) => #15
                        #14, #5, #2, #4, #15 -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=20000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0) => #16
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.OnDuration * it.SampleRate
                        -> PropertyMapping(Count) => #19
                        #16, #19 -> Bonsai.Dsp.Buffer(Count=900000, Skip=nil)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #3
                    #1, #3 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=3)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName=FrequencyStart))
                    -> IntProperty(Value=17000) => #7
                    ExternalizedMapping(Value(DisplayName=FrequencyEnd))
                    -> IntProperty(Value=20000) => #9
                    ExternalizedMapping(Value(DisplayName="SweepDuration(s)"))
                    -> FloatProperty(Value=3) => #11
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=3) => #13
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #15
                    #7, #9, #11, #13, #15 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as StartFreq,
                        it.Item2 as EndFreq,
                        it.Item3 as OnDuration,
                        it.Item4 as NumRepeats,
                        it.Item5 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #7
            Defer Clicks
                SubscribeSubject AuditoryThreatParams
                -> PropertyMapping(Frequency(Selector=Item1), Amplitude(Selector=Item2)) => #1
                SubscribeSubject AuditoryAOParams
                -> PropertyMapping(SampleRate(Selector=SampleRate)) => #3
                #1, #3 -> GroupWorkflow Clicks
                    ExternalizedMapping(Amplitude, Frequency)
                    -> GroupWorkflow "5ms constant amplitude"
                        ExternalizedMapping(Amplitude, Frequency) => #0
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #2
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OnDuration
                        -> PropertyMapping(BufferLength) => #5
                        #0, #2, #5 -> Bonsai.Dsp.FunctionGenerator(BufferLength=1500, Frequency=15000, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=10, Offset=0, Phase=0)
                        -> WorkflowOutput
                    -> Take(Count=1) => #2
                    GroupWorkflow InterSoundInterval
                        SubscribeSubject SoundParams
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it.SampleRate * it.OffDuration
                        -> PropertyMapping(BufferLength) => #2
                        SubscribeSubject SoundParams
                        -> PropertyMapping(SampleRate(Selector=SampleRate)) => #4
                        #2, #4 -> Bonsai.Dsp.FunctionGenerator(BufferLength=15000, Frequency=1, Waveform=Sine, SampleRate=300000, Depth=F32, Amplitude=0, Offset=0, Phase=0)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #2, #4 -> Zip
                    -> Bonsai.Dsp.Concat(Axis=1) => #6
                    SubscribeSubject SoundParams
                    -> PropertyMapping(ColumnTiles(Selector=NumRepeats)) => #8
                    #6, #8 -> Bonsai.Dsp.Tile(RowTiles=1, ColumnTiles=163)
                    -> WorkflowOutput

                    ExternalizedMapping(Value(DisplayName="OnDuration(s)"))
                    -> FloatProperty(Value=0.005) => #12
                    ExternalizedMapping(Value(DisplayName="OffDuration(s)"))
                    -> FloatProperty(Value=0.05) => #14
                    ExternalizedMapping(Value(DisplayName=NumRepeats))
                    -> IntProperty(Value=163) => #16
                    ExternalizedMapping(Value(DisplayName=SampleRate))
                    -> IntProperty(Value=300000) => #18
                    #12, #14, #16, #18 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item1 as OnDuration,
                        it.Item2 as OffDuration,
                        it.Item3 as NumRepeats,
                        it.Item4 as SampleRate)
                    -> BehaviorSubject SoundParams
                -> WorkflowOutput
            -> Take(Count=1) => #9
            #1, #3, #5, #7, #9 -> Concat
            -> ToArray
            -> BehaviorSubject AuditoryWaveformBank
            -> WorkflowOutput

        Defer GenerateSilence => #5
            SubscribeSubject SwClockSourceAudio => #0
            SubscribeSubject AuditoryAOParams => #1
            -> MemberSelector(Selector=BufferLength) => #2
            #1 -> IntProperty(Value=1) => #3
            #2, #3 -> Zip
            -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
            #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=3000, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
            -> WorkflowOutput
        SubscribeSubject PlayAudioStim => #6
        #5, #6 -> TakeUntil => #7
        Defer SampleWaveform => #8
            SubscribeSubject AuditoryWaveformBank
            -> Take(Count=1)
            -> AsyncSubject ThisWaveform

            SubscribeSubject SwClockSourceAudio => #3
            SubscribeSubject ThisWaveform
            -> Take(Count=1) => #5
            SubscribeSubject WaveformIndex
            -> PropertyMapping(Value) => #7
            #5, #7 -> Index(Operand=IntProperty(Value=0)) => #8
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(Count) => #11
            SubscribeSubject AuditoryAOParams
            -> MemberSelector(Selector=BufferLength)
            -> PropertyMapping(Skip) => #14
            #8, #11, #14 -> Bonsai.Dsp.Buffer(Count=3000, Skip=3000) => #15
            #3, #15 -> Zip
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        SubscribeSubject StopAudioStim => #9
        #8, #9 -> TakeUntil => #10
        #7, #10 -> Concat
        -> Repeat
        -> MulticastSubject AudioPlayback

    Disable GroupWorkflow Audio
        Bonsai.Audio.CreateAudioContext
          DeviceName="Generic Software on Speakers (Realtek High Definition Audio)"
          SampleRate=44100
          Refresh=0
          Position(X=0, Y=0, Z=0)
          Velocity(X=0, Y=0, Z=0)
          Direction(X=-0, Y=-0, Z=-1)
          Up(X=0, Y=1, Z=0)
          Gain=1
        -> Bonsai.Audio.AudioResources
          Buffers(BufferConfiguration(Name=SoundBuffer))
          Sources
            SourceConfiguration
              Name=VRSource
              BufferName=""
              Gain=1
              Pitch=1
              Direction(X=0, Y=0, Z=0)
              Position(X=0, Y=0, Z=0)
              Velocity(X=0, Y=0, Z=0)
              Looping=false
              Relative=false
              State=Stopped
        -> Bonsai.Resources.LoadResources

        ExternalizedMapping(FileName)
        -> Bonsai.Audio.AudioReader(FileName=resources\audio\sweep_17000Hz_20000Hz_-3dBFS_3s.wav, BufferLength=0, SampleRate=0) => #4
        ExternalizedMapping(RangeMax(DisplayName=RelativeVolume)) => #5
        #4, #5 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear) => #6
        -> Bonsai.Dsp.ScalarBuffer(Size(Width=500, Height=1), Depth=F32, Channels=1, Value(Val0=10000, Val1=10000, Val2=10000, Val3=10000)) => #7
        #6 -> Bonsai.Dsp.ScalarBuffer(Size(Width=1, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
        #7, #6, #8 -> Zip
        -> Bonsai.Dsp.Concat(Axis=1)
        -> Bonsai.Audio.UpdateBuffer(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", BufferName=SoundBuffer, SampleRate=0) => #11
        ExternalizedMapping(SampleRate) => #12
        #11, #12 -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", SourceName=VRSource, SampleRate=44100, State=Stopped)

        PublishSubject<System.Object> PlayAudioStim
        -> Bonsai.Audio.PlaySource(DeviceName="Generic Software on Speakers (Realtek High Definition Audio)", SourceName(string=VRSource))

    GroupWorkflow LEDOrientation
        SubscribeSubject Spinnaker3FrameEvents => #0
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Crop(RegionOfInterest(X=445, Y=472, Width=279, Height=283))
        -> ObserveOn(Scheduler=TaskPoolScheduler)
        -> Disable Bonsai.Vision.WarpPerspective => #4
          Source(Point2f(X=32.2593765, Y=60.1375), Point2f(X=28.7718754, Y=268.85), Point2f(X=233.6625, Y=270.029175), Point2f(X=238.021881, Y=62.4958344))
          Destination(Point2f(X=260.6906, Y=17.6875), Point2f(X=260.6906, Y=258.2375), Point2f(X=17.4375, Y=258.2375), Point2f(X=17.4375, Y=17.6875))
          Flags=Cubic
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Dsp.Split => #5
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Vision.Threshold(ThresholdValue=203, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #11
        #5 -> MemberSelector(Selector=Item2)
        -> Bonsai.Vision.Threshold(ThresholdValue=254, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #17
        #5 -> MemberSelector(Selector=Item3)
        -> Bonsai.Vision.Threshold(ThresholdValue=254, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #23
        #0 -> MemberSelector(Selector=Seconds) => #24
        #11, #17, #23, #24 -> CombineLatest => #25
        #4, #25 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #27
        -> Skip(Count=1)
        -> BehaviorSubject CurrCoords
        -> SelectMany CreateArray
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Value

            SubscribeSubject Value
            -> MemberSelector(Selector=Item1) => #4
            SubscribeSubject Value
            -> MemberSelector(Selector=Item2) => #6
            SubscribeSubject Value
            -> MemberSelector(Selector=Item3) => #8
            #4, #6, #8 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Bonsai.Vision.MinimumEnclosingCircle
        -> BehaviorSubject
        -> MemberSelector(Selector=Center) => #33
        -> Skip(Count=1)
        #33 -> Take(Count=1)
        -> ReplaySubject centre(BufferSize=nil)
        #27 -> Take(Count=1)
        -> ReplaySubject OriginCoord(BufferSize=nil)
        #27 -> BufferTime(TimeSpan=PT1S)
        -> MemberSelector(Selector=Count)

        SubscribeSubject CurrCoords => #41
        SubscribeSubject OriginCoord => #42
        SubscribeSubject centre => #43
        #42, #43 -> Zip => #44
        #41, #44 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            from math import atan2, degrees, isnan, pi
            from System import Tuple

            @returns(Tuple[Tuple[float, float, float], float])
            def process(value):
                # Current xy coordinates of each point
                current_points = [(value.Item1.Item1.X, value.Item1.Item1.Y),
                                  (value.Item1.Item2.X, value.Item1.Item2.Y),
                                  (value.Item1.Item3.X, value.Item1.Item3.Y)]

                # Original fixed xy coordinates of each point
                original_points = [(value.Item2.Item1.Item1.X, value.Item2.Item1.Item1.Y),
                                   (value.Item2.Item1.Item2.X, value.Item2.Item1.Item2.Y),
                                   (value.Item2.Item1.Item3.X, value.Item2.Item1.Item3.Y)]

                # Get rid of second biggest binary area if LED is obstructed

                # Initialize copied_coordinates as a list of indices of similar entries in current_points
                copied_coordinates = []

                # Iterate over all coordinates in current_points
                for i, coords in enumerate(current_points):
                    # Iterate over all other coordinates in current_points
                    for j, other_coords in enumerate(current_points[i+1:], start=i+1):
                        # Calculate the distance between the current coordinates and other coordinates
                        distance = ((coords[0] - other_coords[0]) ** 2 + (coords[1] - other_coords[1]) ** 2) ** 0.5
                        # Check if the distance is within the radius (30 units)
                        if distance <= 30:
                            # If so, mark both pairs of coordinates as similar in copied_coordinates
                            copied_coordinates.append(i)
                            copied_coordinates.append(j)

                # Convert copied_coordinates to a set to remove duplicates
                copied_coordinates = set(copied_coordinates)

                # Replace similar entries in current_points with None
                for idx in copied_coordinates:
                    current_points[idx] = None

                # Center of the circle
                centreX, centreY = (130, 149)

                # Initialize a list to store the angles for each point
                angles = []

                # Calculate angle for each point
                for i, (x, y) in enumerate(current_points):
                    # Check if any of the input values are NaN
                    if isnan(x) or isnan(y):
                        angles.append(float('nan'))  # Append NaN if any input value is NaN
                        continue

                    # Calculate displacement vector from center to current point
                    dx = x - centreX
                    dy = y - centreY

                    # Calculate displacement vector from center to original point
                    orig_x, orig_y = original_points[i]
                    orig_dx = orig_x - centreX
                    orig_dy = orig_y - centreY

                    # Calculate the angle in radians (clockwise)
                    angle = atan2(dy, dx) - atan2(orig_dy, orig_dx)

                    # Ensure angle is between -pi and +pi radians (360 degrees)
                    if angle < -pi:
                        angle += 2 * pi
                    elif angle > pi:
                        angle -= 2 * pi

                    angles.append(angle)

                # Return the angles for each point as a tuple, along with the fourth element of value.Item1
                return Tuple.Create(Tuple.Create(angles[0], angles[1], angles[2]), value.Item1.Item4)
        -> Bonsai.Scripting.IronPython.PythonTransform => #47
          Script:
            from math import isnan, atan2, sin, cos
            from System import Tuple

            @returns(Tuple[float, float, float, float, float])
            def process(value):

                # Angles of movement
                LED_angles = [value.Item1.Item1, value.Item1.Item2, value.Item1.Item3]

                # Filter out NaN values from LED_angles
                valid_angles = [angle for angle in LED_angles if not isnan(angle)]

                # Filter out large discrepancies (stop averaging of single angle outlier errors)
                consistent_angles = []

                for angle in valid_angles:
                    # Check to see if angle is within ±1 radian of at least one of the other angles
                    if any(abs(angle - other_angle) <= 1 for other_angle in valid_angles if other_angle != angle):
                        consistent_angles.append(angle)

                # Calculate the average of valid consistent angles
                if len(valid_angles) == 1:
                    avg_angle = valid_angles[0]
                elif  len(consistent_angles) >= 2:
                    sin_sum = sum(sin(angle) for angle in consistent_angles)
                    cos_sum = sum(cos(angle) for angle in consistent_angles)
                    avg_angle = atan2(sin_sum, cos_sum)
                else:
                    avg_angle = float('nan')

                # Return the average angle as a tuple
                return Tuple.Create(avg_angle, value.Item2, LED_angles[0], LED_angles[1], LED_angles[2])
        -> MemberSelector(Selector=Item1) => #48
        -> PublishSubject OrientationAngle
        #48 -> BufferTime(TimeSpan=PT1S)
        -> MemberSelector(Selector=Count)
        #47 -> PublishSubject Orientation

    Disable GroupWorkflow LickPort
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=harp:FilterRegisterAddress(Address=32))
        -> PublishSubject Licks

        Disable Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
        -> Disable Bonsai.Harp.CreateMessage(MessageType=Write, Payload=harp:CreateMessagePayload(Address=32, PayloadType=U8, Value=0))
        -> Disable MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreateOutputSetPayload(OutputSet=DOPort0))
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=harp:CreateMessagePayload(Address=34, PayloadType=U8, Value=5000))
        -> MulticastSubject BehaviorCommands

        Disable Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreatePulseSupplyPort0Payload(PulseSupplyPort0=1000))
        -> Disable MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreateOutputTogglePayload(OutputToggle=SupplyPort0))
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=E, SuppressRepetitions=false)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreateOutputStatePayload(OutputState=DOPort0))
        -> MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=F, SuppressRepetitions=false)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreatePulseDOPort0Payload(PulseDOPort0=1000))
        -> MulticastSubject BehaviorCommands

        Disable Bonsai.Windows.Input.KeyDown(Filter=G, SuppressRepetitions=false)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreateOutputStatePayload(OutputState=None))
        -> Disable MulticastSubject BehaviorCommands

        Bonsai.Windows.Input.KeyDown(Filter=H, SuppressRepetitions=false)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=beh:CreatePulseDO0Payload(PulseDO0=5000))
        -> MulticastSubject BehaviorCommands

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=Control)
    -> Take(Count=1)
    -> IntProperty(Value=0)
    -> Bonsai.Osc.Format(Address=/end_session)
    -> MulticastSubject Send_UDP
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=LoggingRootPath))
    -> GroupWorkflow LogController
        ExternalizedMapping(Value)
        -> StringProperty(Value="C:\Users\Cricket Team\Desktop\data2\mmtest6.1")
        -> ReplaySubject SessionPath(BufferSize=nil)

        SubscribeSubject SessionPath
        -> Timestamp => #4
        -> MemberSelector(Selector=Value) => #5
        #4 -> MemberSelector(Selector=Timestamp.DateTime)
        -> CricketVR.FormatDate => #7
        #5, #7 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

    GroupWorkflow SoftwareEvents
        GroupWorkflow MouseLogging
            SubscribeSubject SideMouse
            -> Bonsai.Harp.Format(MessageType=Event, Register=harp:FormatMessagePayload(Address=231, PayloadType=Float)) => #1
            SubscribeSubject TimestampStream => #2
            #1, #2 -> WithLatestFrom
            -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #4
            SubscribeSubject ForwardMouse
            -> Bonsai.Harp.Format(MessageType=Event, Register=harp:FormatMessagePayload(Address=230, PayloadType=Float)) => #6
            SubscribeSubject TimestampStream => #7
            #6, #7 -> WithLatestFrom
            -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #9
            #4, #9 -> Merge
            -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=MouseSensors)
            -> WorkflowOutput

        BehaviorSubject<Bonsai.Harp.HarpMessage> SoftwareEventLogger

        SubscribeSubject ResetRodentPosition => #2
        SubscribeSubject TimestampStream => #3
        #2, #3 -> WithLatestFrom
        -> CricketVR.VRElementToHarpMessage(Address=11)
        -> MulticastSubject SoftwareEventLogger

        BehaviorSubject<System.Tuple(System.Int32,System.Int32)> SoftwareEvent_U8
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(it.Item1 as Address,
            it.Item2 as Value)
        -> InputMapping(Address(Selector=Address), Payload(Selector=Value))
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=harp:CreateMessagePayload(Address=1, PayloadType=U8, Value=12)) => #10
        SubscribeSubject TimestampStream => #11
        #10, #11 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Write)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject PlayAudioStim
        -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=21, PayloadType=U8)) => #16
        SubscribeSubject TimestampStream => #17
        #16, #17 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject StopAudioStim
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=harp:CreateMessagePayload(Address=22, PayloadType=U8, Value=0)) => #22
        SubscribeSubject TimestampStream => #23
        #22, #23 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject ArmGainTrial
        -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=13, PayloadType=Float)) => #28
        SubscribeSubject TimestampStream => #29
        #28, #29 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject ArmGainEating
        -> Bonsai.Harp.Format(MessageType=Write, Register=harp:FormatMessagePayload(Address=14, PayloadType=Float)) => #34
        SubscribeSubject TimestampStream => #35
        #34, #35 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject ShelterCorner
        -> CricketVR.CreateArmMessage(Address=20) => #40
        SubscribeSubject TimestampStream => #41
        #40, #41 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=Event)
        -> MulticastSubject SoftwareEventLogger

    SubscribeSubject SoftwareEventLogger
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=SoftwareEvents)

    SubscribeSubject ScreenFrameEvents
    -> IncludeWorkflow(Path=Extensions\LogFrameEvents.bonsai, LogName=FrameEventLogger)

    Disable SubscribeSubject Spinnaker1FrameEvents
    -> Disable IncludeWorkflow Spinnaker1(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker2FrameEvents
    -> IncludeWorkflow Spinnaker2(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker3FrameEvents
    -> IncludeWorkflow Spinnaker3(Path=Extensions\LogVideo.bonsai, FrameRate=100)

    Disable SubscribeSubject Pylon1FrameEvents
    -> Disable IncludeWorkflow Pylon1(Path=Extensions\LogPylonVideo.bonsai, FrameRate=50)

    SubscribeSubject ArmEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmBoard)

    Disable SubscribeSubject ExpanderEvents
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=OutputExpanderBoard)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorBoard)

    SubscribeSubject RodentPosition => #21
    SubscribeSubject TimestampStream => #22
    #21, #22 -> WithLatestFrom
    -> CricketVR.VRElementToHarpMessage(Address=201)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=RodentPosition)

    SubscribeSubject ArmCommands => #26
    SubscribeSubject TimestampStream => #27
    #26, #27 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmCommands)

    SubscribeSubject BehaviorCommands => #31
    SubscribeSubject TimestampStream => #32
    #31, #32 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorCommands)

    Disable SubscribeSubject ExpanderCommands => #36
    Disable SubscribeSubject TimestampStream => #37
    #36, #37 -> Disable WithLatestFrom
    -> Disable ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> Disable IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ExpanderCommands)

    BehaviorSubject<System.Tuple(System.Boolean,System.Tuple(CricketVR.VrElement,CricketVR.VrElement),System.Double)> LoomParameters => #41
    SubscribeSubject TimestampStream => #42
    #41, #42 -> WithLatestFrom
    -> GroupWorkflow LogLooming
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow Looming(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\mmtest6.1\2024-03-22T13-06-11\Looming\Looming_2024-03-22T13-06-12.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item2,Item1.Item2.Item1,Item1.Item2.Item2,Item1.Item3,Item1.Item1"
        -> WorkflowOutput

    SubscribeSubject YRotationAngle => #45
    SubscribeSubject TimestampStream => #46
    #45, #46 -> WithLatestFrom
    -> GroupWorkflow LogRotationAxis
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow YRotationAxis(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\mmtest6.1\2024-03-22T13-06-11\YRotationAxis\YRotationAxis_2024-03-22T13-06-12.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item2,Item1"
        -> WorkflowOutput

    SubscribeSubject Orientation
    -> GroupWorkflow LogLEDOrientation
        WorkflowInput Source1 => #0
        ExternalizedMapping(Name)
        -> IncludeWorkflow LEDOrientation(Path=Extensions\FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #3
        #0, #3 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Cricket Team\Desktop\data2\mmtest6.1\2024-03-22T13-06-11\LEDOrientation\LEDOrientation_2024-03-22T13-06-12.csv"
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector="Item1,Item2,Item3,Item4,Item5"
        -> WorkflowOutput

GroupWorkflow RenderLoop
    GroupWorkflow DrawVRArena
        SubscribeSubject Draw3DStim => #0
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #0, #2 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #3
        -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #4
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #5
        #0, #5 -> Bonsai.Shaders.CreateVector3(X=1, Y=0.1, Z=1) => #6
        -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #7
        #1, #4, #7 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #6
            #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #10
            #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #14
            #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #15
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
            #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=0.1, Z=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
            -> Bonsai.Shaders.NormalMatrix
            -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=uv_box, TextureTarget=Texture2D) => #21
            #0 -> MemberSelector(Selector=ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #23
            #0 -> MemberSelector(Selector=Light)
            -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #25
            #21, #23, #25 -> Zip => #26
            ExternalizedMapping => #27
              Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
              Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
              Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
              SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
            #26, #27 -> GroupWorkflow UpdateMaterial => #28
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
                ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
                #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
                ExternalizedMapping(Value(DisplayName=Specular)) => #11
                #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
                ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
                #15, #16 -> FloatProperty(Value=10)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
                -> WorkflowOutput
            ExternalizedMapping(MeshName) => #29
            #28, #29 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=box)
            -> WorkflowOutput
        #3, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item2.X + it.Item1.X as Bound_P_X,
            -it.Item2.X + it.Item1.X as Bound_N_X,
            it.Item2.Y + it.Item1.Y as Bound_P_Y,
            -it.Item2.Y + it.Item1.Y as Bound_N_Y,
            it.Item2.Z + it.Item1.Z as Bound_P_Z,
            -it.Item2.Z + it.Item1.Z as Bound_N_Z
            )
        -> MemberSelector(Selector="Bound_P_X,Bound_N_X,Bound_P_Y,Bound_N_Y,Bound_P_Z,Bound_N_Z")
        -> MulticastSubject ArenaBounds

    GroupWorkflow Cricket
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(isLocked) => #1
        #0, #1 -> Condition LockCricketToArm?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #3
        #1, #0 -> Condition LockCricketToArm? => #4
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> BitwiseNot
            -> WorkflowOutput
        #3, #4 -> Merge
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #6
        ExternalizedMapping(EnableCricket) => #7
        #6, #7 -> Condition => #8
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=EnableCricket)) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #9
        SubscribeSubject CurrentArmPosition => #10
        #0, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.X as X,
            it.Y as Z)
        -> InputMapping(X(Selector=X), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=0.0150001, Y=-0.05, Z=0)
        -> PropertyMapping(Position) => #16
        #0, #16 -> CricketVR.CreateVrElement(Position(X=0.0150001, Y=-0.05, Z=0), Orientation(X=0, Y=0, Z=0)) => #17
        SubscribeSubject RodentPosition => #18
        #17, #18 -> WithLatestFrom
        -> Add
        -> BehaviorSubject PositionCricket => #21
        -> CricketVR.CreateVrElement(Position(X=1, Y=1, Z=-1), Orientation(X=1, Y=1, Z=1)) => #22
        #21, #22 -> Zip
        -> Multiply
        -> PropertyMapping => #25
          TranslationX(Selector=Position.X)
          TranslationY(Selector=Position.Y)
          TranslationZ(Selector=Position.Z)
          RotationX(Selector=Orientation.X)
          RotationY(Selector=Orientation.Y)
          RotationZ(Selector=Orientation.Z)
        #8, #9, #25 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.007976912
          TranslationY=-0.05
          TranslationZ=-0.00702318829
          RotationZ=0
          RotationY=156.521561
          RotationX=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          Ambient(X=0.2, Y=0.2, Z=0.2)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          MeshName=cricket

    GroupWorkflow RemoteSimulatedEnv
        Bonsai.Osc.CreateUdpClient(Name=FakeWorldUDP, Port=0, RemoteHostName=localhost, RemotePort=2323)

        SubscribeSubject Send_UDP
        -> Bonsai.Osc.SendMessage(Connection=FakeWorldUDP, Address="")

        IntProperty(Value=1000)
        -> Bonsai.Osc.Format(Address=/CanvasSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/VRWorldSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=0.3)
        -> Bonsai.Osc.Format(Address=/MonitorBox)
        -> MulticastSubject Send_UDP

        SubscribeSubject RadialLimits
        -> MemberSelector(Selector=X)
        -> Bonsai.Osc.Format(Address=/RadialLimits)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Position)
        -> MemberSelector(Selector="X,Y,Z")
        -> Bonsai.Osc.Format(Address=/VRRodentPosition)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Orientation.Y)
        -> Bonsai.Osc.Format(Address=/RodentOrientation)
        -> MulticastSubject Send_UDP

        SubscribeSubject CurrentArmPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector="X,Y")
        -> Bonsai.Osc.Format(Address=/RealCricketPosition)
        -> MulticastSubject Send_UDP

    GroupWorkflow 3dLoom
        Bonsai.Shaders.Input.KeyDown(Key=L, Modifiers=Control)
        -> Take(Count=1)
        -> SelectMany 3dLoom
            WorkflowInput Source1 => #0
            ExternalizedMapping(Position(DisplayName=StartPosition)) => #1
            #0, #1 -> CricketVR.CreateVrElement(Position(X=0, Y=0.3, Z=-1), Orientation(X=0, Y=0, Z=0)) => #2
            ExternalizedMapping(Position(DisplayName=EndPosition)) => #3
            #0, #3 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=-0.3), Orientation(X=0, Y=0, Z=0)) => #4
            #2, #4 -> Zip => #5
            ExternalizedMapping(Duration, DueTime(DisplayName=TimeAfterEnd)) => #6
            #5, #6 -> SelectMany Lerp
                ExternalizedMapping(Value(DisplayName=Duration))
                -> PropertySource<DoubleProperty,System.Double>(MemberName=Duration, Value=1.5)
                -> Take(Count=1)
                -> AsyncSubject AnimationDuration

                ExternalizedMapping(Value(DisplayName=FollowAnimal))
                -> BooleanProperty(Value=true)
                -> Take(Count=1)
                -> AsyncSubject FollowAnimal

                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject AnimationLimits

                SubscribeSubject Draw3DStim
                -> Condition
                    SubscribeSubject FollowAnimal
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #13
                SubscribeSubject Draw3DStim
                -> Condition => #15
                    SubscribeSubject FollowAnimal
                    -> WorkflowOutput
                #13, #15 -> Merge
                -> Skip(Count=1) => #17
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #19
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.X), RangeEnd(Selector=Item2.Position.X)) => #21
                #19, #21 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1.5, RangeBegin=0, RangeEnd=0) => #22
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #24
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.Y), RangeEnd(Selector=Item2.Position.Y)) => #26
                #24, #26 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1.5, RangeBegin=0.30000001192092896, RangeEnd=0) => #27
                SubscribeSubject AnimationDuration
                -> PropertyMapping(Duration) => #29
                SubscribeSubject AnimationLimits
                -> PropertyMapping(RangeBegin(Selector=Item1.Position.Z), RangeEnd(Selector=Item2.Position.Z)) => #31
                #29, #31 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=1.5, RangeBegin=-1, RangeEnd=-0.30000001192092896) => #32
                #22, #27, #32 -> CombineLatest
                -> InputMapping(Position(Selector="it.Item1, it.Item2, it.Item3"))
                -> CricketVR.CreateVrElement(Position(X=0, Y=-8.881784E-16, Z=-0.3), Orientation(X=0, Y=0, Z=0))
                -> PropertyMapping(TranslationX(Selector=Position.X), TranslationY(Selector=Position.Y), TranslationZ(Selector=Position.Z)) => #36
                #17, #36 -> IncludeWorkflow => #37
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-8.881784E-16
                  TranslationZ=-0.3
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                  ScaleX=0.1
                  ScaleY=0.1
                  ScaleZ=0.1
                  Ambient(X=0, Y=0, Z=0)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  MeshName=sphere
                #22 -> Last => #38
                ExternalizedMapping(DueTime) => #39
                #38, #39 -> Bonsai.Shaders.Delay(DueTime=PT1.25S) => #40
                #37, #40 -> TakeUntil
                -> WorkflowOutput

                SubscribeSubject FollowAnimal => #43
                SubscribeSubject AnimationLimits => #44
                SubscribeSubject AnimationDuration => #45
                #43, #44, #45 -> Zip
                -> MulticastSubject LoomParameters
            -> WorkflowOutput
        -> Repeat
        -> WorkflowOutput

GroupWorkflow RodentPositionControl
    SubscribeSubject ForwardMouse => #0
    SubscribeSubject SideMouse => #1
    #0, #1 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=0)
    -> InputMapping(Position(Selector=it))
    -> CricketVR.CreateVrElement(Position(X=-0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject RodentPositionUpdate

    BooleanProperty(Value=false) => #8
    ExternalizedMapping(Key(DisplayName=ResetKey, Category=ResetPosition), Modifiers(DisplayName=ResetModifier, Category=ResetPosition))
    -> Bonsai.Shaders.Input.KeyDown(Key=Insert, Modifiers=Control)
    -> BooleanProperty(Value=false) => #11
    #8, #11 -> Merge => #12
    ExternalizedMapping(Orientation(DisplayName=ResetOrientation, Category=ResetPosition), Position(DisplayName=ResetPosition, Category=ResetPosition)) => #13
    #12, #13 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

    ExternalizedMapping(Position(DisplayName=PositionGain, Category=ManualOverride), EnableManualOverride(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ManualOverride
        Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
        -> CricketVR.KeySelectorScript(KeyFilter=A)
        -> Bonsai.Shaders.CreateVector3(X=-1, Y=0, Z=0) => #2
        #0 -> CricketVR.KeySelectorScript(KeyFilter=D)
        -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=0) => #4
        #0 -> CricketVR.KeySelectorScript(KeyFilter=W)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #6
        #0 -> CricketVR.KeySelectorScript(KeyFilter=S)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1) => #8
        #0 -> CricketVR.KeySelectorScript(KeyFilter=Z)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1, Z=0) => #10
        #0 -> CricketVR.KeySelectorScript(KeyFilter=X)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1, Z=0) => #12
        #2, #4, #6, #8, #10, #12 -> Merge
        -> InputMapping(Position(Selector=it))
        -> CricketVR.CreateVrElement(Position(X=-1, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #15
        ExternalizedMapping(Position(Category=PositionGain)) => #16
        #15, #16 -> CricketVR.CreateVrElement(Position(X=0.01, Y=0.01, Z=0.01), Orientation(X=0, Y=0, Z=0)) => #17
        #15, #17 -> Zip
        -> Multiply => #19
        ExternalizedMapping(Value(DisplayName=EnableManualOverride)) => #20
        #19, #20 -> Condition EnableManualOverride
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject RodentPositionUpdate
        -> WorkflowOutput

    SubscribeSubject ResetRodentPosition
    -> CreateObservable UpdateRodentPosition
        SubscribeSubject RodentPosition
        -> WorkflowOutput

        SubscribeSubject RodentPosition
        -> Take(Count=1) => #3
        SubscribeSubject RodentPositionUpdate => #4
        #3, #4 -> Merge
        -> MemberSelector(Selector=Position)
        -> Scan => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            #0 -> MemberSelector(Selector=Accumulation) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject ArenaBounds => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector="Item1,Item2") => #7
            ExternalizedMapping(NumericCorrectionFactor, OffsetBounds) => #8
            #7, #8 -> CricketVR.ClampPositionUpdate(NumericCorrectionFactor=1, OffsetBounds(X=-0.3, Y=0, Z=-0.3))
            -> WorkflowOutput
        Disable GroupWorkflow ManualOrientation => #8
            Bonsai.Shaders.Input.MouseWheel
            -> MemberSelector(Selector=EventArgs.Value)
            -> Mod(Operand=IntProperty(Value=50))
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: ((it / 50.0) * 2.0 * Math.Pi + 2.0*Math.Pi) % (2.0 * Math.Pi)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it <= Math.Pi ? it : -1.0 * (2.0*Math.Pi - it)
            -> InputMapping(Y(Selector=it))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.376991123, Z=0) => #6
            Bonsai.Shaders.CreateVector3(X=0, Y=1.57079637, Z=0) => #7
            #6, #7 -> Merge
            -> WorkflowOutput
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #9
        SubscribeSubject OrientationAngle
        -> InputMapping(Y(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=2.73181653, Z=0) => #12
        #9, #12 -> Merge => #13
        #7, #8, #13 -> CombineLatest => #14
        -> MemberSelector(Selector=Item1) => #15
        SubscribeSubject YRotationAngle
        -> PropertyMapping(Angle) => #17
        #15, #17 -> CricketVR.RotateVec3(AngleVector(X=0, Y=1, Z=0), Angle=0) => #18
        #14 -> MemberSelector(Selector=Item2) => #19
        #18, #19 -> Zip
        -> InputMapping(Position(Selector=Item1), Orientation(Selector=Item2))
        -> CricketVR.CreateVrElement(Position(X=-0.00702318829, Y=0, Z=0.00702318829), Orientation(X=0, Y=2.73181653, Z=0))
        -> MulticastSubject RodentPosition
    -> Switch

    SubscribeSubject RodentPosition
    -> WorkflowOutput

    ExternalizedMapping(Key(DisplayName=ShelterTeleportKey, Category=ShelterTeleport), Modifiers(DisplayName=ShelterTeleportModifier, Category=ShelterTeleport))
    -> Bonsai.Shaders.Input.KeyDown(Key=Home, Modifiers=Control) => #24
    SubscribeSubject ShelterCorner => #25
    -> MemberSelector(Selector=Item1) => #26
    #25 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #28
    #26, #28 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(Orientation, Position(Selector=it)) => #32
    #24, #32 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

GroupWorkflow ArmPositionControl
    ExternalizedMapping(Magnitude(DisplayName=Magnitude, Category=InitialArmPosition), Angle(DisplayName=Angle, Category=InitialArmPosition))
    -> GroupWorkflow InitialArmPosition
        Unit => #0
        ExternalizedMapping(X(DisplayName=Magnitude), Y(DisplayName=Angle)) => #1
        #0, #1 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> CricketVR.PolarToCart
        -> MulticastSubject GoToCartPosition
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping
      ShortcutKey(Category=ResetArmPosition)
      ShortcutMod(Category=ResetArmPosition)
      Magnitude(DisplayName=ResetMagnitude, Category=ResetArmPosition)
      Angle(DisplayName=ResetAngle, Category=ResetArmPosition)
    -> GroupWorkflow ArmUpdates
        BehaviorSubject<OpenCV.Net.Point2f> GoToCartPosition
        -> CreateObservable ArmPositionUpdating
            WorkflowInput Source1 => #0
            -> BooleanProperty(Value=false) => #1
            #1, #0 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject UpdateArmCartPosition => #4
            -> BooleanProperty(Value=false) => #5
            #5, #4 -> Zip => #6
            SubscribeSubject UpdateArmPolarPosition
            -> Skip(Count=1) => #8
            -> BooleanProperty(Value=true) => #9
            #9, #8 -> Zip => #10
            #3, #6, #10 -> Merge
            -> Scan Accumulate_dV/dt
                WorkflowInput Source1 => #0
                -> Condition UpdatePolar => #1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2)
                -> CricketVR.CartToPolar => #3
                #1 -> MemberSelector(Selector=Value.Item2) => #4
                #3, #4 -> Zip
                -> Add
                -> CricketVR.PolarToCart => #7
                #0 -> Condition UpdateCart => #8
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2) => #9
                #8 -> MemberSelector(Selector=Value.Item2) => #10
                #9, #10 -> Zip
                -> Add => #12
                #7, #12 -> Merge => #13
                SubscribeSubject RadialLimits
                -> PropertyMapping(MinRadius(Selector=X), MaxRadius(Selector=Y)) => #15
                #13, #15 -> CricketVR.ClampArmPosition(MinRadius=0.0150001, MaxRadius=0.18) => #16
                -> BooleanProperty(Value=false) => #17
                #17, #16 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #13
            -> Take(Count=1) => #14
            #13 -> Skip(Count=1) => #15
            ExternalizedMapping(Period(DisplayName=SamplingPeriod))
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.01S) => #17
            #15, #17 -> Sample => #18
            #14, #18 -> Merge
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject CurrentArmPosition

        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #5
        SubscribeSubject RadialLimits => #6
        #5, #6 -> WithLatestFrom
        -> Condition FilterUpdate
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.X)
            -> Bonsai.Dsp.Abs => #2
            #0 -> MemberSelector(Selector=Item2) => #3
            #2, #3 -> Zip => #4
            -> MemberSelector(Selector="Item1,Item2.X")
            -> GreaterThanOrEqual => #6
            #4 -> MemberSelector(Selector="Item1,Item2.Y")
            -> LessThanOrEqual => #8
            #6, #8 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> CricketVR.CreateArmMessage(Address=32)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(Key(DisplayName=ShortcutKey, Category=ResetArmPosition), Modifiers(DisplayName=ShortcutMod, Category=ResetArmPosition))
        -> Bonsai.Shaders.Input.KeyDown(Key=F3, Modifiers=Control) => #13
        ExternalizedMapping(X(DisplayName=Magnitude, Category=ResetArmPosition), Y(DisplayName=Angle, Category=ResetArmPosition)) => #14
        #13, #14 -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0)
        -> MulticastSubject GoToCartPosition

    ExternalizedMapping(Gain(DisplayName=Gain, Category=ManualOverride), Enable(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ArmManualOverride
        ExternalizedMapping(Gain)
        -> GroupWorkflow Manual_Arm_Control
            Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
            -> CricketVR.KeySelectorScript(KeyFilter=Up)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=1) => #2
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Down)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=-1) => #4
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Left)
            -> Bonsai.Vision.CreatePoint2f(X=-1, Y=0) => #6
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Right)
            -> Bonsai.Vision.CreatePoint2f(X=1, Y=0) => #8
            #2, #4, #6, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=Gain)) => #10
            #9, #10 -> FloatProperty(Value=0.001) => #11
            #9, #11 -> Zip
            -> Multiply
            -> WorkflowOutput
        -> Disable GateInterval(Interval=PT0.01S) => #2
        ExternalizedMapping(Value(DisplayName=Enable)) => #3
        #2, #3 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject UpdateArmCartPosition
        -> WorkflowOutput

    Disable GroupWorkflow GroundTruthFeedback
        SubscribeSubject ArmEvents
        -> Condition ArmMovingTo => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> Equal(Operand=IntProperty(Value=32))
            -> WorkflowOutput
        ExternalizedMapping(Type) => #2
        #1, #2 -> Bonsai.Harp.Parse(Register=harp:ParseMessagePayload(PayloadType=Float, IsArray=true)) => #3
        -> Disable MemberSelector(Selector=Seconds) => #4
        #3 -> Disable MemberSelector(Selector=Value) => #5
        -> Index(Operand=IntProperty(Value=0)) => #6
        #5 -> Index(Operand=IntProperty(Value=1)) => #7
        #4, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as Seconds,
            it.Item2 as Magnitude,
            it.Item3 as Angle)
        -> MemberSelector(Selector="Magnitude,Angle")
        -> CricketVR.PolarToCart
        -> BehaviorSubject TrueArmPosition
        -> WorkflowOutput

GroupWorkflow TrialLogic
    GroupWorkflow GetOrientation
        SubscribeSubject RodentPosition
        -> MemberSelector(Selector=Orientation.Y) => #1
        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #3
        #1, #3 -> WithLatestFrom
        -> MemberSelector(Selector="Item1,Item2.X,Item2.Y")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as RodentOrientation,
            it.Item2 as DisplacementMagnitude,
            Math.Abs(it.Item3 - it.Item1) < Math.Pi ? (it.Item3 - it.Item1) : ((it.Item3 - it.Item1 < 0) ? ((it.Item3 - it.Item1) + 2.0 * Math.Pi) : ((it.Item3 - it.Item1) - 2.0 * Math.Pi)) as DisplacementAngle)
        -> WorkflowOutput
    -> MemberSelector(Selector="RodentOrientation,DisplacementMagnitude,DisplacementAngle")
    -> BehaviorSubject ComputedOrientation

    ExternalizedMapping(FileName(DisplayName=TrialListPath))
    -> Bonsai.IO.CsvReader(FileName=TrialLogicCsv\stage2.0_mm_O2.csv, ListSeparator="", ScanPattern=%s, SkipRows=1)
    -> Parse(Pattern=%f, Separator=",") => #5
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[0] * Math.Pi) / 180.0 as StartingAngle,
        (it[1] * Math.Pi) / 180.0 as AngleThreshold,
        it[2] as StartingRadius,
        it[3] as FinalRadius,
        it[4] as DecayConstant,
        TimeSpan.FromSeconds(it[5]) as TimeToEat)
    -> MemberSelector(Selector="AngleThreshold,StartingAngle,StartingRadius,FinalRadius,DecayConstant,TimeToEat") => #7
    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[6] * Math.Pi) / 180.0 as PerturbAngle,
        it[7] as TriggerRadius,
        it[8] as PerturbMagnitude)
    -> MemberSelector(Selector="PerturbAngle,TriggerRadius,PerturbMagnitude") => #9
    #7, #9 -> Zip
    -> ToArray
    -> AsyncSubject TrialSettings

    SubscribeSubject IsTrialEnabled?
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> SelectMany TrialStructure
        SubscribeSubject TrialSettings => #0
        SubscribeSubject TrialNumber => #1
        SubscribeSubject TrialSettings
        -> MemberSelector(Selector=Length) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 > (it.Item2 - 1) ? (it.Item2 - 1) : it.Item1
        -> PropertyMapping(Value) => #6
        #0, #6 -> Index(Operand=IntProperty(Value=12))
        -> Take(Count=1)
        -> AsyncSubject ThisTrialSettings

        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> SelectMany SetInitialPosition
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> InputMapping(X(Selector=StartingRadius), Y(Selector=StartingAngle))
            -> Bonsai.Vision.CreatePoint2f(X=0.18, Y=1.57079637)
            -> CricketVR.PolarToCart
            -> MulticastSubject GoToCartPosition
            -> SelectMany LogTrialInit
                SubscribeSubject TrialNumber
                -> IncludeWorkflow(Path=Extensions\FormatSoftwareEvent.bonsai, Address=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Trial
            GroupWorkflow CheckDistanceToCricket
                SubscribeSubject CurrentArmPosition
                -> Bonsai.Shaders.SampleOnRenderFrame
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> WorkflowOutput
            -> PublishSubject DistanceToCricket

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow EndTrial?
                WorkflowInput Source1 => #0
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=FinalRadius) => #3
                #0, #3 -> WithLatestFrom
                -> Subtract
                -> Condition EndTrialDistance
                    WorkflowInput Source1
                    -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=3, Payload=0)
                -> Take(Count=1)
                -> Format(Format="End ++ Delta = {0}")
                -> WorkflowOutput
            -> WorkflowOutput

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow ApplyPerturbation
                WorkflowInput Source1 => #0
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=TriggerRadius) => #3
                #0, #3 -> WithLatestFrom
                -> Condition
                    WorkflowInput Source1
                    -> Subtract
                    -> LessThan(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=2, Payload=0) => #7
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> PropertyMapping(Y(Selector=PerturbAngle), X(Selector=PerturbMagnitude)) => #10
                #7, #10 -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0.17453292)
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

            GroupWorkflow DecayPosition
                ExternalizedMapping(Period(DisplayName=DecayEventPeriod, Category=Decay), DueTime(DisplayName=DecayEventDelay))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #1
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=DecayConstant)
                -> PropertyMapping(Value) => #5
                #1, #5 -> DoubleProperty(Value=0.00030000001424923539) => #6
                -> DoubleProperty(Value=0) => #7
                #6, #7 -> Zip
                -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
                -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=0)
                -> Condition CheckBounds
                    SubscribeSubject EnableUpdateDecay
                    -> WorkflowOutput
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

                SubscribeSubject CurrentArmPosition
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> Bonsai.Shaders.SampleOnRenderFrame => #17
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=StartingRadius) => #20
                #17, #20 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it.Item1 < it.Item2) ? True : False
                -> DistinctUntilChanged
                -> BehaviorSubject EnableUpdateDecay

            GroupWorkflow CloseLoopArm
                SubscribeSubject RodentPositionUpdate
                -> Condition WithinSightCone
                    WorkflowInput Source1 => #0
                    SubscribeSubject ComputedOrientation
                    -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                    #0, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2.DisplacementAngle)
                    -> Bonsai.Dsp.Abs => #5
                    SubscribeSubject ThisTrialSettings
                    -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                    -> MemberSelector(Selector=AngleThreshold) => #8
                    #5, #8 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                -> MemberSelector(Selector=Position.Xz)
                -> InputMapping(Y(Selector=Y), X(Selector=X))
                -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #4
                SubscribeSubject CurrentArmPosition => #5
                #4, #5 -> WithLatestFrom
                -> CricketVR.DotProduct
                -> Multiply(Operand=DoubleProperty(Value=-1))
                -> InputMapping(X(Selector=it))
                -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #10
                SubscribeSubject ArmGainTrial => #11
                #10, #11 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput
        -> SelectMany WaitToEat
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> MemberSelector(Selector=TimeToEat)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT20S)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=4, Payload=0)
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject RodentPositionUpdate
            -> Condition WithinSightCone
                WorkflowInput Source1 => #0
                SubscribeSubject ComputedOrientation
                -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.DisplacementAngle)
                -> Bonsai.Dsp.Abs => #5
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=AngleThreshold) => #8
                #5, #8 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> MemberSelector(Selector=Position.Xz)
            -> InputMapping(Y(Selector=Y), X(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #12
            SubscribeSubject CurrentArmPosition => #13
            #12, #13 -> WithLatestFrom
            -> CricketVR.DotProduct
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> InputMapping(X(Selector=it))
            -> Bonsai.Vision.CreatePoint2f(X=-0, Y=0) => #18
            SubscribeSubject ArmGainEating => #19
            #18, #19 -> WithLatestFrom
            -> Multiply
            -> MulticastSubject UpdateArmPolarPosition
        -> SelectMany TrialNum++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat

    ExternalizedMapping(Value(DisplayName=InitialState))
    -> BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsTrialEnabled?

    Bonsai.Shaders.Input.KeyDown(Key=T, Modifiers=Control)
    -> BooleanProperty(Value=true) => #23
    Bonsai.Shaders.Input.KeyDown(Key=Y, Modifiers=Control)
    -> BooleanProperty(Value=false) => #25
    #23, #25 -> Merge
    -> MulticastSubject IsTrialEnabled?

GroupWorkflow DrawShelter => #8
    ExternalizedMapping(X(DisplayName=X, Category=ShelterCorner), Y(DisplayName=Z, Category=ShelterCorner))
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0) => #1
    -> MemberSelector(Selector=X) => #2
    #1 -> MemberSelector(Selector=Y)
    -> Multiply(Operand=IntProperty(Value=-1)) => #4
    #2, #4 -> Zip
    -> BehaviorSubject ShelterCorner

    SubscribeSubject Draw3DStim => #7
    -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #8
    ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #9
    #7, #9 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #11
    ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #12
    #7, #12 -> Bonsai.Shaders.CreateVector3(X=0.02, Y=0.05, Z=0.02)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #14
    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position) => #16
    SubscribeSubject ShelterCorner => #17
    -> MemberSelector(Selector=Item1) => #18
    #17 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #20
    #18, #20 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #23
    #16, #23 -> WithLatestFrom
    -> Subtract
    -> MemberSelector(Selector=Xz)
    -> MemberSelector(Selector=Length)
    -> Multiply(Operand=FloatProperty(Value=1.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 0.9 * ((1.0) - (1.0 / (Math.Exp(-it) + 1))) - 0.15
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < 0.175 ? 0 : it
    -> PropertyMapping(Alpha(Selector=it)) => #31
    ExternalizedMapping(RotationY) => #32
    #8, #11, #14, #31, #32 -> GroupWorkflow DrawTexturedModelAlpha(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=180)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=3.14159274) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.02, Y=0.05, Z=0.02)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TransparentTexturedModel, TextureName=Black, TextureTarget=Texture2D) => #21
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TransparentTexturedModel) => #23
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TransparentTexturedModel) => #25
        #21, #23, #25 -> Zip => #26
        ExternalizedMapping => #27
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #26, #27 -> GroupWorkflow UpdateMaterial => #28
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TransparentTexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TransparentTexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TransparentTexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TransparentTexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Alpha)) => #29
        #28, #29 -> FloatProperty(Value=0.2966479)
        -> Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TransparentTexturedModel) => #31
        ExternalizedMapping(MeshName) => #32
        #31, #32 -> Bonsai.Shaders.DrawMesh(ShaderName=TransparentTexturedModel, MeshName=box)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #34
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #35
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #37
    #34, #37 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.1, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #39
    #34 -> Bonsai.Shaders.CreateVector3(X=0.66, Y=0.66, Z=0.66)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #41
    #35, #39, #41 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0.1, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.66, Y=0.66, Z=0.66)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=shelter, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(MeshName) => #30
        #29, #30 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #43
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #44
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #46
    #43, #46 -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.09, Z=-0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #48
    #43 -> Bonsai.Shaders.CreateVector3(X=0.66, Y=0.66, Z=0.66)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #50
    #44, #48, #50 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=-0.09, Z=-0) => #3
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #6
        #3, #6 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #7
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #10
        #7, #10 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #11
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #14
        #11, #14 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #15
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #16
        #15, #16 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.66, Y=0.66, Z=0.66)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #20
        ExternalizedMapping(TextureName) => #21
        #20, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #22
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #24
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #26
        #22, #24, #26 -> Zip => #27
        ExternalizedMapping => #28
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        #27, #28 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        Disable ExternalizedMapping(Value(DisplayName=Alpha)) => #30
        #29, #30 -> Disable FloatProperty(Value=0.15)
        -> Disable Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TexturedModel) => #32
        ExternalizedMapping(MeshName) => #33
        #32, #33 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput
GroupWorkflow EnableShelter => #9
    ExternalizedMapping(Value(DisplayName=Enable))
    -> BooleanProperty(Value=true)
    -> Condition EnableShelter
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
#8, #9 -> SubscribeWhen

FloatProperty(Value=0)
-> Bonsai.Numerics.DegreeToRadian
-> BehaviorSubject YRotationAngle

Bonsai.Shaders.Timer(DueTime=PT2S)
-> MulticastSubject StartCameras

Disable GroupWorkflow DebugTools
    Disable SubscribeSubject ArmEncoderPosition

    Disable Bonsai.Shaders.Input.KeyDown(Key=D, Modifiers=Control)
    -> Disable Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
    -> Disable CricketVR.CreateArmMessage(Address=32)
    -> Disable MulticastSubject ArmCommands

    Disable SubscribeSubject ArmCommands
    -> Disable Bonsai.Harp.FilterMessage(MessageType=Write, Address=32)
    -> Disable Bonsai.Harp.Parse(Register=harp:ParseMessagePayload(PayloadType=Float, IsArray=true)) => #7
    -> Disable Index(Operand=IntProperty(Value=0)) => #8
    #7 -> Disable Index(Operand=IntProperty(Value=1)) => #9
    #8, #9 -> Disable Zip

    Disable SubscribeSubject ArmEvents
    -> Disable Bonsai.Harp.FilterMessage(MessageType=Write, Address=32)
    -> Disable Bonsai.Harp.Parse(Register=harp:ParseMessagePayload(PayloadType=Float, IsArray=true)) => #13
    -> Disable Index(Operand=IntProperty(Value=0)) => #14
    #13 -> Disable Index(Operand=IntProperty(Value=1)) => #15
    #14, #15 -> Disable Zip

    Disable BehaviorSubject<System.String> DebugString
    -> Disable Bonsai.IO.WriteLine

GroupWorkflow SessionTimer
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> WorkflowOutput

GroupWorkflow Visualization
    SubscribeSubject Spinnaker3FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #2
    Disable SubscribeSubject Spinnaker1FrameEvents
    -> Disable MemberSelector(Selector=Value.Image)
    -> Disable VisualizerMapping => #5
    SubscribeSubject Spinnaker2FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #8
    #2, #5, #8 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=1, RowSpan=2)))

Bonsai.Shaders.Input.KeyDown(Key=PageDown, Modifiers=Control) => #19
ExternalizedMapping(Value(DisplayName=SoundIndex)) => #20
#19, #20 -> IntProperty(Value=2)
-> MulticastSubject PlayAudioStim

Bonsai.Shaders.Input.KeyDown(Key=PageUp, Modifiers=Control)
-> IntProperty(Value=0)
-> MulticastSubject StopAudioStim

FloatProperty(Value=0.25)
-> MulticastSubject ArmGainEating

FloatProperty(Value=0.4)
-> MulticastSubject ArmGainTrial

SubscribeSubject ArmEncoderPosition
