<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Selector" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Selector" DisplayName="OtherChanel1" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Selector" DisplayName="OtherChannel2" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ThresholdValue" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>238</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MinArea" />
        <Property Name="MaxArea" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>70</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="0" To="8" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>