<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="IntrinsicsFileName" />
        <Property Name="ExtrinsicsFileName" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>DisplayCalibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="IntrinsicsFileName" Description="The name of the display intrinsics file." />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="cv:LoadExtrinsics,sys:String">
              <MemberName>FileName</MemberName>
              <Value>display_intrinsics.yml</Value>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>display_intrinsics.yml</io:FileName>
              <io:ScanPattern>%s:%d</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DisplayIntrinsics</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="ExtrinsicsFileName" Description="The name of the display extrinsics file." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LoadExtrinsics">
                <cv:FileName>display_extrinsics.yml</cv:FileName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DisplayIntrinsics</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>DisplayWidth</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>display_width</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DisplayIntrinsics</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>DisplayHeight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>display_height</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.Rotation as Rotation,
Item1.Translation as Translation,
Item2 as DisplayWidth,
Item3 as DisplayHeight)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>