<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>PathGen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RootPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>\</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>DateTime.Now.ToString("dd-MM-yyyy_HH-mm-ss")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>\</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>GenPath</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpHardwareInit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PublishSubject" TypeArguments="harp:HarpMessage">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StopPwm</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>PwmDutyCycle</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>PwmFrequency</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PWM</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Poke0InfraRedBeam</p1:Mask>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>PWM.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\PWM.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>it</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Photodiode</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>photodiode.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>44</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\photodiode.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Value,Seconds</io:Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ArduinoSensor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>OpticalFlow</io:Name>
                <io:PortName>COM4</io:PortName>
                <io:BaudRate>57600</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>false</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>OpticalFlow</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i %i</Pattern>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1.Item1 as OF1,
it.Item1.Item2 as OF2,
it.Item2 as LatestHarpTS)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>OpticFlowSensor.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\OpticFlowSensor.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>OF1,OF2,LatestHarpTS</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraOpticflow</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>22067305</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData.TimerValue,ChunkData.CounterValue,ChunkData.Timestamp,ChunkData.FrameID</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>OpticFlowAlgorithm</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Grayscale" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Flip">
                      <cv:Mode>Vertical</cv:Mode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>181</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>Binary</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:GoodFeaturesToTrack">
                      <cv:MaxFeatures>100</cv:MaxFeatures>
                      <cv:QualityLevel>0.01</cv:QualityLevel>
                      <cv:MinDistance>0.1</cv:MinDistance>
                      <cv:RegionOfInterest>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:SparseOpticalFlow">
                      <cv:WindowSize>
                        <cv:Width>31</cv:Width>
                        <cv:Height>31</cv:Height>
                      </cv:WindowSize>
                      <cv:Level>3</cv:Level>
                      <cv:MaxError xsi:nil="true" />
                      <cv:MaxIterations>20</cv:MaxIterations>
                      <cv:Epsilon>0.03</cv:Epsilon>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("Bonsai.Vision")
from System import Tuple
from OpenCV.Net import CV, Scalar, Size, Point2f
from Bonsai.Vision import KeyPointCollection
from math import sin, cos, pi, isnan, sqrt, atan2



# clr.AddReference("Bonsai.Vision")
# from Bonsai.Vision import ConnectedComponent
# from OpenCV.Net import *



#@returns(Tuple[Point2f,float])
@returns(Tuple[float,float,float])
def process(value):
  previous = value.PreviousKeyPoints
  current = value.CurrentKeyPoints
  TotalDisplacement = Point2f(0.0,0.0)
  TotalDisplacementX = 0.0
  TotalDisplacementY = 0.0
  TotalRotation = 0.0

  for cur,prev in zip(current,previous):
    TotalDisplacementX += (cur.X - prev.X)
    TotalDisplacementY += (cur.Y - prev.Y)

    Displacement = cur - prev
    TotalDisplacement += Displacement

    Center = Point2f(current.Image.Width/2.0, current.Image.Height/2.0)

    # assuming rotation around the center of the image, another possibility would
    # be to offset the center taking in acount the displacement in X,Y
    cur2 = cur - Center
    prev2 = prev - Center
    TotalRotation += atan2(crossProduct(cur2,prev2), dotProduct(cur2,prev2))



  if (current.Count&gt; 0):
    TotalDisplacementX /= current.Count
    TotalDisplacementY /= current.Count
    TotalRotation /= current.Count

  TotalRotation *= 225

  return Tuple.Create(TotalDisplacementX,TotalDisplacementY,TotalRotation)




def mul(a,U):
  return Point2f(a*U.X,a*U.Y)


def norm(U):
  return (sqrt((U.X*U.X)+(U.Y*U.Y)))


def crossProduct(U,V):
  return (U.X*V.Y-U.Y*V.X)


def dotProduct(U,V):
  return (U.X*V.X+U.Y*V.Y)</scr:Script>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.Item1 as TotalDisplacementX,
it.Item2 as TotalDisplacementY,
it.Item3 as TotalRotation)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it as LatestHarpTS)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>CameraOpticFlow.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\CameraOpticFlow.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Item1.Item1.TotalDisplacementX,Item1.Item1.TotalDisplacementY,Item1.Item1.TotalRotation,Item1.Item2.LatestHarpTS,Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4</io:Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>CameraOpticFlow.avi</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-03-47\CameraOpticFlow.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>false</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>200</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="18" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MouseSensors</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Minimized</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>120</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>MiceData0.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:Mouse">
                <gli:Index>1</gli:Index>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X,Y</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1.Item1 as X,
it.Item1.Item2 as Y,
it.Item2 as LatestHarpTS
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\MiceData0.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>X,Y,LatestHarpTS</io:Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GenPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>MiceData1.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:Mouse">
                <gli:Index>3</gli:Index>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X,Y</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampStream</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1.Item1 as X,
it.Item1.Item2 as Y,
it.Item2 as LatestHarpTS
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\Cricket Team\Documents\git\BrancoLab\data\SensorBenchmarking\13-04-2022_17-12-57\MiceData1.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>X,Y,LatestHarpTS</io:Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="20" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Shift</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StartPwm</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>StopPwm</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Address</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>44</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.01S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>