<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>237</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:Mouse">
          <gli:Index>0</gli:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:Mouse">
          <gli:Index>1</gli:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\cricket\Desktop\sideways.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source3" />
      <Edge From="9" To="10" Label="Source4" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>