WorkflowBuilder(Version=2.7.0)
GroupWorkflow __Init__
    BehaviorSubject<System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single,System.Single)> ArenaBounds
    PublishSubject<CricketVR.VrElement> RodentPositionUpdate
    BehaviorSubject<CricketVR.VrElement> RodentPosition

    SubscribeSubject ResetRodentPosition
    -> MulticastSubject RodentPosition

    PublishSubject<OpenCV.Net.Point2f> UpdateArmCartPosition
    PublishSubject<OpenCV.Net.Point2f> UpdateArmPolarPosition
    BehaviorSubject<CricketVR.VrElement> ResetRodentPosition
    PublishSubject<OpenCV.Net.IplImage> SimulatedEnv
    PublishSubject<Bonsai.Osc.Message> Send_UDP
    BehaviorSubject<OpenCV.Net.Point2f> CurrentArmPosition

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        Bonsai.Shaders.CreateWindow
          Width=7680
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Hidden
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=236
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=shelter
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\shelter.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageCubemap
              Name=cube
              FaceSize=nil
              InternalFormat=Rgb
              MinFilter=Linear
              MagFilter=Linear
              PositiveX=Textures\CubeMapTextures\right.png
              NegativeX=Textures\CubeMapTextures\left.png
              PositiveY=Textures\CubeMapTextures\ceil.png
              NegativeY=Textures\CubeMapTextures\floor.png
              PositiveZ=Textures\CubeMapTextures\back.png
              NegativeZ=Textures\CubeMapTextures\front.png
              ColorType=Unchanged
              FlipMode=Horizontal
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Brown
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Brown.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Black
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Black.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=uv_box
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Nearest
              MagFilter=Nearest
              FileName=Textures\uv.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=CubeMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
              FramebufferAttachments=""
              VertexShader=Shaders\CubeMap.vert
              FragmentShader=BonVision:Shaders.SphereMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=TransparentTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\TransparentTexturedModel.frag
        -> Bonsai.Shaders.MeshResources
          Meshes
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=monkey, FileName=resources\Suzanne.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=resources\cube.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cricket, FileName=resources\cricket.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=box, FileName=resources\box.obj)
        -> Disable Bonsai.Shaders.Rendering.SceneResources
          Scenes(SceneConfiguration(Name=scene, FileName=resources\scene.blend))
          ShaderName=Model
          PostProcessSteps=Triangulate
          Scale=1
          RotationX=90
          RotationY=180
          RotationZ=0
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        Bonsai.Shaders.UpdateFrame
        -> PublishSubject dt_event

        SubscribeSubject Draw3DStim
        -> IncludeWorkflow
          Path=Extensions\RenderCubeMapTexture.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cube
          RotationZ=0
          RotationY=0
          RotationX=0
          CubemapTexture=cube

        Bonsai.Shaders.RenderFrame
        -> PublishSubject ScreenFrameEvents
        -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #16
        ExternalizedMapping(IntrinsicsFileName(DisplayName=FrontIntrinsics, Category="Front Screen"), ExtrinsicsFileName(DisplayName=FrontExtrinsics, Category="Front Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\front_intrinsics.yml, ExtrinsicsFileName=Calibration\front_extrinsics.yml) => #18
        ExternalizedMapping(IntrinsicsFileName(DisplayName=RightIntrinsics, Category="Right Screen"), ExtrinsicsFileName(DisplayName=RightExtrinsics, Category="Right Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml) => #20
        ExternalizedMapping(IntrinsicsFileName(DisplayName=BackIntrinsics, Category="Back Screen"), ExtrinsicsFileName(DisplayName=BackExtrinsics, Category="Back Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\back_intrinsics.yml, ExtrinsicsFileName=Calibration\back_extrinsics.yml) => #22
        ExternalizedMapping(IntrinsicsFileName(DisplayName=LeftIntrinsics, Category="Left Screen"), ExtrinsicsFileName(DisplayName=LeftExtrinsics, Category="Left Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml) => #24
        #24, #16 -> GroupWorkflow LeftView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=90, Z=0), Translation(X=-0.3, Y=0, Z=0))
            -> PublishSubject SyncView
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #18, #16 -> GroupWorkflow FrontView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #20, #16 -> GroupWorkflow RightView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=-90, Z=0), Translation(X=0.3, Y=0, Z=0))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #22, #16 -> GroupWorkflow BackView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=180, Z=0), Translation(X=0, Y=0, Z=0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        -> PublishSubject PostDrawing

        GroupWorkflow SyncQuad
            SubscribeSubject PostDrawing
            -> Int64Property(Value=1)
            -> Accumulate
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
            -> Bonsai.Shaders.UpdateRenderState(RenderState="")
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #6
            #5 -> PropertyMapping(ColorA) => #7
            #6, #7 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.012
              ExtentY=0.05
              LocationX=-0.72
              LocationY=0.95
              Layer=10
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            -> WorkflowOutput

        GroupWorkflow BrightnessControl
            SubscribeSubject PostDrawing
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #1
            ExternalizedMapping(ColorR, ColorG, ColorB, ColorA) => #2
            #1, #2 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=0, LocationY=0, Layer=1, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=0)
            -> WorkflowOutput

    GroupWorkflow SWC_Arm
        ExternalizedMapping(PortName) => #0
        BehaviorSubject<Bonsai.Harp.HarpMessage> ArmCommands => #1
        #1, #0 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject ArmEvents

        ExternalizedMapping(X(DisplayName=SoftMinimum, Category=SoftRadialLimits), Y(DisplayName=SoftMaximum, Category=SoftRadialLimits)) => #4
        IntProperty(Value=0) => #5
        #4, #5 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0.27)
        -> BehaviorSubject RadialLimits

        SubscribeSubject ArmEvents
        -> Bonsai.Harp.FilterMessage(Address=33, MessageType=Event)
        -> Bonsai.Harp.Parse(Type=TimestampedFloat, IsArray=true)
        -> MemberSelector(Selector=Value) => #11
        -> Index(Operand=IntProperty(Value=0)) => #12
        #11 -> Index(Operand=IntProperty(Value=1)) => #13
        #12, #13 -> Zip
        -> PublishSubject ArmEncoderPosition

        GroupWorkflow SetAngleMode
            ExternalizedMapping(Value(DisplayName=AngleMode))
            -> IntProperty(Value=1)
            -> Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=U8)
            -> WorkflowOutput
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=Magnitude, Category=ReferencePosition), Y(DisplayName=Angle, Category=ReferencePosition))
        -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> BehaviorSubject ReferenceArmPosition
        -> CricketVR.CreateArmMessage(Address=34)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=HardMinimum, Category=HardRadialLimits), Y(DisplayName=HardMaximum, Category=HardRadialLimits))
        -> Bonsai.Vision.CreatePoint2f(X=0.015, Y=0.270001)
        -> CricketVR.CreateArmMessage(Address=35)
        -> MulticastSubject ArmCommands

    GroupWorkflow HARP_Expander
        ExternalizedMapping(PortName)
        -> GroupWorkflow CreateExpander
            BehaviorSubject<Bonsai.Harp.HarpMessage> ExpanderCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
            -> PublishSubject ExpanderEvents
            -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM2)
        -> PublishSubject BehaviorEvents

    GroupWorkflow Cameras
        ExternalizedMapping(CameraTriggerFrequency)
        -> GroupWorkflow CameraController
            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency))
            -> IntProperty(Value=50)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency(BufferSize=nil)

            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterMessage(Address=92, MessageType=Event) => #5
            Source2=#5 -> PublishSubject FrameEvents

            SubscribeSubject BehaviorEvents
            -> Take(Count=1)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #9
            -> SelectMany SetFrameRate => #10
                SubscribeSubject CameraTriggerFrequency
                -> Bonsai.Harp.Format(MessageType=Write, Address=93, PayloadType=U16)
                -> WorkflowOutput
            GroupWorkflow StartStopCameras => #11
                BehaviorSubject<System.Object> StopCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #1
                BehaviorSubject<System.Object> StartCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0) => #3
                #3, #1 -> Merge
                -> WorkflowOutput
            #10, #9, #11 -> Merge
            -> MulticastSubject BehaviorCommands

        GroupWorkflow Spinnaker1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067305, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker2
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067283, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker2FrameEvents
            -> WorkflowOutput

        GroupWorkflow Pylon1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> PylonCricketVRCapture(SerialNumber=21421610, ParameterFile=Calibration\acA1300-60gmNIR_21421610.pfs, GrabStrategy=OneByOne, HarpAddress=92)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                new(
                  Value.Image as Image,
                  new(Value.GrabResult.Timestamp as Timestamp,
                      Value.GrabResult.ImageNumber as ImageNumber,
                      Value.GrabResult.SkippedImageCount as SkippedImageCount) as GrabResult)
                  as Value)
            -> Disable ClonePylonGrab
            -> Disable CricketVR.ObserveOnTaskPool
            -> PublishSubject Pylon1FrameEvents
            -> WorkflowOutput

    GroupWorkflow MagneticEncoder
        ExternalizedMapping(SampleRate)
        -> GroupWorkflow MagneticEncoderController
            IntProperty(Value=0) => #0
            ExternalizedMapping(SampleRate) => #1
            #0, #1 -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate250Hz)
            -> MulticastSubject ExpanderCommands

            SubscribeSubject ExpanderEvents
            -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true)
            -> MemberSelector(Selector=Value.Angle)
            -> PublishSubject EncoderValue

            SubscribeSubject EncoderValue
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (Math.Pi) - ((it / 16384.0) * (2.0 * Math.Pi))
            -> BehaviorSubject EncoderAngle

    GroupWorkflow TimestampStream
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterMessage(Address=44, MessageType=Event)
        -> Bonsai.Harp.Parse(Type=TimestampedS16, IsArray=false)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject TimestampStream

    GroupWorkflow MouseSensors
        Bonsai.Shaders.Input.Mouse(Index=nil) => #0
        ExternalizedMapping(DeviceId(DisplayName=SideMouseID, Category=MouseID)) => #1
        #0, #1 -> WinRawMouse(DeviceId=65601)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        ExternalizedMapping(DeviceId(DisplayName=ForwardMouseID, Category=MouseID)) => #5
        ExternalizedMapping(Value(DisplayName=SideMouseGain, Category=Gain)) => #6
        #4, #6 -> Multiply(Operand=DoubleProperty(Value=2.6205926323519098E-05))
        -> PublishSubject SideMouse
        #0, #5 -> WinRawMouse(DeviceId=65595)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #11
        ExternalizedMapping(Value(DisplayName=ForwardMouseGain, Category=Gain)) => #12
        #11, #12 -> Multiply(Operand=DoubleProperty(Value=-2.6205926323519098E-05))
        -> PublishSubject ForwardMouse

    Bonsai.Shaders.Input.KeyDown(Key=End, Modifiers=Control)
    -> Take(Count=1)
    -> IntProperty(Value=0)
    -> Bonsai.Osc.Format(Address=/end_session)
    -> MulticastSubject Send_UDP
    -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=LoggingRootPath))
    -> GroupWorkflow LogController
        ExternalizedMapping(Value)
        -> StringProperty(Value="C:\Users\Cricket Team\Desktop\data\test1231")
        -> ReplaySubject SessionPath(BufferSize=nil)

        SubscribeSubject SessionPath
        -> Timestamp => #4
        -> MemberSelector(Selector=Timestamp.DateTime)
        -> CricketVR.FormatDate => #6
        #4 -> MemberSelector(Selector=Value) => #7
        #7, #6 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

    GroupWorkflow SoftwareEvents
        PublishSubject<Bonsai.Harp.HarpMessage> SoftwareEventLogger

        SubscribeSubject TimestampStream => #1
        SubscribeSubject ResetRodentPosition => #2
        #2, #1 -> WithLatestFrom
        -> CricketVR.VRElementToHarpMessage(Address=11)
        -> MulticastSubject SoftwareEventLogger

        SubscribeSubject TimestampStream => #6
        BehaviorSubject<System.Tuple(System.Int32,System.Int32)> SoftwareEvent_U8
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(it.Item1 as Address,
            it.Item2 as Value)
        -> InputMapping(Address(Selector=Address), Payload(Selector=Value))
        -> Bonsai.Harp.CreateMessage(MessageType=Write, Address=1, PayloadType=U8, Payload=0) => #10
        #10, #6 -> WithLatestFrom
        -> ModifyMessage(Address=nil, MessageTypeModified=nil)
        -> MulticastSubject SoftwareEventLogger

    SubscribeSubject SoftwareEventLogger
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=SoftwareEvents)

    SubscribeSubject ScreenFrameEvents
    -> IncludeWorkflow(Path=Extensions\LogFrameEvents.bonsai, LogName=FrameEventLogger)

    SubscribeSubject Spinnaker1FrameEvents
    -> IncludeWorkflow Spinnaker1(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker2FrameEvents
    -> IncludeWorkflow Spinnaker2(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Pylon1FrameEvents
    -> IncludeWorkflow Pylon1(Path=Extensions\LogPylonVideo.bonsai, FrameRate=50)

    SubscribeSubject ArmEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmBoard)

    SubscribeSubject ExpanderEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=OutputExpanderBoard)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorBoard)

    SubscribeSubject RodentPosition => #19
    SubscribeSubject TimestampStream => #20
    #19, #20 -> WithLatestFrom
    -> CricketVR.VRElementToHarpMessage(Address=201)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=RodentPosition)

    SubscribeSubject ArmCommands => #24
    SubscribeSubject TimestampStream => #25
    #24, #25 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmCommands)

    SubscribeSubject BehaviorCommands => #29
    SubscribeSubject TimestampStream => #30
    #29, #30 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorCommands)

    SubscribeSubject ExpanderCommands => #34
    SubscribeSubject TimestampStream => #35
    #34, #35 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ExpanderCommands)

    SubscribeSubject ForwardMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=230, PayloadType=Float) => #40
    SubscribeSubject TimestampStream => #41
    #40, #41 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #43
    SubscribeSubject TimestampStream => #44
    SubscribeSubject SideMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=231, PayloadType=Float) => #46
    #46, #44 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #48
    #48, #43 -> Merge
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=MouseSensors)

GroupWorkflow RenderLoop
    GroupWorkflow DrawVRArena
        SubscribeSubject Draw3DStim => #0
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #1
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #2
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #3
        #0, #3 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #4
        -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #5
        #0, #2 -> Bonsai.Shaders.CreateVector3(X=1, Y=0.1, Z=1) => #6
        -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #7
        #1, #5, #7 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(MeshName) => #5
            ExternalizedMapping => #6
              Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
              Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
              Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
              SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #9
            #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #13
            #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #17
            #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #18
            #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=0.1, Z=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
            -> Bonsai.Shaders.NormalMatrix
            -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=uv_box, TextureTarget=Texture2D) => #23
            #0 -> MemberSelector(Selector=ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #25
            #0 -> MemberSelector(Selector=Light)
            -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #27
            #23, #25, #27 -> Zip => #28
            #28, #6 -> GroupWorkflow UpdateMaterial => #29
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
                ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
                #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
                ExternalizedMapping(Value(DisplayName=Specular)) => #11
                #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
                ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
                #15, #16 -> FloatProperty(Value=10)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
                -> WorkflowOutput
            #29, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=box)
            -> WorkflowOutput
        #4, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item2.X + it.Item1.X as Bound_P_X,
            -it.Item2.X + it.Item1.X as Bound_N_X,
            it.Item2.Y + it.Item1.Y as Bound_P_Y,
            -it.Item2.Y + it.Item1.Y as Bound_N_Y,
            it.Item2.Z + it.Item1.Z as Bound_P_Z,
            -it.Item2.Z + it.Item1.Z as Bound_N_Z
            )
        -> MemberSelector(Selector="Bound_P_X,Bound_N_X,Bound_P_Y,Bound_N_Y,Bound_P_Z,Bound_N_Z")
        -> MulticastSubject ArenaBounds

    GroupWorkflow Cricket
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #1
        ExternalizedMapping(isLocked) => #2
        #0, #2 -> Condition LockCricketToArm?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #4
        SubscribeSubject RodentPosition => #5
        ExternalizedMapping(EnableCricket) => #6
        SubscribeSubject CurrentArmPosition => #7
        #0, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.X as X,
            it.Y as Z)
        -> InputMapping(X(Selector=X), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=0.2, Y=-0.05, Z=0)
        -> PropertyMapping(Position) => #13
        #0, #13 -> CricketVR.CreateVrElement(Position(X=0.2, Y=-0.05, Z=0), Orientation(X=0, Y=0, Z=0)) => #14
        #14, #5 -> WithLatestFrom
        -> Add
        -> BehaviorSubject PositionCricket => #17
        -> CricketVR.CreateVrElement(Position(X=1, Y=1, Z=-1), Orientation(X=1, Y=1, Z=1)) => #18
        #17, #18 -> Zip
        -> Multiply
        -> PropertyMapping => #21
          TranslationX(Selector=Position.X)
          TranslationY(Selector=Position.Y)
          TranslationZ(Selector=Position.Z)
          RotationX(Selector=Orientation.X)
          RotationY(Selector=Orientation.Y)
          RotationZ(Selector=Orientation.Z)
        #2, #0 -> Condition LockCricketToArm? => #22
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> BitwiseNot
            -> WorkflowOutput
        #4, #22 -> Merge
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #24
        #24, #6 -> Condition => #25
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=EnableCricket)) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #25, #1, #21 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.2
          TranslationY=-0.05
          TranslationZ=-0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cricket
          Ambient(X=0.2, Y=0.2, Z=0.2)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          RotationZ=0
          RotationY=112.148438
          RotationX=0

    GroupWorkflow RemoteSimulatedEnv
        Bonsai.Osc.CreateUdpClient(Name=FakeWorldUDP, Port=0, RemoteHostName=localhost, RemotePort=2323)

        SubscribeSubject Send_UDP
        -> Bonsai.Osc.SendMessage(Connection=FakeWorldUDP, Address="")

        IntProperty(Value=1000)
        -> Bonsai.Osc.Format(Address=/CanvasSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/VRWorldSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=0.3)
        -> Bonsai.Osc.Format(Address=/MonitorBox)
        -> MulticastSubject Send_UDP

        SubscribeSubject RadialLimits
        -> MemberSelector(Selector=X)
        -> Bonsai.Osc.Format(Address=/RadialLimits)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Position)
        -> MemberSelector(Selector="X,Y,Z")
        -> Bonsai.Osc.Format(Address=/VRRodentPosition)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Orientation.Y)
        -> Bonsai.Osc.Format(Address=/RodentOrientation)
        -> MulticastSubject Send_UDP

        SubscribeSubject CurrentArmPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector="X,Y")
        -> Bonsai.Osc.Format(Address=/RealCricketPosition)
        -> MulticastSubject Send_UDP

GroupWorkflow RodentPositionControl
    SubscribeSubject SideMouse => #0
    SubscribeSubject ForwardMouse => #1
    #1, #0 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=0)
    -> InputMapping(Position(Selector=it))
    -> CricketVR.CreateVrElement(Position(X=-0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject RodentPositionUpdate

    ExternalizedMapping(Orientation(DisplayName=ResetOrientation, Category=ResetPosition), Position(DisplayName=ResetPosition, Category=ResetPosition)) => #8
    BooleanProperty(Value=false) => #9
    ExternalizedMapping(Key(DisplayName=ResetKey, Category=ResetPosition), Modifiers(DisplayName=ResetModifier, Category=ResetPosition))
    -> Bonsai.Shaders.Input.KeyDown(Key=Insert, Modifiers=Control)
    -> BooleanProperty(Value=false) => #12
    #9, #12 -> Merge => #13
    #13, #8 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

    ExternalizedMapping(Position(DisplayName=PositionGain, Category=ManualOverride), EnableManualOverride(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ManualOverride
        Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
        -> CricketVR.KeySelectorScript(KeyFilter=A)
        -> Bonsai.Shaders.CreateVector3(X=-1, Y=0, Z=0) => #2
        #0 -> CricketVR.KeySelectorScript(KeyFilter=D)
        -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=0) => #4
        #0 -> CricketVR.KeySelectorScript(KeyFilter=W)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #6
        #0 -> CricketVR.KeySelectorScript(KeyFilter=S)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1) => #8
        #0 -> CricketVR.KeySelectorScript(KeyFilter=Z)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1, Z=0) => #10
        #0 -> CricketVR.KeySelectorScript(KeyFilter=X)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1, Z=0) => #12
        #2, #4, #6, #8, #10, #12 -> Merge
        -> InputMapping(Position(Selector=it))
        -> CricketVR.CreateVrElement(Position(X=0, Y=-1, Z=0), Orientation(X=0, Y=0, Z=0)) => #15
        ExternalizedMapping(Position(Category=PositionGain)) => #16
        #15, #16 -> CricketVR.CreateVrElement(Position(X=0.01, Y=0.01, Z=0.01), Orientation(X=0, Y=0, Z=0)) => #17
        #15, #17 -> Zip
        -> Multiply => #19
        ExternalizedMapping(Value(DisplayName=EnableManualOverride)) => #20
        #19, #20 -> Condition EnableManualOverride
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject RodentPositionUpdate
        -> WorkflowOutput

    SubscribeSubject ResetRodentPosition
    -> CreateObservable UpdateRodentPosition
        SubscribeSubject RodentPosition
        -> WorkflowOutput

        SubscribeSubject RodentPosition
        -> Take(Count=1) => #3
        SubscribeSubject RodentPositionUpdate => #4
        #3, #4 -> Merge
        -> MemberSelector(Selector=Position)
        -> Scan => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #2, #1 -> Zip
            -> Add => #4
            SubscribeSubject ArenaBounds => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector="Item1,Item2") => #7
            ExternalizedMapping(NumericCorrectionFactor, OffsetBounds) => #8
            #7, #8 -> CricketVR.ClampPositionUpdate(NumericCorrectionFactor=1, OffsetBounds(X=-0.3, Y=0, Z=-0.3))
            -> WorkflowOutput
        Disable GroupWorkflow ManualOrientation => #8
            Bonsai.Shaders.CreateVector3(X=0, Y=1.57079637, Z=0) => #0
            Bonsai.Shaders.Input.MouseWheel
            -> MemberSelector(Selector=EventArgs.Value)
            -> Mod(Operand=IntProperty(Value=50))
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: ((it / 50.0) * 2.0 * Math.Pi + 2.0*Math.Pi) % (2.0 * Math.Pi)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it <= Math.Pi ? it : -1.0 * (2.0*Math.Pi - it)
            -> InputMapping(Y(Selector=it))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.376991123, Z=0) => #7
            #7, #0 -> Merge
            -> WorkflowOutput
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #9
        SubscribeSubject EncoderAngle
        -> InputMapping(Y(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1.95659244, Z=0) => #12
        #9, #12 -> Merge => #13
        #7, #8, #13 -> CombineLatest
        -> InputMapping(Orientation(Selector=Item2), Position(Selector=Item1))
        -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=1.95659244, Z=0))
        -> MulticastSubject RodentPosition
    -> Switch

    SubscribeSubject RodentPosition
    -> WorkflowOutput

    ExternalizedMapping(Key(DisplayName=ShelterTeleportKey, Category=ShelterTeleport), Modifiers(DisplayName=ShelterTeleportModifier, Category=ShelterTeleport))
    -> Bonsai.Shaders.Input.KeyDown(Key=Home, Modifiers=Control) => #24
    SubscribeSubject ShelterCorner => #25
    -> MemberSelector(Selector=Item1) => #26
    #25 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #28
    #26, #28 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=-1)
    -> PropertyMapping(Orientation, Position(Selector=it)) => #32
    #24, #32 -> CricketVR.CreateVrElement(Position(X=1, Y=0, Z=-1), Orientation(X=1, Y=0, Z=-1))
    -> MulticastSubject ResetRodentPosition

GroupWorkflow ArmPositionControl
    ExternalizedMapping(Magnitude(DisplayName=Magnitude, Category=InitialArmPosition), Angle(DisplayName=Angle, Category=InitialArmPosition))
    -> GroupWorkflow InitialArmPosition
        Unit => #0
        ExternalizedMapping(X(DisplayName=Magnitude), Y(DisplayName=Angle)) => #1
        #0, #1 -> Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
        -> CricketVR.PolarToCart
        -> MulticastSubject GoToCartPosition
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping
      ShortcutKey(Category=ResetArmPosition)
      ShortcutMod(Category=ResetArmPosition)
      Magnitude(DisplayName=ResetMagnitude, Category=ResetArmPosition)
      Angle(DisplayName=ResetAngle, Category=ResetArmPosition)
    -> GroupWorkflow ArmUpdates
        BehaviorSubject<OpenCV.Net.Point2f> GoToCartPosition
        -> CreateObservable ArmPositionUpdating
            WorkflowInput Source1 => #0
            -> BooleanProperty(Value=false) => #1
            #1, #0 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject UpdateArmCartPosition => #4
            -> BooleanProperty(Value=false) => #5
            #5, #4 -> Zip => #6
            SubscribeSubject UpdateArmPolarPosition => #7
            -> BooleanProperty(Value=true) => #8
            #8, #7 -> Zip => #9
            #3, #6, #9 -> Merge
            -> Scan Accumulate_dV/dt
                WorkflowInput Source1 => #0
                -> Condition UpdatePolar => #1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2)
                -> CricketVR.CartToPolar => #3
                #1 -> MemberSelector(Selector=Value.Item2) => #4
                #3, #4 -> Zip
                -> Add
                -> CricketVR.PolarToCart => #7
                #0 -> Condition UpdateCart => #8
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2) => #9
                #8 -> MemberSelector(Selector=Value.Item2) => #10
                #9, #10 -> Zip
                -> Add => #12
                #7, #12 -> Merge => #13
                SubscribeSubject RadialLimits
                -> PropertyMapping(MinRadius(Selector=X), MaxRadius(Selector=Y)) => #15
                #13, #15 -> CricketVR.ClampArmPosition(MinRadius=0.0150001, MaxRadius=0.27) => #16
                -> BooleanProperty(Value=false) => #17
                #17, #16 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #12
            -> Skip(Count=1) => #13
            ExternalizedMapping(Period(DisplayName=SamplingPeriod))
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.01S) => #15
            #13, #15 -> Sample => #16
            #12 -> Take(Count=1) => #17
            #17, #16 -> Merge
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject CurrentArmPosition

        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #5
        SubscribeSubject RadialLimits => #6
        #5, #6 -> WithLatestFrom
        -> Condition FilterUpdate
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.X)
            -> Bonsai.Dsp.Abs => #2
            #0 -> MemberSelector(Selector=Item2) => #3
            #2, #3 -> Zip => #4
            -> MemberSelector(Selector="Item1,Item2.X")
            -> GreaterThanOrEqual => #6
            #4 -> MemberSelector(Selector="Item1,Item2.Y")
            -> LessThanOrEqual => #8
            #6, #8 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> CricketVR.CreateArmMessage(Address=32)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(Key(DisplayName=ShortcutKey, Category=ResetArmPosition), Modifiers(DisplayName=ShortcutMod, Category=ResetArmPosition))
        -> Bonsai.Shaders.Input.KeyDown(Key=F3, Modifiers=Control) => #13
        ExternalizedMapping(X(DisplayName=Magnitude, Category=ResetArmPosition), Y(DisplayName=Angle, Category=ResetArmPosition)) => #14
        #13, #14 -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0)
        -> MulticastSubject GoToCartPosition

    ExternalizedMapping(Gain(DisplayName=Gain, Category=ManualOverride), Enable(DisplayName=Enable, Category=ManualOverride))
    -> GroupWorkflow ArmManualOverride
        ExternalizedMapping(Gain)
        -> GroupWorkflow Manual_Arm_Control
            Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
            -> CricketVR.KeySelectorScript(KeyFilter=Up)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=1) => #2
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Down)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=-1) => #4
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Left)
            -> Bonsai.Vision.CreatePoint2f(X=-1, Y=0) => #6
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Right)
            -> Bonsai.Vision.CreatePoint2f(X=1, Y=0) => #8
            #2, #4, #6, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=Gain)) => #10
            #9, #10 -> FloatProperty(Value=0.001) => #11
            #9, #11 -> Zip
            -> Multiply
            -> WorkflowOutput
        -> Disable GateInterval(Interval=PT0.01S) => #2
        ExternalizedMapping(Value(DisplayName=Enable)) => #3
        #2, #3 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> MulticastSubject UpdateArmCartPosition
        -> WorkflowOutput

    Disable GroupWorkflow GroundTruthFeedback
        SubscribeSubject ArmEvents
        -> Condition ArmMovingTo => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> Equal(Operand=IntProperty(Value=32))
            -> WorkflowOutput
        ExternalizedMapping(Type) => #2
        #1, #2 -> Bonsai.Harp.Parse(Type=Float, IsArray=true) => #3
        -> Disable MemberSelector(Selector=Seconds) => #4
        #3 -> Disable MemberSelector(Selector=Value) => #5
        -> Index(Operand=IntProperty(Value=0)) => #6
        #5 -> Index(Operand=IntProperty(Value=1)) => #7
        #4, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as Seconds,
            it.Item2 as Magnitude,
            it.Item3 as Angle)
        -> MemberSelector(Selector="Magnitude,Angle")
        -> CricketVR.PolarToCart
        -> BehaviorSubject TrueArmPosition
        -> WorkflowOutput

GroupWorkflow TrialLogic => #7
    GroupWorkflow GetOrientation
        SubscribeSubject RodentPosition
        -> MemberSelector(Selector=Orientation.Y) => #1
        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #3
        #1, #3 -> WithLatestFrom
        -> MemberSelector(Selector="Item1,Item2.X,Item2.Y")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as RodentOrientation,
            it.Item2 as DisplacementMagnitude,
            Math.Abs(it.Item3 - it.Item1) < Math.Pi ? (it.Item3 - it.Item1) : ((it.Item3 - it.Item1 < 0) ? ((it.Item3 - it.Item1) + 2.0 * Math.Pi) : ((it.Item3 - it.Item1) - 2.0 * Math.Pi)) as DisplacementAngle)
        -> WorkflowOutput
    -> MemberSelector(Selector="RodentOrientation,DisplacementMagnitude,DisplacementAngle")
    -> BehaviorSubject ComputedOrientation

    ExternalizedMapping(FileName(DisplayName=TrialListPath))
    -> Bonsai.IO.CsvReader
      FileName="C:\Users\Cricket Team\Documents\git\BrancoLab\CricketHuntVR\src\Workflows\CricketVRHuntingWorld\TrialLogicCsv\Example_training_stage_input.csv"
      ListSeparator=""
      ScanPattern=%s
      SkipRows=1
    -> Parse(Pattern=%f, Separator=",") => #5
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[0] * Math.Pi) / 180.0 as StartingAngle,
        (it[1] * Math.Pi) / 180.0 as AngleThreshold,
        it[2] as StartingRadius,
        it[3] as FinalRadius,
        it[4] as DecayConstant,
        TimeSpan.FromSeconds(it[5]) as TimeToEat)
    -> MemberSelector(Selector="AngleThreshold,StartingAngle,StartingRadius,FinalRadius,DecayConstant,TimeToEat") => #7
    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        (it[6] * Math.Pi) / 180.0 as PerturbAngle,
        (it[7] * Math.Pi) / 180.0 as TriggerRadius)
    -> MemberSelector(Selector="PerturbAngle,TriggerRadius") => #9
    #7, #9 -> Zip
    -> ToArray
    -> AsyncSubject TrialSettings

    Defer TrialStructure
        SubscribeSubject TrialSettings => #0
        SubscribeSubject TrialNumber => #1
        SubscribeSubject TrialSettings
        -> MemberSelector(Selector=Length) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 > (it.Item2 - 1) ? (it.Item2 - 1) : it.Item1
        -> PropertyMapping(Value) => #6
        #0, #6 -> Index(Operand=IntProperty(Value=0))
        -> Take(Count=1)
        -> AsyncSubject ThisTrialSettings

        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> SelectMany SetInitialPosition
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> InputMapping(X(Selector=StartingRadius), Y(Selector=StartingAngle))
            -> Bonsai.Vision.CreatePoint2f(X=0.2, Y=0)
            -> CricketVR.PolarToCart
            -> MulticastSubject GoToCartPosition
            -> SelectMany LogTrialInit
                SubscribeSubject TrialNumber
                -> IncludeWorkflow(Path=Extensions\FormatSoftwareEvent.bonsai, Address=1)
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Trial
            GroupWorkflow CheckDistanceToCricket
                SubscribeSubject CurrentArmPosition
                -> Bonsai.Shaders.SampleOnRenderFrame
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> WorkflowOutput
            -> PublishSubject DistanceToCricket

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow EndTrial?
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=FinalRadius) => #2
                WorkflowInput Source1 => #3
                #3, #2 -> WithLatestFrom
                -> Subtract
                -> Condition EndTrialDistance
                    WorkflowInput Source1
                    -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=3, Payload=0)
                -> Take(Count=1)
                -> Format(Format="End ++ Delta = {0}")
                -> WorkflowOutput
            -> WorkflowOutput

            SubscribeSubject DistanceToCricket
            -> GroupWorkflow ApplyPerturbation
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=TriggerRadius) => #2
                WorkflowInput Source1 => #3
                #3, #2 -> WithLatestFrom
                -> Condition
                    WorkflowInput Source1
                    -> Subtract
                    -> LessThan(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=2, Payload=0) => #7
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=PerturbAngle)
                -> PropertyMapping(Y) => #11
                #7, #11 -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=0.17453292)
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

            GroupWorkflow DecayPosition
                ExternalizedMapping(Period(DisplayName=DecayEventPeriod, Category=Decay), DueTime(DisplayName=DecayEventDelay))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #1
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=DecayConstant)
                -> PropertyMapping(Value) => #5
                #1, #5 -> DoubleProperty(Value=0.00030000001424923539) => #6
                -> DoubleProperty(Value=0) => #7
                #6, #7 -> Zip
                -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
                -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=0)
                -> Condition CheckBounds
                    SubscribeSubject EnableUpdateDecay
                    -> WorkflowOutput
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

                SubscribeSubject CurrentArmPosition
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> Bonsai.Shaders.SampleOnRenderFrame => #17
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=StartingRadius) => #20
                #17, #20 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it.Item1 < it.Item2) ? True : False
                -> DistinctUntilChanged
                -> BehaviorSubject EnableUpdateDecay

            GroupWorkflow CloseLoopArm
                SubscribeSubject RodentPositionUpdate
                -> Condition WithinSightCone
                    WorkflowInput Source1 => #0
                    SubscribeSubject ComputedOrientation
                    -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                    #0, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2.DisplacementAngle)
                    -> Bonsai.Dsp.Abs => #5
                    SubscribeSubject ThisTrialSettings
                    -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                    -> MemberSelector(Selector=AngleThreshold) => #8
                    #5, #8 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                -> MemberSelector(Selector=Position.Xz)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    -it.X as Y,
                    -it.Y as X)
                -> InputMapping(X(Selector=Y), Y(Selector=X))
                -> Bonsai.Vision.CreatePoint2f(X=0, Y=-0)
                -> MulticastSubject UpdateArmCartPosition
                -> WorkflowOutput
        -> SelectMany WaitToEat
            SubscribeSubject ThisTrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> MemberSelector(Selector=TimeToEat)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEvent.bonsai, Address=4, Payload=0)
            -> WorkflowOutput

            SubscribeSubject RodentPositionUpdate
            -> Condition WithinSightCone
                WorkflowInput Source1 => #0
                SubscribeSubject ComputedOrientation
                -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.DisplacementAngle)
                -> Bonsai.Dsp.Abs => #5
                SubscribeSubject ThisTrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=AngleThreshold) => #8
                #5, #8 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> MemberSelector(Selector=Position.Xz)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                -it.X as Y,
                -it.Y as X)
            -> InputMapping(X(Selector=Y), Y(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
            -> CricketVR.CartToPolar
            -> InputMapping(X(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
            -> MulticastSubject UpdateArmPolarPosition
        -> SelectMany TrialNum++
            SubscribeSubject TrialNumber
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat
GroupWorkflow EnableTrialLogic => #8
    ExternalizedMapping(Value(DisplayName=Enable))
    -> BooleanProperty(Value=true)
    -> Condition EnableTrialLogic
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
#7, #8 -> SubscribeWhen

GroupWorkflow DrawShelter => #10
    ExternalizedMapping(X(DisplayName=X, Category=ShelterCorner), Y(DisplayName=Z, Category=ShelterCorner))
    -> Bonsai.Vision.CreatePoint2f(X=1, Y=-1) => #1
    -> MemberSelector(Selector=X) => #2
    #1 -> MemberSelector(Selector=Y)
    -> Multiply(Operand=IntProperty(Value=-1)) => #4
    #2, #4 -> Zip
    -> BehaviorSubject ShelterCorner

    SubscribeSubject Draw3DStim => #7
    -> Disable IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #8
    ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #9
    ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #10
    #7, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #12
    #7, #9 -> Bonsai.Shaders.CreateVector3(X=0.02, Y=0.05, Z=0.02)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #14
    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position) => #16
    ExternalizedMapping(RotationY) => #17
    SubscribeSubject ShelterCorner => #18
    -> MemberSelector(Selector=Item1) => #19
    #18 -> MemberSelector(Selector=Item2)
    -> Multiply(Operand=FloatProperty(Value=-1)) => #21
    #19, #21 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=-1) => #24
    #16, #24 -> WithLatestFrom
    -> Subtract
    -> MemberSelector(Selector=Xz)
    -> MemberSelector(Selector=Length)
    -> Multiply(Operand=FloatProperty(Value=1.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 0.9 * ((1.0) - (1.0 / (Math.Exp(-it) + 1)))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it < 0.15 ? 0 : it
    -> PropertyMapping(Alpha(Selector=it)) => #32
    #8, #12, #14, #32, #17 -> GroupWorkflow DrawTexturedModelAlpha(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=180)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=3.14159274) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=0.02, Y=0.05, Z=0.02)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TransparentTexturedModel, TextureName=Black, TextureTarget=Texture2D) => #23
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TransparentTexturedModel) => #25
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TransparentTexturedModel) => #27
        #23, #25, #27 -> Zip => #28
        #28, #6 -> GroupWorkflow UpdateMaterial => #29
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TransparentTexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TransparentTexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TransparentTexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TransparentTexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Alpha)) => #30
        #29, #30 -> FloatProperty(Value=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TransparentTexturedModel) => #32
        #32, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=TransparentTexturedModel, MeshName=box)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #34
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #35
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #37
    #34, #37 -> Bonsai.Shaders.CreateVector3(X=1, Y=0.1, Z=1)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #39
    #34 -> Bonsai.Shaders.CreateVector3(X=1.6, Y=1.6, Z=1.6)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #41
    #35, #39, #41 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1, Y=0.1, Z=1) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1.6, Y=1.6, Z=1.6)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel) => #22
        ExternalizedMapping(TextureName) => #23
        #22, #23 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=shelter, TextureTarget=Texture2D) => #24
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #26
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #28
        #24, #26, #28 -> Zip => #29
        #29, #6 -> GroupWorkflow UpdateMaterial => #30
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        #30, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=Plane)
        -> WorkflowOutput

    SubscribeSubject Draw3DStim => #43
    -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #44
    SubscribeSubject ShelterCorner
    -> PropertyMapping(X(Selector=Item1), Z(Selector=Item2)) => #46
    #43, #46 -> Bonsai.Shaders.CreateVector3(X=1, Y=-0.099, Z=1)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #48
    #43 -> Bonsai.Shaders.CreateVector3(X=1.6, Y=1.6, Z=1.6)
    -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #50
    #44, #48, #50 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1, Y=-0.099, Z=1) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
          Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
          Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
          SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
        -> BonVision.AngleProperty(Value=90)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=1.57079637) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1.6, Y=1.6, Z=1.6)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TransparentTexturedModel)
        -> Bonsai.Shaders.NormalMatrix
        -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TransparentTexturedModel) => #22
        ExternalizedMapping(TextureName) => #23
        #22, #23 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TransparentTexturedModel, TextureName=Black, TextureTarget=Texture2D) => #24
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TransparentTexturedModel) => #26
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TransparentTexturedModel) => #28
        #24, #26, #28 -> Zip => #29
        #29, #6 -> GroupWorkflow UpdateMaterial => #30
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
            #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
            ExternalizedMapping(Value(DisplayName=Specular)) => #11
            #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
            #15, #16 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Alpha)) => #31
        #30, #31 -> FloatProperty(Value=0.15)
        -> Bonsai.Shaders.UpdateUniform(UniformName=alpha, ShaderName=TransparentTexturedModel) => #33
        #33, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=TransparentTexturedModel, MeshName=Plane)
        -> WorkflowOutput
GroupWorkflow EnableShelter => #11
    ExternalizedMapping(Value(DisplayName=Enable))
    -> BooleanProperty(Value=true)
    -> Condition EnableShelter
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
#10, #11 -> SubscribeWhen

Bonsai.Shaders.Timer(DueTime=PT2S)
-> MulticastSubject StartCameras

Disable GroupWorkflow DebugTools
    Disable SubscribeSubject ArmEncoderPosition

    Disable Bonsai.Shaders.Input.KeyDown(Key=D, Modifiers=Control)
    -> Disable Bonsai.Vision.CreatePoint2f(X=0.0150001, Y=0)
    -> Disable CricketVR.CreateArmMessage(Address=32)
    -> Disable MulticastSubject ArmCommands

    Disable SubscribeSubject ArmCommands
    -> Disable Bonsai.Harp.FilterMessage(Address=32, MessageType=Write)
    -> Disable Bonsai.Harp.Parse(Type=Float, IsArray=true) => #7
    -> Disable Index(Operand=IntProperty(Value=0)) => #8
    #7 -> Disable Index(Operand=IntProperty(Value=1)) => #9
    #8, #9 -> Disable Zip

    Disable SubscribeSubject ArmEvents
    -> Disable Bonsai.Harp.FilterMessage(Address=32, MessageType=Write)
    -> Disable Bonsai.Harp.Parse(Type=Float, IsArray=true) => #13
    -> Disable Index(Operand=IntProperty(Value=0)) => #14
    #13 -> Disable Index(Operand=IntProperty(Value=1)) => #15
    #14, #15 -> Disable Zip

    Disable BehaviorSubject<System.String> DebugString
    -> Disable Bonsai.IO.WriteLine

GroupWorkflow SessionTimer
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> WorkflowOutput

GroupWorkflow Visualization
    SubscribeSubject Pylon1FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #2
    SubscribeSubject Spinnaker1FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #5
    SubscribeSubject Spinnaker2FrameEvents
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping => #8
    #2, #5, #8 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=1, RowSpan=2)))
