WorkflowBuilder(Version=2.6.3)
GroupWorkflow __Init__
    BehaviorSubject<Bonsai.Harp.HarpMessage> TaskEvents
    BehaviorSubject<System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single,System.Single)> ArenaBounds
    PublishSubject<CricketVR.VrElement> RodentPositionUpdate
    BehaviorSubject<CricketVR.VrElement> RodentPosition

    SubscribeSubject ResetRodentPosition
    -> MulticastSubject RodentPosition

    PublishSubject<OpenCV.Net.Point2f> UpdateArmCartPosition
    PublishSubject<OpenCV.Net.Point2f> UpdateArmPolarPosition
    BehaviorSubject<CricketVR.VrElement> ResetRodentPosition

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        Bonsai.Shaders.CreateWindow
          Width=7680
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Hidden
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=236
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=shelter
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\shelter.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageCubemap
              Name=cube
              FaceSize=nil
              InternalFormat=Rgb
              MinFilter=Linear
              MagFilter=Linear
              PositiveX=Textures\CubeMapTextures\right.png
              NegativeX=Textures\CubeMapTextures\left.png
              PositiveY=Textures\CubeMapTextures\ceil.png
              NegativeY=Textures\CubeMapTextures\floor.png
              PositiveZ=Textures\CubeMapTextures\back.png
              NegativeZ=Textures\CubeMapTextures\front.png
              ColorType=Unchanged
              FlipMode=Horizontal
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=Brown
              Width=600
              Height=800
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\Brown.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=uv_box
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Nearest
              MagFilter=Nearest
              FileName=Textures\uv.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=CubeMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
              FramebufferAttachments=""
              VertexShader=Shaders\CubeMap.vert
              FragmentShader=BonVision:Shaders.SphereMap.frag
        -> Bonsai.Shaders.MeshResources
          Meshes
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=monkey, FileName=resources\Suzanne.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube, FileName=resources\cube.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cricket, FileName=resources\cricket.obj)
            MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=box, FileName=resources\box.obj)
        -> Disable Bonsai.Shaders.Rendering.SceneResources
          Scenes(SceneConfiguration(Name=scene, FileName=resources\scene.blend))
          ShaderName=Model
          PostProcessSteps=Triangulate
          Scale=1
          RotationX=90
          RotationY=180
          RotationZ=0
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject Draw3DStim
        -> IncludeWorkflow
          Path=Extensions\RenderCubeMapTexture.bonsai
          TranslationX=0
          TranslationY=0
          TranslationZ=0
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cube
          RotationZ=0
          RotationY=0
          RotationX=0
          CubemapTexture=cube

        Bonsai.Shaders.RenderFrame
        -> PublishSubject ScreenFrameEvents
        -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #14
        ExternalizedMapping(IntrinsicsFileName(DisplayName=FrontIntrinsics, Category="Front Screen"), ExtrinsicsFileName(DisplayName=FrontExtrinsics, Category="Front Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\front_intrinsics.yml, ExtrinsicsFileName=Calibration\front_extrinsics.yml) => #16
        ExternalizedMapping(IntrinsicsFileName(DisplayName=RightIntrinsics, Category="Right Screen"), ExtrinsicsFileName(DisplayName=RightExtrinsics, Category="Right Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml) => #18
        ExternalizedMapping(IntrinsicsFileName(DisplayName=BackIntrinsics, Category="Back Screen"), ExtrinsicsFileName(DisplayName=BackExtrinsics, Category="Back Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\back_intrinsics.yml, ExtrinsicsFileName=Calibration\back_extrinsics.yml) => #20
        ExternalizedMapping(IntrinsicsFileName(DisplayName=LeftIntrinsics, Category="Left Screen"), ExtrinsicsFileName(DisplayName=LeftExtrinsics, Category="Left Screen"))
        -> IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml) => #22
        #22, #14 -> GroupWorkflow LeftView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=90, Z=0), Translation(X=-0.3, Y=0, Z=0))
            -> PublishSubject SyncView
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #16, #14 -> GroupWorkflow FrontView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #18, #14 -> GroupWorkflow RightView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=-90, Z=0), Translation(X=0.3, Y=0, Z=0))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput
        #20, #14 -> GroupWorkflow BackView
            WorkflowInput Source1
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #1
            WorkflowInput Source2 => #2
            #2, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=180, Z=0), Translation(X=0, Y=0, Z=0.3))
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
            -> WorkflowOutput

        Bonsai.Shaders.UpdateFrame
        -> PublishSubject dt_event
    -> WorkflowOutput

    GroupWorkflow SWC_Arm
        ExternalizedMapping(PortName) => #0
        BehaviorSubject<Bonsai.Harp.HarpMessage> ArmCommands => #1
        #1, #0 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=true, PortName=COM4)
        -> PublishSubject ArmEvents

        SubscribeSubject ArmEvents
        -> Bonsai.Harp.FilterMessage(Address=33, MessageType=Event)
        -> Bonsai.Harp.Parse(Type=TimestampedFloat, IsArray=true)
        -> MemberSelector(Selector=Value) => #7
        -> Index(Operand=IntProperty(Value=0)) => #8
        #7 -> Index(Operand=IntProperty(Value=1)) => #9
        #8, #9 -> Zip
        -> PublishSubject ArmEncoderPosition

        BehaviorSubject<OpenCV.Net.Point2f> ReferenceArmPosition
        -> CricketVR.CreateArmMessage(Address=34)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=Minimum, Category=RadialLimits), Y(DisplayName=Maximum, Category=RadialLimits))
        -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0.27)
        -> BehaviorSubject RadialLimits
        -> CricketVR.CreateArmMessage(Address=35)
        -> MulticastSubject ArmCommands

        GroupWorkflow SetAngleMode
            ExternalizedMapping(Value(DisplayName=AngleMode))
            -> IntProperty(Value=0)
            -> Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=S8)
            -> WorkflowOutput
        -> MulticastSubject ArmCommands

    GroupWorkflow HARP_Expander
        ExternalizedMapping(PortName)
        -> GroupWorkflow CreateExpander
            BehaviorSubject<Bonsai.Harp.HarpMessage> ExpanderCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
            -> PublishSubject ExpanderEvents
            -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM2)
        -> PublishSubject BehaviorEvents

    GroupWorkflow Cameras
        ExternalizedMapping(CameraTriggerFrequency)
        -> GroupWorkflow CameraController
            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency))
            -> IntProperty(Value=50)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency(BufferSize=nil)

            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterMessage(Address=92, MessageType=Event) => #5
            Source2=#5 -> PublishSubject FrameEvents

            SubscribeSubject BehaviorEvents
            -> Take(Count=1)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #9
            -> SelectMany SetFrameRate => #10
                SubscribeSubject CameraTriggerFrequency
                -> Bonsai.Harp.Format(MessageType=Write, Address=93, PayloadType=U16)
                -> WorkflowOutput
            GroupWorkflow StartStopCameras => #11
                BehaviorSubject<System.Object> StopCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #1
                BehaviorSubject<System.Object> StartCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0) => #3
                #3, #1 -> Merge
                -> WorkflowOutput
            #10, #9, #11 -> Merge
            -> MulticastSubject BehaviorCommands

        GroupWorkflow Spinnaker1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067305, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker2
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067283, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker2FrameEvents
            -> WorkflowOutput

        GroupWorkflow Pylon1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> PylonCricketVRCapture(SerialNumber=21421610, ParameterFile=Calibration\acA1300-60gmNIR_21421610.pfs, HarpAddress=92)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Pylon1FrameEvents
            -> WorkflowOutput

    GroupWorkflow MagneticEncoder
        ExternalizedMapping(SampleRate)
        -> GroupWorkflow MagneticEncoderController
            IntProperty(Value=0) => #0
            ExternalizedMapping(SampleRate) => #1
            #0, #1 -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate250Hz)
            -> MulticastSubject ExpanderCommands

            SubscribeSubject ExpanderEvents
            -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true)
            -> MemberSelector(Selector=Value.Angle)
            -> PublishSubject EncoderValue

            SubscribeSubject EncoderValue
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (Math.Pi) - ((it / 16384.0) * (2.0 * Math.Pi))
            -> BehaviorSubject EncoderAngle

    GroupWorkflow TimestampStream
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterMessage(Address=44, MessageType=Event)
        -> Bonsai.Harp.Parse(Type=TimestampedS16, IsArray=false)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject TimestampStream

    GroupWorkflow MouseSensors
        Bonsai.Shaders.Input.Mouse(Index=nil) => #0
        ExternalizedMapping(DeviceId(DisplayName=SideMouseID, Category=MouseID)) => #1
        #0, #1 -> WinRawMouse(DeviceId=65593)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        ExternalizedMapping(DeviceId(DisplayName=ForwardMouseID, Category=MouseID)) => #5
        ExternalizedMapping(Value(DisplayName=SideMouseGain, Category=Gain)) => #6
        #4, #6 -> Multiply(Operand=DoubleProperty(Value=-2.6205926323519098E-05))
        -> PublishSubject SideMouse
        #0, #5 -> WinRawMouse(DeviceId=65597)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #11
        ExternalizedMapping(Value(DisplayName=ForwardMouseGain, Category=Gain)) => #12
        #11, #12 -> Multiply(Operand=DoubleProperty(Value=2.6205926323519098E-05))
        -> PublishSubject ForwardMouse
-> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=LoggingRootPath))
    -> GroupWorkflow LogController
        ExternalizedMapping(Value)
        -> StringProperty(Value="C:\Users\Cricket Team\Desktop\data")
        -> ReplaySubject SessionPath(BufferSize=nil)

        SubscribeSubject SessionPath
        -> Timestamp => #4
        -> MemberSelector(Selector=Timestamp.DateTime)
        -> CricketVR.FormatDate => #6
        #4 -> MemberSelector(Selector=Value) => #7
        #7, #6 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

    SubscribeSubject ScreenFrameEvents
    -> IncludeWorkflow(Path=Extensions\LogFrameEvents.bonsai, LogName=FrameEventLogger)

    SubscribeSubject Spinnaker1FrameEvents
    -> IncludeWorkflow Spinnaker1(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker2FrameEvents
    -> IncludeWorkflow Spinnaker2(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Pylon1FrameEvents
    -> IncludeWorkflow Pylon1(Path=Extensions\LogPylonVideo.bonsai, FrameRate=50)

    SubscribeSubject ArmEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmBoard)

    SubscribeSubject ExpanderEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=OutputExpanderBoard)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorBoard)

    SubscribeSubject RodentPosition => #16
    SubscribeSubject TimestampStream => #17
    #16, #17 -> WithLatestFrom
    -> CricketVR.VRElementToHarpMessagecs
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=RodentPosition)

    SubscribeSubject TaskEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=TaskEvents)

    SubscribeSubject ArmCommands => #23
    SubscribeSubject TimestampStream => #24
    #23, #24 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmCommands)

    SubscribeSubject BehaviorCommands => #28
    SubscribeSubject TimestampStream => #29
    #28, #29 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorCommands)

    SubscribeSubject ExpanderCommands => #33
    SubscribeSubject TimestampStream => #34
    #33, #34 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ExpanderCommands)

    SubscribeSubject ForwardMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=230, PayloadType=Float) => #39
    SubscribeSubject TimestampStream => #40
    #39, #40 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #42
    SubscribeSubject TimestampStream => #43
    SubscribeSubject SideMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=231, PayloadType=Float) => #45
    #45, #43 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #47
    #47, #42 -> Merge
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=MouseSensors)

GroupWorkflow RodentPosition
    SubscribeSubject SideMouse => #0
    SubscribeSubject ForwardMouse => #1
    #0, #1 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=0)
    -> InputMapping(Position(Selector=it))
    -> CricketVR.CreateVrElement(Position(X=-0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject RodentPositionUpdate

    ExternalizedMapping(Orientation(DisplayName=ResetOrientation, Category=Reset), Position(DisplayName=ResetPosition, Category=Reset)) => #8
    Bonsai.Shaders.Input.KeyDown(Key=F4, Modifiers=nil)
    -> BooleanProperty(Value=false) => #10
    BooleanProperty(Value=false) => #11
    #11, #10 -> Merge => #12
    #12, #8 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

    GroupWorkflow ManualOverride
        Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
        -> CricketVR.KeySelectorScript(KeyFilter=A)
        -> Bonsai.Shaders.CreateVector3(X=-1, Y=0, Z=0) => #2
        #0 -> CricketVR.KeySelectorScript(KeyFilter=D)
        -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=0) => #4
        #0 -> CricketVR.KeySelectorScript(KeyFilter=W)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #6
        #0 -> CricketVR.KeySelectorScript(KeyFilter=S)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1) => #8
        #0 -> CricketVR.KeySelectorScript(KeyFilter=Z)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1, Z=0) => #10
        #0 -> CricketVR.KeySelectorScript(KeyFilter=X)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1, Z=0) => #12
        #2, #4, #6, #8, #10, #12 -> Merge
        -> InputMapping(Position(Selector=it))
        -> CricketVR.CreateVrElement(Position(X=-1, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #15
        ExternalizedMapping(Position(Category=PositionGain), Orientation(Category=OrientationGain)) => #16
        #15, #16 -> CricketVR.CreateVrElement(Position(X=0.01, Y=0.01, Z=0.01), Orientation(X=0, Y=0, Z=0)) => #17
        #15, #17 -> Zip
        -> Multiply
        -> MulticastSubject RodentPositionUpdate
        -> WorkflowOutput

    SubscribeSubject ResetRodentPosition
    -> CreateObservable UpdateRodentPosition
        SubscribeSubject RodentPosition
        -> WorkflowOutput

        SubscribeSubject RodentPosition
        -> Take(Count=1) => #3
        SubscribeSubject RodentPositionUpdate => #4
        #3, #4 -> Merge
        -> MemberSelector(Selector=Position)
        -> Scan => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #2, #1 -> Zip
            -> Add => #4
            SubscribeSubject ArenaBounds => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector="Item1,Item2") => #7
            ExternalizedMapping(NumericCorrectionFactor, OffsetBounds) => #8
            #7, #8 -> CricketVR.ClampPositionUpdate(NumericCorrectionFactor=1, OffsetBounds(X=-0.3, Y=0, Z=-0.3))
            -> WorkflowOutput
        Disable GroupWorkflow ManualOrientation => #8
            Bonsai.Shaders.CreateVector3(X=0, Y=1.57079637, Z=0) => #0
            Bonsai.Shaders.Input.MouseWheel
            -> MemberSelector(Selector=EventArgs.Value)
            -> Mod(Operand=IntProperty(Value=50))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: ((it / 50.0) * 2.0 * Math.Pi + 2.0*Math.Pi) % (2.0 * Math.Pi)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it <= Math.Pi ? it : -1.0 * (2.0*Math.Pi - it)
            -> InputMapping(Y(Selector=it))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.376991123, Z=0) => #7
            #7, #0 -> Merge
            -> WorkflowOutput
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #9
        SubscribeSubject EncoderAngle
        -> InputMapping(Y(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-3.02347612, Z=0) => #12
        #9, #12 -> Merge => #13
        #7, #8, #13 -> CombineLatest
        -> InputMapping(Orientation(Selector=Item2), Position(Selector=Item1))
        -> CricketVR.CreateVrElement(Position(X=0.206216, Y=0, Z=-0.236216053), Orientation(X=0, Y=-3.02347612, Z=0))
        -> MulticastSubject RodentPosition
    -> Switch

    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position)
    -> MemberSelector(Selector=Z)

GroupWorkflow RenderLoop
    GroupWorkflow DrawVRArena
        SubscribeSubject Draw3DStim => #0
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #1
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #2
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #3
        #0, #3 -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #4
        -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #5
        #0, #2 -> Bonsai.Shaders.CreateVector3(X=1, Y=0.1, Z=1) => #6
        -> PropertyMapping(ScaleX(Selector=X), ScaleY(Selector=Y), ScaleZ(Selector=Z)) => #7
        #1, #5, #7 -> GroupWorkflow DrawTexturedModel(Description="Draws a textured and transformed 3D model stimulus.")
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ViewMatrix) => #1
            ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
            #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0, Y=0, Z=0) => #3
            ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
            ExternalizedMapping(MeshName) => #5
            ExternalizedMapping => #6
              Ambient(Description="The amount and color of the ambient light reflected by the material.", Category="Model Material")
              Diffuse(Description="The amount and color of the diffuse light reflected by the material.\r\n", Category="Model Material")
              Specular(Description="The amount and color of the specular light reflected by the material.\r\n", Category="Model Material")
              SpecularExponent(Description="The exponent used to compute the specular response of the material.", Category="Model Material")
            ExternalizedMapping(Value(DisplayName=RotationZ, Description="The rotation about the z-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #9
            #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
            ExternalizedMapping(Value(DisplayName=RotationY, Description="The rotation about the y-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #13
            #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
            ExternalizedMapping(Value(DisplayName=RotationX, Description="The rotation about the x-axis."))
            -> BonVision.AngleProperty(Value=0)
            -> PropertyMapping(Angle) => #17
            #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #18
            #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=0.1, Z=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=TexturedModel)
            -> Bonsai.Shaders.NormalMatrix
            -> Bonsai.Shaders.UpdateUniform(UniformName=normalMatrix, ShaderName=TexturedModel)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=uv_box, TextureTarget=Texture2D) => #23
            #0 -> MemberSelector(Selector=ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=TexturedModel) => #25
            #0 -> MemberSelector(Selector=Light)
            -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=TexturedModel) => #27
            #23, #25, #27 -> Zip => #28
            #28, #6 -> GroupWorkflow UpdateMaterial => #29
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Ambient)) => #1
                #0, #1 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=1, Y=1, Z=1))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorAmbient, ShaderName=TexturedModel) => #5
                ExternalizedMapping(Value(DisplayName=Diffuse)) => #6
                #5, #6 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorDiffuse, ShaderName=TexturedModel) => #10
                ExternalizedMapping(Value(DisplayName=Specular)) => #11
                #10, #11 -> PropertySource<Bonsai.Shaders.CreateLookAt,OpenTK.Vector3>(MemberName=Eye, Value(X=0, Y=0, Z=0))
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=colorSpecular, ShaderName=TexturedModel) => #15
                ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #16
                #15, #16 -> FloatProperty(Value=10)
                -> Bonsai.Shaders.UpdateUniform(UniformName=shininess, ShaderName=TexturedModel)
                -> WorkflowOutput
            #29, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=TexturedModel, MeshName=box)
            -> WorkflowOutput
        #4, #6 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.Item2.X + it.Item1.X as Bound_P_X,
            -it.Item2.X + it.Item1.X as Bound_N_X,
            it.Item2.Y + it.Item1.Y as Bound_P_Y,
            -it.Item2.Y + it.Item1.Y as Bound_N_Y,
            it.Item2.Z + it.Item1.Z as Bound_P_Z,
            -it.Item2.Z + it.Item1.Z as Bound_N_Z
            )
        -> MemberSelector(Selector="Bound_P_X,Bound_N_X,Bound_P_Y,Bound_N_Y,Bound_P_Z,Bound_N_Z")
        -> MulticastSubject ArenaBounds

    GroupWorkflow Cricket
        SubscribeSubject Draw3DStim => #0
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #1
        ExternalizedMapping(isLocked) => #2
        #0, #2 -> Condition LockCricketToArm?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai) => #4
        SubscribeSubject RodentPosition => #5
        ExternalizedMapping(EnableCricket) => #6
        SubscribeSubject CurrentArmPosition => #7
        #0, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.X as X,
            it.Y as Z)
        -> InputMapping(X(Selector=X), Z(Selector=Z))
        -> Bonsai.Shaders.CreateVector3(X=0.09335593, Y=-0.05, Z=-0.25334695)
        -> PropertyMapping(Position) => #13
        #0, #13 -> CricketVR.CreateVrElement(Position(X=0.09335593, Y=-0.05, Z=-0.25334695), Orientation(X=0, Y=0, Z=0)) => #14
        #14, #5 -> WithLatestFrom
        -> Add
        -> BehaviorSubject PositionCricket => #17
        -> CricketVR.CreateVrElement(Position(X=1, Y=1, Z=-1), Orientation(X=1, Y=1, Z=1)) => #18
        #17, #18 -> Zip
        -> Multiply
        -> PropertyMapping => #21
          TranslationX(Selector=Position.X)
          TranslationY(Selector=Position.Y)
          TranslationZ(Selector=Position.Z)
          RotationX(Selector=Orientation.X)
          RotationY(Selector=Orientation.Y)
          RotationZ(Selector=Orientation.Z)
        #2, #0 -> Condition LockCricketToArm? => #22
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=isLocked)) => #1
            #0, #1 -> BooleanProperty(Value=true)
            -> BitwiseNot
            -> WorkflowOutput
        #4, #22 -> Merge
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Brown, TextureTarget=Texture2D) => #24
        #24, #6 -> Condition => #25
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=EnableCricket)) => #1
            #0, #1 -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #25, #1, #21 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0.299571931
          TranslationY=-0.05
          TranslationZ=0.489563
          ScaleX=1
          ScaleY=1
          ScaleZ=1
          MeshName=cricket
          Ambient(X=0.2, Y=0.2, Z=0.2)
          Diffuse(X=0.8, Y=0.8, Z=0.8)
          Specular(X=0.8, Y=0.8, Z=0.8)
          SpecularExponent=10
          RotationZ=0
          RotationY=-173.122559
          RotationX=0

    GroupWorkflow SyncQuad
        SubscribeSubject SyncView
        -> Int64Property(Value=1)
        -> Accumulate
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #3
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #4
        #3 -> PropertyMapping(ColorA) => #5
        #4, #5 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.03
          ExtentY=0.03
          LocationX=0.12
          LocationY=0.95
          Layer=1
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        -> WorkflowOutput

    GroupWorkflow DrawSimulatedEnv
        Bonsai.Osc.CreateUdpClient(Name=FakeWorldUDP, Port=0, RemoteHostName=localhost, RemotePort=2323)

        IntProperty(Value=1000)
        -> Bonsai.Osc.Format(Address=/CanvasSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/VRWorldSize)
        -> MulticastSubject Send_UDP

        FloatProperty(Value=0.3)
        -> Bonsai.Osc.Format(Address=/MonitorBox)
        -> MulticastSubject Send_UDP

        SubscribeSubject RadialLimits
        -> MemberSelector(Selector=X)
        -> Bonsai.Osc.Format(Address=/RadialLimits)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Position)
        -> MemberSelector(Selector="X,Y,Z")
        -> Bonsai.Osc.Format(Address=/VRRodentPosition)
        -> MulticastSubject Send_UDP

        SubscribeSubject RodentPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector=Orientation.Y)
        -> Bonsai.Osc.Format(Address=/RodentOrientation)
        -> MulticastSubject Send_UDP

        SubscribeSubject CurrentArmPosition
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> MemberSelector(Selector="X,Y")
        -> Bonsai.Osc.Format(Address=/RealCricketPosition)
        -> MulticastSubject Send_UDP

        PublishSubject<Bonsai.Osc.Message> Send_UDP
        -> Bonsai.Osc.SendMessage(Connection=FakeWorldUDP, Address="")

GroupWorkflow ArmControl
    Disable GroupWorkflow GroundTruthFeedback
        SubscribeSubject ArmEvents
        -> Condition ArmMovingTo => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> Equal(Operand=IntProperty(Value=32))
            -> WorkflowOutput
        ExternalizedMapping(Type) => #2
        #1, #2 -> Bonsai.Harp.Parse(Type=Float, IsArray=true) => #3
        -> Disable MemberSelector(Selector=Seconds) => #4
        #3 -> Disable MemberSelector(Selector=Value) => #5
        -> Index(Operand=IntProperty(Value=0)) => #6
        #5 -> Index(Operand=IntProperty(Value=1)) => #7
        #4, #6, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.Item1 as Seconds,
            it.Item2 as Magnitude,
            it.Item3 as Angle)
        -> MemberSelector(Selector="Magnitude,Angle")
        -> CricketVR.PolarToCart
        -> BehaviorSubject TrueArmPosition
        -> WorkflowOutput

    GroupWorkflow InitialArmPosition
        Unit
        -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> MulticastSubject ReferenceArmPosition => #2
        ExternalizedMapping(X(DisplayName=Magnitude), Y(DisplayName=Angle)) => #3
        #2, #3 -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> CricketVR.PolarToCart
        -> MulticastSubject GoToCartPosition
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow ArmUpdates
        BehaviorSubject<OpenCV.Net.Point2f> GoToCartPosition
        -> CreateObservable ArmPositionUpdating
            WorkflowInput Source1 => #0
            -> BooleanProperty(Value=false) => #1
            #1, #0 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject UpdateArmCartPosition => #4
            -> BooleanProperty(Value=false) => #5
            #5, #4 -> Zip => #6
            SubscribeSubject UpdateArmPolarPosition => #7
            -> BooleanProperty(Value=true) => #8
            #8, #7 -> Zip => #9
            #3, #6, #9 -> Merge
            -> Scan Accumulate_dV/dt
                WorkflowInput Source1 => #0
                -> Condition UpdatePolar => #1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2)
                -> CricketVR.CartToPolar => #3
                #1 -> MemberSelector(Selector=Value.Item2) => #4
                #3, #4 -> Zip
                -> Add
                -> CricketVR.PolarToCart => #7
                #0 -> Condition UpdateCart => #8
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2) => #9
                #8 -> MemberSelector(Selector=Value.Item2) => #10
                #9, #10 -> Zip
                -> Add => #12
                #7, #12 -> Merge => #13
                SubscribeSubject RadialLimits
                -> PropertyMapping(MinRadius(Selector=X), MaxRadius(Selector=Y)) => #15
                #13, #15 -> CricketVR.ClampArmPosition(MinRadius=0.1, MaxRadius=0.27) => #16
                -> BooleanProperty(Value=false) => #17
                #17, #16 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject CurrentArmPosition

        BehaviorSubject<OpenCV.Net.Point2f> CurrentArmPosition
        -> CricketVR.CartToPolar
        -> Condition FilterUpdate
            WorkflowInput Source1
            -> MemberSelector(Selector=X)
            -> Bonsai.Dsp.Abs => #2
            SubscribeSubject RadialLimits
            -> MemberSelector(Selector=X)
            -> GroupWorkflow NumericalCorrection => #5
                WorkflowInput Source1
                -> Add(Operand=FloatProperty(Value=0.01))
                -> WorkflowOutput
            SubscribeSubject RadialLimits
            -> MemberSelector(Selector=Y)
            -> GroupWorkflow NumericalCorrection => #8
                WorkflowInput Source1
                -> Subtract(Operand=FloatProperty(Value=0.01))
                -> WorkflowOutput
            #2, #8 -> WithLatestFrom
            -> LessThan => #10
            #2, #5 -> WithLatestFrom
            -> GreaterThan => #12
            #12, #10 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> CricketVR.CreateArmMessage(Address=32)
        -> MulticastSubject ArmCommands

    GroupWorkflow ArmManualOverride
        GroupWorkflow Manual_Arm_Control
            Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
            -> CricketVR.KeySelectorScript(KeyFilter=Up)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=1) => #2
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Down)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=-1) => #4
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Left)
            -> Bonsai.Vision.CreatePoint2f(X=-1, Y=0) => #6
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Right)
            -> Bonsai.Vision.CreatePoint2f(X=1, Y=0) => #8
            #2, #4, #6, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=Gain)) => #10
            #9, #10 -> FloatProperty(Value=0.01) => #11
            #9, #11 -> Zip
            -> Multiply
            -> WorkflowOutput
        -> Disable GateInterval(Interval=PT0.01S)
        -> MulticastSubject UpdateArmCartPosition
        -> WorkflowOutput

GroupWorkflow TrialLogic
    GroupWorkflow GetOrientation
        SubscribeSubject RodentPosition
        -> MemberSelector(Selector=Orientation.Y) => #1
        SubscribeSubject CurrentArmPosition
        -> CricketVR.CartToPolar => #3
        #1, #3 -> CombineLatest
        -> MemberSelector(Selector="Item1,Item2.X,Item2.Y")
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.Item1 as RodentOrientation,
            it.Item2 as DisplacementMagnitude,
            Math.Abs(it.Item3 - it.Item1) < Math.Pi ? (it.Item3 - it.Item1) : ((it.Item3 - it.Item1 < 0) ? ((it.Item3 - it.Item1) + 2.0 * Math.Pi) : ((it.Item3 - it.Item1) - 2.0 * Math.Pi)) as DisplacementAngle)
        -> WorkflowOutput
    -> MemberSelector(Selector="RodentOrientation,DisplacementMagnitude,DisplacementAngle")
    -> BehaviorSubject ComputedOrientation

    Unit => #3
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Math.Pi/4.0 as AngleThreshold,
        Math.Pi * 1.0 as StartingAngle,
        0.29 as StartingRadius,
        0.16 as FinalRadius,
        0.0003 as DecayConstant,
        TimeSpan.FromSeconds(1) as TimeToEat)
    -> MemberSelector(Selector="AngleThreshold,StartingAngle,StartingRadius,FinalRadius,DecayConstant,TimeToEat") => #5
    #3 -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Math.Pi/2.0 as PerturbAngle,
        0.2 as TriggerRadius)
    -> MemberSelector(Selector="PerturbAngle,TriggerRadius") => #7
    #5, #7 -> Zip
    -> ReplaySubject TrialSettings(BufferSize=nil)

    Timer(DueTime=PT1S, Period=PT0S)
    -> CreateObservable startTrial
        SubscribeSubject TrialSettings
        -> SelectMany SetInitialPosition
            SubscribeSubject TrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> InputMapping(X(Selector=StartingRadius), Y(Selector=StartingAngle))
            -> Bonsai.Vision.CreatePoint2f(X=0.29, Y=3.14159274)
            -> CricketVR.PolarToCart
            -> MulticastSubject GoToCartPosition
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany Trial
            GroupWorkflow CheckDistanceToCricket => #0
                SubscribeSubject CurrentArmPosition
                -> CricketVR.CartToPolar
                -> MemberSelector(Selector=X)
                -> WorkflowOutput
            -> GroupWorkflow EndTrial?
                SubscribeSubject TrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=FinalRadius) => #2
                WorkflowInput Source1 => #3
                #3, #2 -> CombineLatest
                -> Subtract
                -> Condition EndTrialDistance
                    WorkflowInput Source1
                    -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
            #0 -> GroupWorkflow ApplyPerturbation
                SubscribeSubject TrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=TriggerRadius) => #2
                SubscribeSubject TrialSettings
                -> IncludeWorkflow(Path=Extensions\ParsePerturbSettings.bonsai)
                -> MemberSelector(Selector=PerturbAngle)
                -> PropertyMapping(Y) => #6
                WorkflowInput Source1 => #7
                #7, #2 -> WithLatestFrom
                -> Condition
                    WorkflowInput Source1
                    -> Subtract
                    -> LessThan(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Take(Count=1) => #10
                #10, #6 -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=1.57079637)
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

            GroupWorkflow DecayPosition
                SubscribeSubject dt_event => #0
                SubscribeSubject TrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=DecayConstant)
                -> PropertyMapping(Value) => #4
                #0, #4 -> DoubleProperty(Value=0.0003) => #5
                -> DoubleProperty(Value=0) => #6
                #5, #6 -> Zip
                -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
                -> Bonsai.Vision.CreatePoint2f(X=0.0003, Y=0)
                -> MulticastSubject UpdateArmPolarPosition
                -> WorkflowOutput

            GroupWorkflow CloseLoopArm
                SubscribeSubject RodentPositionUpdate
                -> Condition WithinSightCone
                    WorkflowInput Source1 => #0
                    SubscribeSubject TrialSettings
                    -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                    -> MemberSelector(Selector=AngleThreshold)
                    -> PropertyMapping(Value) => #4
                    SubscribeSubject ComputedOrientation
                    -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #6
                    #0, #6 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2.DisplacementAngle)
                    -> Bonsai.Dsp.Abs => #9
                    #9, #4 -> LessThan(Operand=FloatProperty(Value=0.7853982))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Position.Xz)
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    -it.X as Y,
                    -it.Y as X)
                -> InputMapping(X(Selector=Y), Y(Selector=X))
                -> Bonsai.Vision.CreatePoint2f(X=0, Y=-0)
                -> MulticastSubject UpdateArmCartPosition
                -> WorkflowOutput
        -> SelectMany WaitToEat
            SubscribeSubject TrialSettings
            -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
            -> MemberSelector(Selector=TimeToEat)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> WorkflowOutput

            SubscribeSubject RodentPositionUpdate
            -> Condition WithinSightCone
                WorkflowInput Source1 => #0
                SubscribeSubject TrialSettings
                -> IncludeWorkflow(Path=Extensions\ParseTrialSettings.bonsai)
                -> MemberSelector(Selector=AngleThreshold)
                -> PropertyMapping(Value) => #4
                SubscribeSubject ComputedOrientation
                -> IncludeWorkflow(Path=Extensions\ParseComputedOrientation.bonsai) => #6
                #0, #6 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.DisplacementAngle)
                -> Bonsai.Dsp.Abs => #9
                #9, #4 -> LessThan(Operand=FloatProperty(Value=0.7853982))
                -> WorkflowOutput
            -> MemberSelector(Selector=Position.Xz)
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                -it.X as Y,
                -it.Y as X)
            -> InputMapping(X(Selector=Y), Y(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=-0, Y=-0.01)
            -> CricketVR.CartToPolar
            -> InputMapping(X(Selector=X))
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
            -> MulticastSubject UpdateArmPolarPosition
        -> Repeat
    -> Switch

Bonsai.Shaders.Timer(DueTime=PT2S)
-> MulticastSubject StartCameras

SubscribeSubject Pylon1FrameEvents
-> MemberSelector(Selector=Value.Image)

SubscribeSubject Spinnaker1FrameEvents
-> MemberSelector(Selector=Value.Image)

SubscribeSubject Spinnaker2FrameEvents
-> MemberSelector(Selector=Value.Image)

SubscribeSubject ArmEncoderPosition
Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
