WorkflowBuilder(Version=2.6.3)
GroupWorkflow __Init__
    BehaviorSubject<Bonsai.Harp.HarpMessage> TaskEvents
    BehaviorSubject<System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single,System.Single)> ArenaBounds
    PublishSubject<CricketVR.VrElement> RodentPositionUpdate
    BehaviorSubject<CricketVR.VrElement> RodentPosition

    SubscribeSubject ResetRodentPosition
    -> MulticastSubject RodentPosition

    PublishSubject<OpenCV.Net.Point2f> UpdateArmCartPosition
    PublishSubject<OpenCV.Net.Point2f> UpdateArmPolarPosition
    BehaviorSubject<CricketVR.VrElement> ResetRodentPosition

GroupWorkflow Hardware
    GroupWorkflow SWC_Arm
        ExternalizedMapping(PortName) => #0
        BehaviorSubject<Bonsai.Harp.HarpMessage> ArmCommands => #1
        #1, #0 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=true, PortName=COM4)
        -> PublishSubject ArmEvents

        SubscribeSubject ArmEvents
        -> Bonsai.Harp.FilterMessage(Address=33, MessageType=Event)
        -> PublishSubject ArmEncoderPosition

        BehaviorSubject<OpenCV.Net.Point2f> ReferenceArmPosition
        -> CricketVR.CreateArmMessage(Address=34)
        -> MulticastSubject ArmCommands

        ExternalizedMapping(X(DisplayName=Minimum, Category=RadialLimits), Y(DisplayName=Maximum, Category=RadialLimits))
        -> Bonsai.Vision.CreatePoint2f(X=0.1, Y=0.27)
        -> BehaviorSubject RadialLimits
        -> CricketVR.CreateArmMessage(Address=35)
        -> MulticastSubject ArmCommands

        GroupWorkflow SetAngleMode
            ExternalizedMapping(Value(DisplayName=AngleMode))
            -> IntProperty(Value=0)
            -> Bonsai.Harp.Format(MessageType=Write, Address=36, PayloadType=S8)
            -> WorkflowOutput
        -> MulticastSubject ArmCommands

    GroupWorkflow HARP_Expander
        ExternalizedMapping(PortName)
        -> GroupWorkflow CreateExpander
            BehaviorSubject<Bonsai.Harp.HarpMessage> ExpanderCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3)
            -> PublishSubject ExpanderEvents
            -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM2)
        -> PublishSubject BehaviorEvents

    GroupWorkflow Cameras
        ExternalizedMapping(CameraTriggerFrequency)
        -> GroupWorkflow CameraController
            ExternalizedMapping(Value(DisplayName=CameraTriggerFrequency))
            -> IntProperty(Value=50)
            -> Take(Count=1)
            -> ReplaySubject CameraTriggerFrequency(BufferSize=nil)

            SubscribeSubject BehaviorEvents
            -> Bonsai.Harp.FilterMessage(Address=92, MessageType=Event) => #5
            Source2=#5 -> PublishSubject FrameEvents

            SubscribeSubject BehaviorEvents
            -> Take(Count=1)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #9
            -> SelectMany SetFrameRate => #10
                SubscribeSubject CameraTriggerFrequency
                -> Bonsai.Harp.Format(MessageType=Write, Address=93, PayloadType=U16)
                -> WorkflowOutput
            GroupWorkflow StartStopCameras => #11
                BehaviorSubject<System.Object> StopCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopCamera, Mask=Digital0) => #1
                BehaviorSubject<System.Object> StartCameras
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartCamera, Mask=Digital0) => #3
                #3, #1 -> Merge
                -> WorkflowOutput
            #10, #9, #11 -> Merge
            -> MulticastSubject BehaviorCommands

        GroupWorkflow Spinnaker1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067305, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker1FrameEvents
            -> WorkflowOutput

        GroupWorkflow Spinnaker2
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> CricketVRCapture(Index=nil, SerialNumber=22067283, ColorProcessing=Default, HarpAddress=92, ExposureTime=19000, Gain=0, Binning=1)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Spinnaker2FrameEvents
            -> WorkflowOutput

        GroupWorkflow Pylon1
            SubscribeSubject FrameEvents => #0
            ExternalizedMapping(SerialNumber) => #1
            #0, #1 -> PylonCricketVRCapture(SerialNumber=21421610, ParameterFile=Calibration\acA1300-60gmNIR_21421610.pfs, HarpAddress=92)
            -> CricketVR.ObserveOnTaskPool
            -> PublishSubject Pylon1FrameEvents
            -> WorkflowOutput

    GroupWorkflow MagneticEncoder
        ExternalizedMapping(SampleRate)
        -> GroupWorkflow MagneticEncoderController
            IntProperty(Value=0) => #0
            ExternalizedMapping(SampleRate) => #1
            #0, #1 -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate250Hz)
            -> MulticastSubject ExpanderCommands

            SubscribeSubject ExpanderEvents
            -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true)
            -> MemberSelector(Selector=Value.Angle)
            -> PublishSubject EncoderValue

            SubscribeSubject EncoderValue
            -> Bonsai.Scripting.ExpressionTransform
              Expression: (Math.Pi) - ((it / 16384.0) * (2.0 * Math.Pi))
            -> BehaviorSubject EncoderAngle

    GroupWorkflow TimestampStream
        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterMessage(Address=44, MessageType=Event)
        -> Bonsai.Harp.Parse(Type=TimestampedS16, IsArray=false)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject TimestampStream

    GroupWorkflow MouseSensors
        Bonsai.Shaders.Input.Mouse(Index=nil) => #0
        ExternalizedMapping(DeviceId(DisplayName=SideMouseID, Category=MouseID)) => #1
        #0, #1 -> WinRawMouse(DeviceId=65595)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        ExternalizedMapping(DeviceId(DisplayName=ForwardMouseID, Category=MouseID)) => #5
        ExternalizedMapping(Value(DisplayName=SideMouseGain, Category=Gain)) => #6
        #4, #6 -> Multiply(Operand=DoubleProperty(Value=-2.6205926323519098E-05))
        -> PublishSubject SideMouse
        #0, #5 -> WinRawMouse(DeviceId=64684277)
        -> MemberSelector(Selector=X)
        -> Bonsai.Dsp.Difference(Order=1) => #11
        ExternalizedMapping(Value(DisplayName=ForwardMouseGain, Category=Gain)) => #12
        #11, #12 -> Multiply(Operand=DoubleProperty(Value=2.6205926323519098E-05))
        -> PublishSubject ForwardMouse

GroupWorkflow Logging
    ExternalizedMapping(Value)
    -> GroupWorkflow LogController
        ExternalizedMapping(Value)
        -> StringProperty(Value="C:\Users\Cricket Team\Desktop\data")
        -> ReplaySubject SessionPath(BufferSize=nil)

        SubscribeSubject SessionPath
        -> Timestamp => #4
        -> MemberSelector(Selector=Timestamp.DateTime)
        -> CricketVR.FormatDate => #6
        #4 -> MemberSelector(Selector=Value) => #7
        #7, #6 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

    SubscribeSubject Spinnaker1FrameEvents
    -> IncludeWorkflow Spinnaker1(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Spinnaker2FrameEvents
    -> IncludeWorkflow Spinnaker2(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Pylon1FrameEvents
    -> IncludeWorkflow Pylon1(Path=Extensions\LogPylonVideo.bonsai, FrameRate=50)

    SubscribeSubject ArmEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmBoard)

    SubscribeSubject ExpanderEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=OutputExpanderBoard)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorBoard)

    SubscribeSubject RodentPosition => #14
    SubscribeSubject TimestampStream => #15
    #14, #15 -> WithLatestFrom
    -> CricketVR.VRElementToHarpMessagecs
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=RodentPosition)

    SubscribeSubject TaskEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=TaskEvents)

    SubscribeSubject ArmCommands => #21
    SubscribeSubject TimestampStream => #22
    #21, #22 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ArmCommands)

    SubscribeSubject BehaviorCommands => #26
    SubscribeSubject TimestampStream => #27
    #26, #27 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=BehaviorCommands)

    SubscribeSubject ExpanderCommands => #31
    SubscribeSubject TimestampStream => #32
    #31, #32 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Write)
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=ExpanderCommands)

    SubscribeSubject ForwardMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=230, PayloadType=Float) => #37
    SubscribeSubject TimestampStream => #38
    #37, #38 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #40
    SubscribeSubject TimestampStream => #41
    SubscribeSubject SideMouse
    -> Bonsai.Harp.Format(MessageType=Event, Address=231, PayloadType=Float) => #43
    #43, #41 -> WithLatestFrom
    -> ModifyMessage(Address=nil, MessageTypeModified=Event) => #45
    #45, #40 -> Merge
    -> IncludeWorkflow(Path=Extensions\LogHarpDevice.bonsai, LogName=MouseSensors)

GroupWorkflow RodentPosition
    SubscribeSubject SideMouse => #0
    SubscribeSubject ForwardMouse => #1
    #0, #1 -> Zip
    -> InputMapping(X(Selector=Item1), Z(Selector=Item2))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=0)
    -> InputMapping(Position(Selector=it))
    -> CricketVR.CreateVrElement(Position(X=-0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject RodentPositionUpdate

    ExternalizedMapping(Orientation(DisplayName=ResetOrientation, Category=Reset), Position(DisplayName=ResetPosition, Category=Reset)) => #8
    Bonsai.Shaders.Input.KeyDown(Key=F4, Modifiers=nil)
    -> BooleanProperty(Value=false) => #10
    BooleanProperty(Value=false) => #11
    #11, #10 -> Merge => #12
    #12, #8 -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0, Z=0))
    -> MulticastSubject ResetRodentPosition

    GroupWorkflow ManualOverride
        Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
        -> CricketVR.KeySelectorScript(KeyFilter=A)
        -> Bonsai.Shaders.CreateVector3(X=-1, Y=0, Z=0) => #2
        #0 -> CricketVR.KeySelectorScript(KeyFilter=D)
        -> Bonsai.Shaders.CreateVector3(X=1, Y=0, Z=0) => #4
        #0 -> CricketVR.KeySelectorScript(KeyFilter=W)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=1) => #6
        #0 -> CricketVR.KeySelectorScript(KeyFilter=S)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1) => #8
        #0 -> CricketVR.KeySelectorScript(KeyFilter=Z)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=1, Z=0) => #10
        #0 -> CricketVR.KeySelectorScript(KeyFilter=X)
        -> Bonsai.Shaders.CreateVector3(X=0, Y=-1, Z=0) => #12
        #2, #4, #6, #8, #10, #12 -> Merge
        -> InputMapping(Position(Selector=it))
        -> CricketVR.CreateVrElement(Position(X=1, Y=0, Z=0), Orientation(X=0, Y=0, Z=0)) => #15
        ExternalizedMapping(Position(Category=PositionGain), Orientation(Category=OrientationGain)) => #16
        #15, #16 -> CricketVR.CreateVrElement(Position(X=0.01, Y=0.01, Z=0.01), Orientation(X=0, Y=0, Z=0)) => #17
        #15, #17 -> Zip
        -> Multiply
        -> MulticastSubject RodentPositionUpdate
        -> WorkflowOutput

    SubscribeSubject ResetRodentPosition
    -> CreateObservable UpdateRodentPosition
        SubscribeSubject RodentPosition
        -> WorkflowOutput

        SubscribeSubject RodentPosition
        -> Take(Count=1) => #3
        SubscribeSubject RodentPositionUpdate => #4
        #3, #4 -> Merge
        -> MemberSelector(Selector=Position)
        -> Scan => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #2, #1 -> Zip
            -> Add => #4
            SubscribeSubject ArenaBounds => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector="Item1,Item2") => #7
            ExternalizedMapping(NumericCorrectionFactor, OffsetBounds) => #8
            #7, #8 -> CricketVR.ClampPositionUpdate(NumericCorrectionFactor=1, OffsetBounds(X=-0.3, Y=0, Z=-0.3))
            -> WorkflowOutput
        Disable GroupWorkflow ManualOrientation => #8
            Bonsai.Shaders.CreateVector3(X=0, Y=1.57079637, Z=0) => #0
            Bonsai.Shaders.Input.MouseWheel
            -> MemberSelector(Selector=EventArgs.Value)
            -> Mod(Operand=IntProperty(Value=50))
            -> Bonsai.Scripting.ExpressionTransform
              Expression: ((it / 50.0) * 2.0 * Math.Pi + 2.0*Math.Pi) % (2.0 * Math.Pi)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: it <= Math.Pi ? it : -1.0 * (2.0*Math.Pi - it)
            -> InputMapping(Y(Selector=it))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=-0.376991123, Z=0) => #7
            #7, #0 -> Merge
            -> WorkflowOutput
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #9
        SubscribeSubject EncoderAngle
        -> InputMapping(Y(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0.5928836, Z=0) => #12
        #9, #12 -> Merge => #13
        #7, #8, #13 -> CombineLatest
        -> InputMapping(Orientation(Selector=Item2), Position(Selector=Item1))
        -> CricketVR.CreateVrElement(Position(X=0, Y=0, Z=0), Orientation(X=0, Y=0.5928836, Z=0))
        -> MulticastSubject RodentPosition
    -> Switch

    SubscribeSubject RodentPosition
    -> MemberSelector(Selector=Position)
    -> MemberSelector(Selector=Z)

GroupWorkflow RenderLoop
    GroupWorkflow DrawSimulatedEnv
        Timer(DueTime=PT0S, Period=PT0.03S)
        -> GroupWorkflow DrawArm
            IntProperty(Value=1000)
            -> PropertyMapping(CanvasSize) => #1
            FloatProperty(Value=1)
            -> PropertyMapping(VRWorldSize) => #3
            FloatProperty(Value=0.3)
            -> PropertyMapping(MonitorBoundingBoxSize) => #5
            SubscribeSubject RodentPosition
            -> MemberSelector(Selector=Position)
            -> PropertyMapping(VRRodentPosition) => #8
            WorkflowInput Source1 => #9
            SubscribeSubject RodentPosition
            -> MemberSelector(Selector=Orientation.Y)
            -> PropertyMapping(VRRodentAngle) => #12
            SubscribeSubject CurrentArmPosition
            -> PropertyMapping(RealCricketPosition) => #14
            SubscribeSubject RadialLimits
            -> MemberSelector(Selector=X)
            -> PropertyMapping(ArmDeadZoneRadius) => #17
            #9, #1, #3, #5, #17, #8, #12, #14 -> CricketVR.DrawFakeVRWorld
              CanvasSize=1000
              VRWorldSize=1
              MonitorBoundingBoxSize=0.3
              ArmDeadZoneRadius=0.1
              VRRodentPosition(X=0, Y=0, Z=0)
              VRRodentAngle=0.5928836
              VRCricketPosition(X=0, Y=0, Z=0)
              RealCricketPosition(X=0, Y=0)
            -> Bonsai.Vision.Flip(Mode=Vertical)
            -> WorkflowOutput
        -> PublishSubject SimulatedEnv
        -> WorkflowOutput

GroupWorkflow ArmControl
    Disable GroupWorkflow GroundTruthFeedback
        SubscribeSubject ArmEvents
        -> Condition ArmMovingTo => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> Equal(Operand=IntProperty(Value=32))
            -> WorkflowOutput
        ExternalizedMapping(Type) => #2
        #1, #2 -> Bonsai.Harp.Parse(Type=Float, IsArray=true) => #3
        -> Disable MemberSelector(Selector=Seconds) => #4
        #3 -> Disable MemberSelector(Selector=Value) => #5
        -> Index(Operand=IntProperty(Value=0)) => #6
        #5 -> Index(Operand=IntProperty(Value=1)) => #7
        #4, #6, #7 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.Item1 as Seconds,
            it.Item2 as Magnitude,
            it.Item3 as Angle)
        -> MemberSelector(Selector="Magnitude,Angle")
        -> CricketVR.PolarToCart
        -> BehaviorSubject TrueArmPosition
        -> WorkflowOutput

    GroupWorkflow InitialArmPosition
        Unit
        -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> MulticastSubject ReferenceArmPosition => #2
        ExternalizedMapping(X(DisplayName=Magnitude), Y(DisplayName=Angle)) => #3
        #2, #3 -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
        -> CricketVR.PolarToCart
        -> MulticastSubject GoToCartPosition
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow ArmUpdates
        BehaviorSubject<OpenCV.Net.Point2f> GoToCartPosition
        -> CreateObservable ArmPositionUpdating
            WorkflowInput Source1 => #0
            -> BooleanProperty(Value=false) => #1
            #1, #0 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject UpdateArmCartPosition => #4
            -> BooleanProperty(Value=false) => #5
            #5, #4 -> Zip => #6
            SubscribeSubject UpdateArmPolarPosition => #7
            -> BooleanProperty(Value=true) => #8
            #8, #7 -> Zip => #9
            #3, #6, #9 -> Merge
            -> Scan Accumulate_dV/dt
                WorkflowInput Source1 => #0
                -> Condition UpdatePolar => #1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2)
                -> CricketVR.CartToPolar => #3
                #1 -> MemberSelector(Selector=Value.Item2) => #4
                #3, #4 -> Zip
                -> Add
                -> CricketVR.PolarToCart => #7
                #0 -> Condition UpdateCart => #8
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value.Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Accumulation.Item2) => #9
                #8 -> MemberSelector(Selector=Value.Item2) => #10
                #9, #10 -> Zip
                -> Add => #12
                #7, #12 -> Merge => #13
                SubscribeSubject RadialLimits
                -> PropertyMapping(MinRadius(Selector=X), MaxRadius(Selector=Y)) => #15
                #13, #15 -> CricketVR.ClampArmPosition(MinRadius=0.1, MaxRadius=0.27) => #16
                -> BooleanProperty(Value=false) => #17
                #17, #16 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject CurrentArmPosition

        BehaviorSubject<OpenCV.Net.Point2f> CurrentArmPosition
        -> CricketVR.CartToPolar
        -> Condition FilterUpdate
            WorkflowInput Source1
            -> MemberSelector(Selector=X)
            -> Bonsai.Dsp.Abs => #2
            SubscribeSubject RadialLimits
            -> MemberSelector(Selector=X)
            -> GroupWorkflow NumericalCorrection => #5
                WorkflowInput Source1
                -> Add(Operand=FloatProperty(Value=0.01))
                -> WorkflowOutput
            SubscribeSubject RadialLimits
            -> MemberSelector(Selector=Y)
            -> GroupWorkflow NumericalCorrection => #8
                WorkflowInput Source1
                -> Subtract(Operand=FloatProperty(Value=0.01))
                -> WorkflowOutput
            #2, #8 -> WithLatestFrom
            -> LessThan => #10
            #2, #5 -> WithLatestFrom
            -> GreaterThan => #12
            #12, #10 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> CricketVR.CreateArmMessage(Address=32)
        -> GateInterval(Interval=PT0S)
        -> MulticastSubject ArmCommands

    GroupWorkflow ArmManualOverride
        GroupWorkflow Manual_Arm_Control
            Bonsai.Shaders.Input.Keyboard(Index=nil) => #0
            -> CricketVR.KeySelectorScript(KeyFilter=Up)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=1) => #2
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Down)
            -> Bonsai.Vision.CreatePoint2f(X=0, Y=-1) => #4
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Left)
            -> Bonsai.Vision.CreatePoint2f(X=-1, Y=0) => #6
            #0 -> CricketVR.KeySelectorScript(KeyFilter=Right)
            -> Bonsai.Vision.CreatePoint2f(X=1, Y=0) => #8
            #2, #4, #6, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=Gain)) => #10
            #9, #10 -> FloatProperty(Value=0.01) => #11
            #9, #11 -> Zip
            -> Multiply
            -> WorkflowOutput
        -> GateInterval(Interval=PT0.01S)
        -> MulticastSubject UpdateArmCartPosition
        -> WorkflowOutput

SubscribeSubject SimulatedEnv

Timer(DueTime=PT2S, Period=PT0S)
-> MulticastSubject StartCameras

SubscribeSubject Pylon1FrameEvents
-> MemberSelector(Selector=Value.Image)

SubscribeSubject Spinnaker1FrameEvents
-> MemberSelector(Selector=Value.Image)

SubscribeSubject Spinnaker2FrameEvents
-> MemberSelector(Selector=Value.Image)

Bonsai.Shaders.CreateWindow
  Width=7680
  Height=1080
  VSync=Off
  SwapSync=false
  ClearColor=DimGray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
