<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Address</rx:KeySelector>
        <rx:ElementSelector />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DataName" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>LogRegisters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DataName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ArmCommands</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>LogName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LogName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DataName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogHarp.bonsai">
              <DataName>ArmCommands_32</DataName>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>