<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>BehaviorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:FilterRegisterAddress">
          <harp:Address>44</harp:Address>
        </harp:Register>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>44</harp:Address>
          <harp:PayloadType>TimestampedS16</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:RangeThreshold">
          <aeon:Lower>8</aeon:Lower>
          <aeon:Upper>30</aeon:Upper>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>